def model CardiovascularSystem as
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit per_millis as
    unit millis {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit mm3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mC_per_s as
    unit coulomb {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit uC_per_s as
    unit coulomb {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit nC_per_s as
    unit coulomb {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit Cm_per_millis as
    unit coulomb;
    unit metre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit um_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit rad_per_s as
    unit radian;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit per_milliL_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit s_per_m3 as
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit s_per_millis as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_ml_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit per_m3_s as
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_kmol_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_M as
    unit J_per_mol;
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg2 as
    unit mmHg {expo: 2};
  enddef;
  def unit Pa_per_mmHg as
    unit pascal;
    unit mmHg {expo: -1};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_C2 as
    unit second {expo: 2};
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit Js2_per_mol2 as
    unit joule;
    unit second {expo: 2};
    unit mole {expo: -2};
  enddef;
  def unit Js_per_mol2 as
    unit joule;
    unit second;
    unit mole {expo: -2};
  enddef;
  def unit Js_per_C2 as
    unit joule;
    unit second;
    unit coulomb {expo: -2};
  enddef;
  def unit J_per_mol2 as
    unit joule;
    unit mole {expo: -2};
  enddef;
  def unit C2_per_J_s as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C2 as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit C2_per_J as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit milliM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit mol_per_m2_s as
    unit mole;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit mM_m_per_s as
    unit mM;
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit J_per_m2_s as
    unit joule;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit Js_per_m4 as
    unit joule;
    unit second;
    unit metre {expo: -4};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_mM_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m6_per_mol2_s as
    unit metre {expo: 6};
    unit mole {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_C as
    unit coulomb {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit Js2_per_m2 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -2};
  enddef;
  def unit Js_per_m2 as
    unit joule;
    unit second;
    unit metre {expo: -2};
  enddef;
  def unit J_per_m2 as
    unit joule;
    unit metre {expo: -2};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit rad_per_s2 as
    unit radian;
    unit second {expo: -2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit m5_per_Js2 as
    unit joule {expo: -1};
    unit second {expo: -2};
    unit metre {expo: 5};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mm6_per_J as
    unit metre {expo: 6, pref: milli};
    unit joule {expo: -1};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s2 as
    unit metre {expo: 3};
    unit second {expo: -2};
  enddef;
  def unit mm3_per_s2 as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -2};
  enddef;
  def unit per_mm3 as
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit UnitValve as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit J_per_m3 {expo: -0.5};
  enddef;
  def unit J_per_m9 as
    unit joule;
    unit metre {expo: -9};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit V_per_s as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit V2 as
    unit volt {expo: 2};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit millimol as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_s as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_megamolar as
    unit millimolar;
    unit mole {expo: -1, pref: mega};
    unit litre;
  enddef;
  def unit per_millimol_milliS as
    unit mole {expo: -1, pref: milli};
    unit siemens {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_millis as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_s as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit m3_per_Fs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit nanoA_per_A as
    unit ampere {pref: nano};
    unit ampere {expo: -1};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_J_millis as
    unit metre {expo: 3};
    unit joule {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_mol_millis as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_millimol_s as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimol_per_m3 as
    unit metre {expo: -3};
    unit mole {pref: milli};
  enddef;
  def unit Hz2 as
    unit second {expo: -2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit J_per_m4_s as
    unit metre {expo: -4};
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit J_per_mmol as
    unit joule;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit m3_per_mol_per_sec as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_kPa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit mol_per_m3_per_Pa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1};
  enddef;
  def unit m3_per_mol_per_s as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit dim as
    unit dimensionless;
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_s as
    unit joule {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit nC_per_fmol as
    unit coulomb {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit nJ_per_fmol as
    unit joule {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_nC as
    unit joule {pref: nano};
    unit nC {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit uF as
    unit farad {pref: micro};
  enddef;
  def unit nF as
    unit farad {pref: nano};
  enddef;
  def unit volt_per_sec as
    unit second {expo: -1};
    unit volt;
  enddef;
  def unit J_per_K_per_mmol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit m_cubed as
    unit metre {pref: kilo};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit m_cubed_per_second as
    unit m_cubed;
    unit per_s;
  enddef;
  def unit micromolar_m_cubed as
    unit micromolar;
    unit m_cubed;
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit pC as
    unit coulomb {pref: pico};
  enddef;
  def unit C_per_mmol as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoS as
    unit siemens {pref: pico};
  enddef;
  def unit picoS_per_fmol as
    unit picoS;
    unit fmol {expo: -1};
  enddef;
  def unit L_fmol_per_J_per_s as
    unit litre;
    unit fmol;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit picoA_per_picoFarad as
    unit picoA;
    unit picoFarad {expo: -1};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit picoFarad as
    unit farad {pref: pico};
  enddef;
  def unit cm3_per_second as
    unit metre {expo: 3, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit um3_per_second as
    unit metre {expo: 3, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit m3mM as
    unit metre {expo: 3};
    unit mM;
  enddef;
  def unit ms2 as
    unit ms {expo: 2};
  enddef;
  def unit nM3_per_ps as
    unit metre {expo: 3, pref: nano};
    unit second {expo: -1, pref: pico};
  enddef;
  def unit per_s_squared_m_cubed as
    unit second {expo: -2};
    unit metre {expo: -3};
  enddef;
  def unit per_meters_cubed as
    unit metre {expo: -3};
  enddef;
  def unit umeter3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit mill1 as
    unit volt {expo: -1};
    unit volt {pref: milli};
  enddef;
  def unit picoV as
    unit volt {pref: pico};
  enddef;
  def unit pic0 as
    unit volt {expo: -1};
    unit picoV;
  enddef;
  def unit nanoV as
    unit volt {pref: nano};
  enddef;
  def unit nan0 as
    unit volt {expo: -1};
    unit nanoV;
  enddef;
  def unit pL_per_s_per_fmol as
    unit litre {pref: pico};
    unit second {expo: -1};
    unit mole {expo: -1, pref: femto};
  enddef;
  def unit kPa as
    unit pascal {pref: kilo};
  enddef;
  def unit L_per_s as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_per_L as
    unit pascal {pref: kilo};
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit kPa_per_s as
    unit kPa;
    unit second {expo: -1};
  enddef;
  def unit L_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_s_per_L as
    unit pascal {pref: kilo};
    unit second;
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit pL_L_per_J_per_s as
    unit pL;
    unit litre;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit pL as
    unit litre {pref: pico};
  enddef;
  def unit pL_per_s as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit pL_per_kPa_per_s as
    unit pL;
    unit kPa {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit L_per_mmol as
    unit litre;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit nm as
    unit metre {pref: nano};
  enddef;
  def unit um2 as
    unit metre {expo: 2, pref: micro};
  enddef;
  def unit um2_per_s as
    unit metre {expo: 2, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit L_fmol_per_J_per_s_1 as
    unit litre;
    unit fmol;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit pL_L_per_J_per_s_1 as
    unit pL;
    unit litre;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_fmol_1 as
    unit fmol {expo: -1};
  enddef;
  def unit fmol_per_s_1 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_1 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit per_mM_1 as
    unit mM {expo: -1};
  enddef;
  def unit C_per_mmol_2 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit fmol_per_s_2 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit pL_per_s_1 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit per_mM_2 as
    unit mol_per_m3 {expo: -1};
  enddef;
  def unit fmol_per_s_3 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit pL_per_s_2 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_3 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit L_fmol_per_J_per_s_2 as
    unit litre;
    unit fmol;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit pL_L_per_J_per_s_2 as
    unit pL;
    unit litre;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_4 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit fmol_per_s_4 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit pL_per_s_3 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit per_mM_3 as
    unit mol_per_m3 {expo: -1};
  enddef;
  def unit C_per_mmol_5 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit fmol_per_s_5 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit pL_per_s_4 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_6 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit per_mM_4 as
    unit mol_per_m3 {expo: -1};
  enddef;
  def unit fmol_per_s_6 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit pL_per_s_5 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s_7 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit pL_per_s_6 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_7 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit L_fmol_per_J_per_s_3 as
    unit litre;
    unit fmol;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit pL_L_per_J_per_s_3 as
    unit pL;
    unit litre;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_8 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit per_fmol_2 as
    unit fmol {expo: -1};
  enddef;
  def unit per_mM_5 as
    unit mol_per_m3 {expo: -1};
  enddef;
  def unit fmol_per_s_8 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit pL_per_s_7 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit pL_per_kPa_per_s_1 as
    unit pL;
    unit kPa {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit pL_per_s_8 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit pL_per_kPa_per_s_2 as
    unit pL;
    unit kPa {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit pL_per_s_9 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_9 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit per_fmol_3 as
    unit fmol {expo: -1};
  enddef;
  def unit per_mM_6 as
    unit mol_per_m3 {expo: -1};
  enddef;
  def unit fmol_per_s_9 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_10 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit pL_per_s_10 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s_10 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s_11 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit pL_per_s_11 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_11 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit L_fmol_per_J_per_s_4 as
    unit litre;
    unit fmol;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit pL_L_per_J_per_s_4 as
    unit pL;
    unit litre;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_12 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit per_mM_7 as
    unit mol_per_m3 {expo: -1};
  enddef;
  def unit fmol_per_s_12 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit pL_per_s_12 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_13 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit per_mM_8 as
    unit mol_per_m3 {expo: -1};
  enddef;
  def unit fmol_per_s_13 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit pL_per_s_13 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s_14 as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit pL_per_s_14 as
    unit pL;
    unit second {expo: -1};
  enddef;
  def unit C_per_mmol_14 as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit L_fmol_per_J_per_s_5 as
    unit litre;
    unit fmol;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit pL_L_per_J_per_s_5 as
    unit pL;
    unit litre;
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;

  def comp parameters as
    var q_V_init_lumen: pL {init: 50, interface: public};
    var q_Na_init_lumen: fmol {init: 7000, interface: public};
    var q_Cl_init_lumen: fmol {init: 5000, interface: public};
    var q_K_init_lumen: fmol {init: 200, interface: public};
    var u_P_lumen: kPa {init: 0, interface: public};
    var G_muc_lumen: picoS {init: 1, interface: public};
    var omega_Na_muc_transport: L_fmol_per_J_per_s_1 {init: 1, interface: public};
    var omega_Cl_muc_transport: L_fmol_per_J_per_s_1 {init: 1, interface: public};
    var omega_K_muc_transport: L_fmol_per_J_per_s_1 {init: 1, interface: public};
    var sigma_Na_muc_transport: dimensionless {init: 0, interface: public};
    var sigma_Cl_muc_transport: dimensionless {init: 0, interface: public};
    var sigma_K_muc_transport: dimensionless {init: 0, interface: public};
    var L_P_muc_transport: pL_L_per_J_per_s_1 {init: 1, interface: public};
    var q_V_init_mucus: pL {init: 50, interface: public};
    var q_Na_init_mucus: fmol {init: 7000, interface: public};
    var q_Cl_init_mucus: fmol {init: 5000, interface: public};
    var q_K_init_mucus: fmol {init: 200, interface: public};
    var u_e_mucus_init_mucus: volt {init: 0, interface: public};
    var u_e_Donnan_mucus: volt {init: -0.015, interface: public};
    var A_mucus: um2 {init: 7538, interface: public};
    var chi_p_mucus: dimensionless {init: 0.3, interface: public};
    var nu_c_mucus: mol_per_m3 {init: 1.00E+00, interface: public};
    var q_V_init_cell: pL {init: 300, interface: public};
    var q_Na_init_cell: fmol {init: 3000, interface: public};
    var q_K_init_cell: fmol {init: 43200, interface: public};
    var u_e_cell_init_cell: volt {init: -0.05, interface: public};
    var c_Cl_cell: mol_per_m3 {init: 20, interface: public};
    var c_ATP_init_cell: mol_per_m3 {init: 10, interface: public};
    var c_ADP_init_cell: mol_per_m3 {init: 0.01, interface: public};
    var c_Pi_init_cell: mol_per_m3 {init: 0.01, interface: public};
    var u_P_cell: kPa {init: 0, interface: public};
    var q_V_init_int_fluid: pL {init: 100, interface: public};
    var q_Na_init_int_fluid: fmol {init: 14000, interface: public};
    var q_Cl_init_int_fluid: fmol {init: 10000, interface: public};
    var q_K_init_int_fluid: fmol {init: 400, interface: public};
    var u_P_int_fluid: kPa {init: 0, interface: public};
    var omega_Na_para_transport: L_fmol_per_J_per_s_1 {init: 1, interface: public};
    var omega_Cl_para_transport: L_fmol_per_J_per_s_1 {init: 1, interface: public};
    var omega_K_para_transport: L_fmol_per_J_per_s_1 {init: 1, interface: public};
    var sigma_Na_para_transport: dimensionless {init: 0.9, interface: public};
    var sigma_Cl_para_transport: dimensionless {init: 0.4, interface: public};
    var sigma_K_para_transport: dimensionless {init: 0.95, interface: public};
    var L_P_para_transport: pL_L_per_J_per_s_1 {init: 1, interface: public};
    var q_1_init_ENaC: fmol {init: 0.0015, interface: public};
    var q_2_init_ENaC: fmol {init: 0.0015, interface: public};
    var q_3_init_ENaC: fmol {init: 0.0015, interface: public};
    var q_4_init_ENaC: fmol {init: 0.0015, interface: public};
    var K_1_ENaC: per_fmol_1 {init: 1.39551477, interface: public};
    var K_2_ENaC: per_fmol_1 {init: 1, interface: public};
    var K_3_ENaC: per_fmol_1 {init: 1, interface: public};
    var K_4_ENaC: per_fmol_1 {init: 0.5, interface: public};
    var kappa_1_ENaC: fmol_per_s_1 {init: 1, interface: public};
    var kappa_2_ENaC: fmol_per_s_1 {init: 1, interface: public};
    var kappa_3_ENaC: fmol_per_s_1 {init: 1, interface: public};
    var kappa_4_ENaC: fmol_per_s_1 {init: 1, interface: public};
    var P_Na_ENaC: pL_per_s_per_fmol {init: 1, interface: public};
    var P_o_ENaC: pL_per_s_per_fmol {init: 1, interface: public};
    var kappa_AQ_AQ_api: pL_L_per_J_per_s_1 {init: 1, interface: public};
    var kappa_AQ_AQ_bas: pL_L_per_J_per_s_1 {init: 4, interface: public};
    var z_1_NKE: dimensionless {init: 0.17, interface: public};
    var q_1_init_NKE: fmol {init: 6.15E-05, interface: public};
    var q_2_init_NKE: fmol {init: 100, interface: public};
    var q_3_init_NKE: fmol {init: 100, interface: public};
    var q_4_init_NKE: fmol {init: 6.20E-05, interface: public};
    var q_5_init_NKE: fmol {init: 0.000468864, interface: public};
    var q_6_init_NKE: fmol {init: 0.051048264, interface: public};
    var K_1_NKE: per_fmol_1 {init: 1, interface: public};
    var K_2_NKE: per_fmol_1 {init: 1, interface: public};
    var K_3_NKE: per_fmol_1 {init: 1, interface: public};
    var K_4_NKE: per_fmol_1 {init: 1, interface: public};
    var K_5_NKE: per_fmol_1 {init: 1, interface: public};
    var K_6_NKE: per_fmol_1 {init: 1, interface: public};
    var kappa_1_NKE: fmol_per_s_1 {init: 1, interface: public};
    var kappa_2_NKE: fmol_per_s_1 {init: 1, interface: public};
    var kappa_3_NKE: fmol_per_s_1 {init: 1, interface: public};
    var kappa_4_NKE: fmol_per_s_1 {init: 1, interface: public};
    var kappa_5_NKE: fmol_per_s_1 {init: 1, interface: public};
    var kappa_6_NKE: fmol_per_s_1 {init: 1, interface: public};
    var N_Kir_Kir: fmol {init: 1, interface: public};
    var P_Kir_Kir: pL_per_s_per_fmol {init: 1, interface: public};
    var omega_Na_cap_transport: L_fmol_per_J_per_s_1 {init: 1, interface: public};
    var omega_Cl_cap_transport: L_fmol_per_J_per_s_1 {init: 1, interface: public};
    var omega_K_cap_transport: L_fmol_per_J_per_s_1 {init: 1, interface: public};
    var sigma_Na_cap_transport: dimensionless {init: 0.05, interface: public};
    var sigma_Cl_cap_transport: dimensionless {init: 0.05, interface: public};
    var sigma_K_cap_transport: dimensionless {init: 0.05, interface: public};
    var L_P_cap_transport: pL_L_per_J_per_s_1 {init: 1, interface: public};
    var q_V_init_blood: pL {init: 100, interface: public};
    var q_Na_init_blood: fmol {init: 14000, interface: public};
    var q_Cl_init_blood: fmol {init: 10000, interface: public};
    var q_K_init_blood: fmol {init: 400, interface: public};
    var q_albumin_blood: fmol {init: 60, interface: public};
    var q_proteins_blood: fmol {init: 30, interface: public};
    var u_P_blood: kPa {init: 16, interface: public};
    var u_e_Donnan_blood: volt {init: -0.003, interface: public};
    var G_m_blood: picoS {init: 5000, interface: public};
    var q_V_init_lymph: pL {init: 100, interface: public};
    var q_Na_init_lymph: fmol {init: 14000, interface: public};
    var q_Cl_init_lymph: fmol {init: 10000, interface: public};
    var q_K_init_lymph: fmol {init: 400, interface: public};
    var q_albumin_lymph: fmol {init: 30, interface: public};
    var q_proteins_lymph: fmol {init: 15, interface: public};
    var u_P_lymph: kPa {init: 0, interface: public};
    var u_e_Donnan_lymph: volt {init: -0.0015, interface: public};
    var G_m_lymph: picoS {init: 5000, interface: public};
    var omega_Na_lymph_transport: L_fmol_per_J_per_s_1 {init: 1, interface: public};
    var omega_Cl_lymph_transport: L_fmol_per_J_per_s_1 {init: 1, interface: public};
    var omega_K_lymph_transport: L_fmol_per_J_per_s_1 {init: 1, interface: public};
    var sigma_Na_lymph_transport: dimensionless {init: 0.05, interface: public};
    var sigma_Cl_lymph_transport: dimensionless {init: 0.05, interface: public};
    var sigma_K_lymph_transport: dimensionless {init: 0.05, interface: public};
    var L_P_lymph_transport: pL_L_per_J_per_s_1 {init: 1, interface: public};
  enddef;

  def comp parameters_global as
    var zNa: dimensionless {init: 1, interface: public};
    var zK: dimensionless {init: 1, interface: public};
    var zCl: dimensionless {init: -1, interface: public};
    var R: J_per_K_per_mmol {init: 0.008314, interface: public};
    var T: kelvin {init: 310, interface: public};
    var F: C_per_mmol_1 {init: 96.485, interface: public};
    var K_Na: per_mM_1 {init: 1, interface: public};
    var K_K: per_mM_1 {init: 1, interface: public};
    var K_Cl: per_mM_1 {init: 1, interface: public};
    var phi_p_o: dimensionless {init: 0.05, interface: public};
    var V_w: L_per_mmol {init: 0.018, interface: public};
    var C_m_bas: picoF {init: 7800, interface: public};
    var C_m_api: picoF {init: 3900, interface: public};
    var K_ADP: per_mM_1 {init: 1, interface: public};
    var K_ATP: per_mM_1 {init: 1, interface: public};
    var K_Pi: per_mM_1 {init: 1, interface: public};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp lumen_module as
    var t: second {interface: public};
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_2 {interface: public};
    var q_V_init: pL {interface: public};
    var q_Na_init: fmol {interface: public};
    var q_Cl_init: fmol {interface: public};
    var q_K_init: fmol {interface: public};
    var u_e_lumen: volt {interface: public};
    var u_mu_e_Na: J_per_mmol {interface: public};
    var u_mu_e_K: J_per_mmol {interface: public};
    var u_mu_e_Cl: J_per_mmol {interface: public};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var u_P: kPa {interface: public};
    var u_P_pi: kPa {interface: public};
    var q_V: pL {init: q_V_init, interface: public};
    var q_Na: fmol {init: q_Na_init, interface: public};
    var q_K: fmol {init: q_K_init, interface: public};
    var q_Cl: fmol {init: q_Cl_init, interface: public};
    var c_Na: mol_per_m3 {interface: public};
    var c_K: mol_per_m3 {interface: public};
    var c_Cl: mol_per_m3 {interface: public};
    var v_Na_lum: fmol_per_s_2 {interface: public};
    var v_K_lum: fmol_per_s_2 {interface: public};
    var v_Cl_lum: fmol_per_s_2 {interface: public};
    var v_V_lum: pL_per_s_1 {interface: public};
    var I_lum: nSmV {interface: public};
    var K_Na: per_mM_2 {interface: public};
    var K_K: per_mM_2 {interface: public};
    var K_Cl: per_mM_2 {interface: public};
    var G_muc: picoS {interface: public};
    var phi_p: dimensionless {interface: public};
    var phi_p_o: dimensionless {interface: public};
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    c_Cl = q_Cl/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    // conservation laws
    u_P_pi = u_P-(u_pi_Na+u_pi_K+u_pi_Cl);
    u_mu_e_Na = R*T*ln(K_Na*c_Na)+zNa*F*u_e_lumen;
    u_mu_e_K = R*T*ln(K_K*c_K)+zK*F*u_e_lumen;
    u_mu_e_Cl = R*T*ln(K_Cl*c_Cl)+zCl*F*u_e_lumen;
    // ode(q_Na, t) = -v_Na_lum;
    // ode(q_K, t)  = -v_K_lum;
    // ode(q_Cl, t) = -v_Cl_lum;
    // ode(q_V, t)  = -v_V_lum;
    ode(q_Na, t) = 0{fmol_per_s_2};
    ode(q_K, t) = 0{fmol_per_s_2};
    ode(q_Cl, t) = 0{fmol_per_s_2};
    ode(q_V, t) = 0{pL_per_s_1};
    u_e_lumen = I_lum/G_muc;
  enddef;

  def comp muc_transport_module as
    var t: second {interface: public};
    var u_P_pi_o: kPa {interface: public};
    var u_P_pi_i: kPa {interface: public};
    var u_P_pi_diff: kPa;
    var u_mu_e_Na_o: J_per_mmol {interface: public};
    var u_mu_e_Cl_o: J_per_mmol {interface: public};
    var u_mu_e_K_o: J_per_mmol {interface: public};
    var u_mu_e_Na_i: J_per_mmol {interface: public};
    var u_mu_e_Cl_i: J_per_mmol {interface: public};
    var u_mu_e_K_i: J_per_mmol {interface: public};
    var u_mu_e_Na_diff: J_per_mmol;
    var u_mu_e_Cl_diff: J_per_mmol;
    var u_mu_e_K_diff: J_per_mmol;
    var c_Na_o: mol_per_m3 {interface: public};
    var c_Cl_o: mol_per_m3 {interface: public};
    var c_K_o: mol_per_m3 {interface: public};
    var c_Na_i: mol_per_m3 {interface: public};
    var c_Cl_i: mol_per_m3 {interface: public};
    var c_K_i: mol_per_m3 {interface: public};
    var c_Na_bar: mol_per_m3;
    var c_Cl_bar: mol_per_m3;
    var c_K_bar: mol_per_m3;
    var v_Na: fmol_per_s_3 {interface: public};
    var v_Cl: fmol_per_s_3 {interface: public};
    var v_K: fmol_per_s_3 {interface: public};
    var v_V: pL_per_s_2 {interface: public};
    var I_para: nSmV {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_3 {interface: public};
    var zNa: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var omega_Na: L_fmol_per_J_per_s_2 {interface: public};
    var omega_Cl: L_fmol_per_J_per_s_2 {interface: public};
    var omega_K: L_fmol_per_J_per_s_2 {interface: public};
    var L_P: pL_L_per_J_per_s_2 {interface: public};
    var sigma_Na: dimensionless {interface: public};
    var sigma_Cl: dimensionless {interface: public};
    var sigma_K: dimensionless {interface: public};
    c_Na_bar = sel
      case abs(c_Na_o-c_Na_i) < 1e-7{mol_per_m3}:
        c_Na_o;
      otherwise:
        (c_Na_o-c_Na_i)/ln(c_Na_o/c_Na_i);
    endsel;
    c_K_bar = sel
      case abs(c_K_o-c_K_i) < 1e-7{mol_per_m3}:
        c_K_o;
      otherwise:
        (c_K_o-c_K_i)/ln(c_K_o/c_K_i);
    endsel;
    c_Cl_bar = sel
      case abs(c_Cl_o-c_Cl_i) < 1e-7{mol_per_m3}:
        c_Cl_o;
      otherwise:
        (c_Cl_o-c_Cl_i)/ln(c_Cl_o/c_Cl_i);
    endsel;
    u_P_pi_diff = u_P_pi_o-u_P_pi_i;
    u_mu_e_Na_diff = u_mu_e_Na_o-u_mu_e_Na_i;
    u_mu_e_Cl_diff = u_mu_e_Cl_o-u_mu_e_Cl_i;
    u_mu_e_K_diff = u_mu_e_K_o-u_mu_e_K_i;
    // constitutive relations
    v_V = L_P*((1{dimensionless}-sigma_Na)*c_Na_bar*u_mu_e_Na_diff+(1{dimensionless}-sigma_K)*c_K_bar*u_mu_e_K_diff+(1{dimensionless}-sigma_Cl)*c_Cl_bar*u_mu_e_Cl_diff+u_P_pi_diff);
    v_Na = omega_Na*c_Na_bar*u_mu_e_Na_diff+(1{dimensionless}-sigma_Na)*c_Na_bar*v_V;
    v_Cl = omega_Cl*c_Cl_bar*u_mu_e_Cl_diff+(1{dimensionless}-sigma_Cl)*c_Cl_bar*v_V;
    v_K = omega_K*c_K_bar*u_mu_e_K_diff+(1{dimensionless}-sigma_K)*c_K_bar*v_V;
    I_para = zNa*F*v_Na+zCl*F*v_Cl+zK*F*v_K;
  enddef;

  def comp mucus_module as
    var t: second {interface: public};
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_4 {interface: public};
    var V_w: L_per_mmol {interface: public};
    var RT: J_per_mmol;
    var q_V_init: pL {interface: public};
    var q_Na_init: fmol {interface: public};
    var q_Cl_init: fmol {interface: public};
    var q_K_init: fmol {interface: public};
    var u_e_mucus_init: volt {interface: public};
    var u_e_mucus_ion: volt {init: u_e_mucus_init};
    var u_mu_e_Na: J_per_mmol {interface: public};
    var u_mu_e_K: J_per_mmol {interface: public};
    var u_mu_e_Cl: J_per_mmol {interface: public};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var q_V: pL {init: q_V_init, interface: public};
    var q_Na: fmol {init: q_Na_init, interface: public};
    var q_K: fmol {init: q_K_init, interface: public};
    var q_Cl: fmol {init: q_Cl_init, interface: public};
    var c_Na: mol_per_m3 {interface: public};
    var c_K: mol_per_m3 {interface: public};
    var c_Cl: mol_per_m3 {interface: public};
    var v_Na_para: fmol_per_s_4 {interface: public};
    var v_K_para: fmol_per_s_4 {interface: public};
    var v_Cl_para: fmol_per_s_4 {interface: public};
    var v_V_para: pL_per_s_3 {interface: public};
    var v_Na_lum: fmol_per_s_4 {interface: public};
    var v_K_lum: fmol_per_s_4 {interface: public};
    var v_Cl_lum: fmol_per_s_4 {interface: public};
    var v_V_lum: pL_per_s_3 {interface: public};
    var v_ENaC_o: fmol_per_s_4 {interface: public};
    var v_AQ_o: pL_per_s_3 {interface: public};
    var u_e_Donnan: volt {interface: public};
    var u_e_mucus: volt {interface: public};
    var u_P_pi: kPa {interface: public};
    var L: mm {interface: public};
    var A: um2 {interface: public};
    var C_m_bas: picoF {interface: public};
    var C_m_api: picoF {interface: public};
    var K_Na: per_mM_3 {interface: public};
    var K_K: per_mM_3 {interface: public};
    var K_Cl: per_mM_3 {interface: public};
    var u_Pi_mix: kPa {interface: public};
    var u_Pi_elastic: kPa {interface: public};
    var u_Pi_ion: kPa {interface: public};
    var phi_p: dimensionless {interface: public};
    var phi_p_o: dimensionless {interface: public};
    var chi_p: dimensionless {interface: public};
    var nu_c: mol_per_m3 {interface: public};
    var I_para: nSmV {interface: public};
    var I_bas: nSmV {interface: public};
    var I_api: nSmV {interface: public};
    var I_lum: nSmV {interface: public};
    RT = R*T;
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    c_Cl = q_Cl/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    u_Pi_mix = RT/V_w*(ln(1{dimensionless}-phi_p)+phi_p+chi_p*sqr(phi_p));
    u_Pi_elastic = nu_c*RT*(0.5{dimensionless}*phi_p-pow(phi_p, 1{dimensionless}/3{dimensionless}));
    phi_p = phi_p_o*q_V_init/q_V;
    L = q_V/A;
    // conservation laws
    u_Pi_ion = -(u_pi_Na+u_pi_K+u_pi_Cl);
    u_P_pi = u_Pi_elastic+u_Pi_mix+u_Pi_ion;
    u_mu_e_Na = R*T*ln(K_Na*c_Na)+zNa*F*u_e_mucus;
    u_mu_e_K = R*T*ln(K_K*c_K)+zK*F*u_e_mucus;
    u_mu_e_Cl = R*T*ln(K_Cl*c_Cl)+zCl*F*u_e_mucus;
    ode(q_Na, t) = v_Na_lum-v_Na_para+v_ENaC_o;
    ode(q_K, t) = v_K_lum-v_K_para;
    ode(q_Cl, t) = v_Cl_lum-v_Cl_para;
    ode(q_V, t) = v_V_lum-v_V_para+v_AQ_o;
    ode(u_e_mucus_ion, t) = (I_lum-(I_para+I_bas))/C_m_bas+(I_lum+I_api-I_para)/C_m_api;
    u_e_mucus = u_e_mucus_ion+u_e_Donnan;
  enddef;

  def comp cell_module as
    var t: second {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_5 {interface: public};
    var q_V_init: pL {interface: public};
    var q_Na_init: fmol {interface: public};
    var q_K_init: fmol {interface: public};
    var u_e_cell_init: volt {interface: public};
    var u_e_cell: volt {init: u_e_cell_init, interface: public};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var u_P: kPa {interface: public};
    var u_P_pi: kPa {interface: public};
    var q_V: pL {init: q_V_init, interface: public};
    var q_Na: fmol {init: q_Na_init, interface: public};
    var q_K: fmol {init: q_K_init, interface: public};
    var c_ATP_init: mol_per_m3 {interface: public};
    var c_ADP_init: mol_per_m3 {interface: public};
    var c_Pi_init: mol_per_m3 {interface: public};
    var c_Na: mol_per_m3 {interface: public};
    var c_K: mol_per_m3 {interface: public};
    var c_Cl: mol_per_m3 {interface: public};
    var c_ADP: mol_per_m3 {init: c_ADP_init, interface: public};
    var c_ATP: mol_per_m3 {init: c_ATP_init, interface: public};
    var c_Pi: mol_per_m3 {init: c_Pi_init, interface: public};
    var v_ENaC_i: fmol_per_s_5 {interface: public};
    var v_AQ_api_i: pL_per_s_4 {interface: public};
    var v_Kir_i: fmol_per_s_5 {interface: public};
    var v_NKE_K_i: fmol_per_s_5 {interface: public};
    var v_NKE_Na_i: fmol_per_s_5 {interface: public};
    var v_AQ_bas_i: pL_per_s_4 {interface: public};
    var I_para: nSmV {interface: public};
    var I_bas: nSmV {interface: public};
    var I_lum: nSmV {interface: public};
    var C_m_bas: picoF {interface: public};
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    // conservation laws
    u_P_pi = u_P-(u_pi_Na+u_pi_K+u_pi_Cl);
    ode(q_Na, t) = v_ENaC_i+v_NKE_Na_i;
    ode(q_K, t) = v_NKE_K_i+v_Kir_i;
    ode(q_V, t) = v_AQ_api_i+v_AQ_bas_i;
    ode(u_e_cell, t) = (I_lum-(I_para+I_bas))/C_m_bas;
  enddef;

  def comp int_fluid_module as
    var t: second {interface: public};
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_6 {interface: public};
    var q_V_init: pL {interface: public};
    var q_Na_init: fmol {interface: public};
    var q_Cl_init: fmol {interface: public};
    var q_K_init: fmol {interface: public};
    var u_e_int: volt {init: 0, interface: public};
    var u_mu_Na: J_per_mmol;
    var u_mu_K: J_per_mmol;
    var u_mu_Cl: J_per_mmol;
    var u_mu_e_Na: J_per_mmol {interface: public};
    var u_mu_e_K: J_per_mmol {interface: public};
    var u_mu_e_Cl: J_per_mmol {interface: public};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var u_P: kPa {interface: public};
    var u_P_pi: kPa {interface: public};
    var q_V: pL {init: q_V_init, interface: public};
    var q_Na: fmol {init: q_Na_init, interface: public};
    var q_K: fmol {init: q_K_init, interface: public};
    var q_Cl: fmol {init: q_Cl_init, interface: public};
    var c_Na: mol_per_m3 {interface: public};
    var c_K: mol_per_m3 {interface: public};
    var c_Cl: mol_per_m3 {interface: public};
    var K_Na: per_mM_4 {interface: public};
    var K_K: per_mM_4 {interface: public};
    var K_Cl: per_mM_4 {interface: public};
    var v_Na_para: fmol_per_s_6 {interface: public};
    var v_K_para: fmol_per_s_6 {interface: public};
    var v_Cl_para: fmol_per_s_6 {interface: public};
    var v_V_para: pL_per_s_5 {interface: public};
    var v_Na_cap: fmol_per_s_6 {interface: public};
    var v_K_cap: fmol_per_s_6 {interface: public};
    var v_Cl_cap: fmol_per_s_6 {interface: public};
    var v_V_cap: pL_per_s_5 {interface: public};
    var v_Na_lym: fmol_per_s_6 {interface: public};
    var v_K_lym: fmol_per_s_6 {interface: public};
    var v_Cl_lym: fmol_per_s_6 {interface: public};
    var v_V_lym: pL_per_s_5 {interface: public};
    var v_NKE_Na_o: fmol_per_s_6 {interface: public};
    var v_NKE_K_o: fmol_per_s_6 {interface: public};
    var v_Kir_o: fmol_per_s_6 {interface: public};
    var v_AQ_o: pL_per_s_5 {interface: public};
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    c_Cl = q_Cl/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    u_mu_Na = R*T*ln(K_Na*c_Na);
    u_mu_K = R*T*ln(K_K*c_K);
    u_mu_Cl = R*T*ln(K_Cl*c_Cl);
    u_P_pi = u_P-(u_pi_Na+u_pi_K+u_pi_Cl);
    u_mu_e_Na = u_mu_Na+zNa*F*u_e_int;
    u_mu_e_K = u_mu_K+zK*F*u_e_int;
    u_mu_e_Cl = u_mu_Cl+zCl*F*u_e_int;
    ode(q_Na, t) = v_Na_para-v_Na_cap-v_Na_lym+v_NKE_Na_o;
    ode(q_K, t) = v_K_para-v_K_cap-v_K_lym+v_NKE_K_o+v_Kir_o;
    ode(q_Cl, t) = v_Cl_para-v_Cl_lym-v_Cl_cap;
    ode(q_V, t) = v_V_para-v_V_lym-v_V_cap+v_AQ_o;
  enddef;

  def comp para_transport_module as
    var t: second {interface: public};
    var u_P_pi_o: kPa {interface: public};
    var u_P_pi_i: kPa {interface: public};
    var u_P_pi_diff: kPa;
    var u_mu_e_Na_o: J_per_mmol {interface: public};
    var u_mu_e_Cl_o: J_per_mmol {interface: public};
    var u_mu_e_K_o: J_per_mmol {interface: public};
    var u_mu_e_Na_i: J_per_mmol {interface: public};
    var u_mu_e_Cl_i: J_per_mmol {interface: public};
    var u_mu_e_K_i: J_per_mmol {interface: public};
    var u_mu_e_Na_diff: J_per_mmol;
    var u_mu_e_Cl_diff: J_per_mmol;
    var u_mu_e_K_diff: J_per_mmol;
    var c_Na_o: mol_per_m3 {interface: public};
    var c_Cl_o: mol_per_m3 {interface: public};
    var c_K_o: mol_per_m3 {interface: public};
    var c_Na_i: mol_per_m3 {interface: public};
    var c_Cl_i: mol_per_m3 {interface: public};
    var c_K_i: mol_per_m3 {interface: public};
    var c_Na_bar: mol_per_m3;
    var c_Cl_bar: mol_per_m3;
    var c_K_bar: mol_per_m3;
    var v_Na: fmol_per_s_7 {interface: public};
    var v_Cl: fmol_per_s_7 {interface: public};
    var v_K: fmol_per_s_7 {interface: public};
    var v_V: pL_per_s_6 {interface: public};
    var I_para: nSmV {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_7 {interface: public};
    var zNa: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var omega_Na: L_fmol_per_J_per_s_3 {interface: public};
    var omega_Cl: L_fmol_per_J_per_s_3 {interface: public};
    var omega_K: L_fmol_per_J_per_s_3 {interface: public};
    var L_P: pL_L_per_J_per_s_3 {interface: public};
    var sigma_Na: dimensionless {interface: public};
    var sigma_Cl: dimensionless {interface: public};
    var sigma_K: dimensionless {interface: public};
    c_Na_bar = sel
      case abs(c_Na_o-c_Na_i) < 1e-7{mol_per_m3}:
        c_Na_o;
      otherwise:
        (c_Na_o-c_Na_i)/ln(c_Na_o/c_Na_i);
    endsel;
    c_K_bar = sel
      case abs(c_K_o-c_K_i) < 1e-7{mol_per_m3}:
        c_K_o;
      otherwise:
        (c_K_o-c_K_i)/ln(c_K_o/c_K_i);
    endsel;
    c_Cl_bar = sel
      case abs(c_Cl_o-c_Cl_i) < 1e-7{mol_per_m3}:
        c_Cl_o;
      otherwise:
        (c_Cl_o-c_Cl_i)/ln(c_Cl_o/c_Cl_i);
    endsel;
    u_P_pi_diff = u_P_pi_o-u_P_pi_i;
    u_mu_e_Na_diff = u_mu_e_Na_o-u_mu_e_Na_i;
    u_mu_e_Cl_diff = u_mu_e_Cl_o-u_mu_e_Cl_i;
    u_mu_e_K_diff = u_mu_e_K_o-u_mu_e_K_i;
    // constitutive relations
    v_V = L_P*((1{dimensionless}-sigma_Na)*c_Na_bar*u_mu_e_Na_diff+(1{dimensionless}-sigma_K)*c_K_bar*u_mu_e_K_diff+(1{dimensionless}-sigma_Cl)*c_Cl_bar*u_mu_e_Cl_diff+u_P_pi_diff);
    v_Na = omega_Na*c_Na_bar*u_mu_e_Na_diff+(1{dimensionless}-sigma_Na)*c_Na_bar*v_V;
    v_Cl = omega_Cl*c_Cl_bar*u_mu_e_Cl_diff+(1{dimensionless}-sigma_Cl)*c_Cl_bar*v_V;
    v_K = omega_K*c_K_bar*u_mu_e_K_diff+(1{dimensionless}-sigma_K)*c_K_bar*v_V;
    I_para = zNa*F*v_Na+zCl*F*v_Cl+zK*F*v_K;
  enddef;

  def comp bas_membrane_module as
    var t: second {interface: public};
    var I_NKE: nSmV {interface: public};
    var I_Kir: nSmV {interface: public};
    var I_bas: nSmV {interface: public};
    var u_e_bas: volt {interface: public};
    var u_e_cell: volt {interface: public};
    var u_e_int: volt {interface: public};
    I_bas = I_NKE+I_Kir;
    u_e_bas = u_e_cell-u_e_int;
  enddef;

  def comp api_membrane_module as
    var t: second {interface: public};
    var I_ENaC: nSmV {interface: public};
    var I_apical: nSmV {interface: public};
    var u_e_mucus: volt {interface: public};
    var u_e_cell: volt {interface: public};
    var u_e_api: volt {interface: public};
    I_apical = I_ENaC;
    u_e_api = u_e_cell-u_e_mucus;
  enddef;

  def comp ENaC_module as
    var t: second {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_8 {interface: public};
    var RT: J_per_mmol;
    var zNa: dimensionless {interface: public};
    var q_1_init: fmol {interface: public};
    var q_2_init: fmol {interface: public};
    var q_3_init: fmol {interface: public};
    var q_4_init: fmol {interface: public};
    var q_1: fmol {init: q_1_init};
    var q_2: fmol {init: q_2_init};
    var q_3: fmol {init: q_3_init};
    var q_4: fmol {init: q_4_init};
    var c_Na_i: mol_per_m3 {interface: public};
    var c_Na_o: mol_per_m3 {interface: public};
    var K_1: per_fmol_2 {interface: public};
    var K_2: per_fmol_2 {interface: public};
    var K_3: per_fmol_2 {interface: public};
    var K_4: per_fmol_2 {interface: public};
    var K_Na: per_mM_5 {interface: public};
    var kappa_1: fmol_per_s_8 {interface: public};
    var kappa_2: fmol_per_s_8 {interface: public};
    var kappa_3: fmol_per_s_8 {interface: public};
    var kappa_4: fmol_per_s_8 {interface: public};
    var P_Na: pL_per_s_per_fmol {interface: public};
    var P_o: pL_per_s_per_fmol {interface: public};
    var u_e_m: volt {interface: public};
    var v_1: fmol_per_s_8;
    var v_2: fmol_per_s_8;
    var v_3: fmol_per_s_8;
    var v_4: fmol_per_s_8;
    var kappa_ENaC: pL_per_s_7 {interface: public};
    var v_q_Na_i: fmol_per_s_8 {interface: public};
    var v_q_Na_o: fmol_per_s_8 {interface: public};
    var I_ENaC: nSmV {interface: public};
    RT = R*T;
    v_1 = kappa_1*(K_2*q_2-K_1*q_1);
    v_2 = kappa_2*(K_1*q_1*K_Na*c_Na_o-K_3*q_3);
    v_3 = kappa_3*(K_3*q_3-K_4*q_4);
    v_4 = kappa_4*(K_4*q_4-K_2*q_2*K_Na*c_Na_o);
    ode(q_1, t) = v_1-v_2;
    ode(q_2, t) = v_4-v_1;
    ode(q_3, t) = v_2-v_3;
    ode(q_4, t) = v_3-v_4;
    kappa_ENaC = P_Na*q_3+P_o*q_1;
    I_ENaC = sel
      case abs(u_e_m) < 1e-9{volt}:
        0{nSmV};
      otherwise:
        kappa_ENaC*sqr(zNa)*u_e_m*sqr(F)/RT*(c_Na_i-c_Na_o*exp(-zNa*F*u_e_m/RT))/(1{dimensionless}-exp(-zNa*F*u_e_m/RT));
    endsel;
    // output fluxes
    v_q_Na_i = -I_ENaC/(zNa*F);
    v_q_Na_o = v_4-v_2-v_q_Na_i;
  enddef;

  def comp AQ_api_module as
    var t: second {interface: public};
    var kappa_AQ: pL_per_kPa_per_s_1 {interface: public};
    var u_P_pi_i: kPa {interface: public};
    var u_P_pi_o: kPa {interface: public};
    var v_AQ_i: pL_per_s_8 {interface: public};
    var v_AQ_o: pL_per_s_8 {interface: public};
    v_AQ_i = kappa_AQ*(u_P_pi_o-u_P_pi_i);
    v_AQ_o = -v_AQ_i;
  enddef;

  def comp AQ_bas_module as
    var t: second {interface: public};
    var kappa_AQ: pL_per_kPa_per_s_2 {interface: public};
    var u_P_pi_i: kPa {interface: public};
    var u_P_pi_o: kPa {interface: public};
    var v_AQ_i: pL_per_s_9 {interface: public};
    var v_AQ_o: pL_per_s_9 {interface: public};
    v_AQ_i = kappa_AQ*(u_P_pi_o-u_P_pi_i);
    v_AQ_o = -v_AQ_i;
  enddef;

  def comp NKE_module as
    var t: second {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_9 {interface: public};
    var RT: J_per_mmol;
    var z_1: dimensionless {interface: public};
    var z_2: dimensionless;
    var c_Na_o: mol_per_m3 {interface: public};
    var c_Na_i: mol_per_m3 {interface: public};
    var c_K_o: mol_per_m3 {interface: public};
    var c_K_i: mol_per_m3 {interface: public};
    var c_ATP: mol_per_m3 {interface: public};
    var c_ADP: mol_per_m3 {interface: public};
    var c_Pi: mol_per_m3 {interface: public};
    var c_H_i: mol_per_m3;
    var u_e_m: volt {interface: public};
    var e_1: dimensionless;
    var e_2: dimensionless;
    var q_1_init: fmol {interface: public};
    var q_2_init: fmol {interface: public};
    var q_3_init: fmol {interface: public};
    var q_4_init: fmol {interface: public};
    var q_5_init: fmol {interface: public};
    var q_6_init: fmol {interface: public};
    var q_1: fmol {init: q_1_init, interface: public};
    var q_2: fmol {init: q_2_init, interface: public};
    var q_3: fmol {init: q_3_init, interface: public};
    var q_4: fmol {init: q_4_init, interface: public};
    var q_5: fmol {init: q_5_init, interface: public};
    var q_6: fmol {init: q_6_init, interface: public};
    var K_1: per_fmol_3 {interface: public};
    var K_2: per_fmol_3 {interface: public};
    var K_3: per_fmol_3 {interface: public};
    var K_4: per_fmol_3 {interface: public};
    var K_5: per_fmol_3 {interface: public};
    var K_6: per_fmol_3 {interface: public};
    var K_K: per_mM_6 {interface: public};
    var K_ADP: per_mM_6 {interface: public};
    var K_ATP: per_mM_6 {interface: public};
    var K_Na: per_mM_6 {interface: public};
    var K_Pi: per_mM_6 {interface: public};
    var K_H: per_mM_6 {init: 1};
    var kappa_1: fmol_per_s_9 {interface: public};
    var kappa_2: fmol_per_s_9 {interface: public};
    var kappa_3: fmol_per_s_9 {interface: public};
    var kappa_4: fmol_per_s_9 {interface: public};
    var kappa_5: fmol_per_s_9 {interface: public};
    var kappa_6: fmol_per_s_9 {interface: public};
    var Q_1: dimensionless {interface: public};
    var Q_2: dimensionless {interface: public};
    var Q_3: dimensionless {interface: public};
    var Q_4: dimensionless {interface: public};
    var Q_5: dimensionless {interface: public};
    var Q_6: dimensionless {interface: public};
    var Q_Na_o: dimensionless {interface: public};
    var Q_Na_i: dimensionless {interface: public};
    var Q_K_o: dimensionless {interface: public};
    var Q_K_i: dimensionless {interface: public};
    var Q_ATP: dimensionless {interface: public};
    var Q_ADP: dimensionless {interface: public};
    var Q_Pi: dimensionless {interface: public};
    var Q_H_i: dimensionless {interface: public};
    var v_1: fmol_per_s_9 {interface: public};
    var v_2: fmol_per_s_9 {interface: public};
    var v_3: fmol_per_s_9 {interface: public};
    var v_4: fmol_per_s_9 {interface: public};
    var v_5: fmol_per_s_9 {interface: public};
    var v_6: fmol_per_s_9 {interface: public};
    var v_q_Na_i: fmol_per_s_9 {interface: public};
    var v_q_Na_o: fmol_per_s_9 {interface: public};
    var v_q_K_i: fmol_per_s_9 {interface: public};
    var v_q_K_o: fmol_per_s_9 {interface: public};
    var I_NKE: nSmV {interface: public};
    z_2 = 1{dimensionless}-z_1;
    RT = R*T;
    c_H_i = pow(10{dimensionless}, -7{dimensionless})*1{mol_per_m3};
    e_1 = exp(z_1*F*u_e_m/RT);
    e_2 = exp(z_2*F*u_e_m/RT);
    Q_1 = K_1*q_1;
    Q_2 = K_2*q_2;
    Q_3 = K_3*q_3;
    Q_4 = K_4*q_4;
    Q_5 = K_5*q_5;
    Q_6 = K_6*q_6;
    Q_Na_o = K_Na*c_Na_o;
    Q_Na_i = K_Na*c_Na_i;
    Q_K_o = K_K*c_K_o;
    Q_K_i = K_K*c_K_i;
    Q_ATP = K_ATP*c_ATP;
    Q_ADP = K_ADP*c_ADP;
    Q_Pi = K_Pi*c_Pi;
    Q_H_i = K_H*c_H_i;
    v_1 = kappa_1*(Q_1*pow(Q_Na_i, 3{dimensionless})*Q_ATP-Q_2);
    v_2 = kappa_2*(Q_2-Q_3*Q_ADP);
    v_3 = kappa_3*(Q_3-Q_4*pow(Q_Na_o, 3{dimensionless})*e_1);
    v_4 = kappa_4*(Q_4*sqr(Q_K_o)-Q_5);
    v_5 = kappa_5*(Q_5-Q_6*Q_Pi*Q_H_i);
    v_6 = kappa_6*(Q_6-Q_1*sqr(Q_K_i)*e_2);
    // conservation equations
    ode(q_1, t) = v_6-v_1;
    ode(q_2, t) = v_1-v_2;
    ode(q_3, t) = v_2-v_3;
    ode(q_4, t) = v_3-v_4;
    ode(q_5, t) = v_4-v_5;
    ode(q_6, t) = v_5-v_6;
    v_q_Na_i = -3{dimensionless}*v_1;
    v_q_Na_o = 3{dimensionless}*v_3;
    v_q_K_o = -2{dimensionless}*v_4;
    v_q_K_i = 2{dimensionless}*v_6;
    I_NKE = (v_6*z_2+v_3*z_1)*F;
  enddef;

  def comp Kir_module as
    var t: second {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_10 {interface: public};
    var zK: dimensionless {interface: public};
    var RT: J_per_mmol;
    var kappa_Kir: pL_per_s_10 {interface: public};
    var P_Kir: pL_per_s_per_fmol {interface: public};
    var N_Kir: fmol {interface: public};
    var c_K_o: mol_per_m3 {interface: public};
    var c_K_i: mol_per_m3 {interface: public};
    var u_e_m: volt {interface: public};
    var v_Kir_o: fmol_per_s_10 {interface: public};
    var v_Kir_i: fmol_per_s_10 {interface: public};
    var I_Kir: nSmV {interface: public};
    RT = R*T;
    kappa_Kir = P_Kir*N_Kir;
    I_Kir = sel
      case abs(u_e_m) < 1e-9{volt}:
        0{nSmV};
      otherwise:
        kappa_Kir*sqr(zK)*u_e_m*sqr(F)/RT*(c_K_i-c_K_o*exp(-zK*F*u_e_m/RT))/(1{dimensionless}-exp(-zK*F*u_e_m/RT));
    endsel;
    v_Kir_i = -I_Kir/(zK*F);
    v_Kir_o = -v_Kir_i;
  enddef;

  def comp cap_transport_module as
    var t: second {interface: public};
    var u_P_pi_o: kPa {interface: public};
    var u_P_pi_i: kPa {interface: public};
    var u_P_pi_diff: kPa;
    var u_mu_e_Na_o: J_per_mmol {interface: public};
    var u_mu_e_Cl_o: J_per_mmol {interface: public};
    var u_mu_e_K_o: J_per_mmol {interface: public};
    var u_mu_e_Na_i: J_per_mmol {interface: public};
    var u_mu_e_Cl_i: J_per_mmol {interface: public};
    var u_mu_e_K_i: J_per_mmol {interface: public};
    var u_mu_e_Na_diff: J_per_mmol;
    var u_mu_e_Cl_diff: J_per_mmol;
    var u_mu_e_K_diff: J_per_mmol;
    var c_Na_o: mol_per_m3 {interface: public};
    var c_Cl_o: mol_per_m3 {interface: public};
    var c_K_o: mol_per_m3 {interface: public};
    var c_Na_i: mol_per_m3 {interface: public};
    var c_Cl_i: mol_per_m3 {interface: public};
    var c_K_i: mol_per_m3 {interface: public};
    var c_Na_bar: mol_per_m3;
    var c_Cl_bar: mol_per_m3;
    var c_K_bar: mol_per_m3;
    var v_Na: fmol_per_s_11 {interface: public};
    var v_Cl: fmol_per_s_11 {interface: public};
    var v_K: fmol_per_s_11 {interface: public};
    var v_V: pL_per_s_11 {interface: public};
    var I_para: nSmV {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_11 {interface: public};
    var zNa: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var omega_Na: L_fmol_per_J_per_s_4 {interface: public};
    var omega_Cl: L_fmol_per_J_per_s_4 {interface: public};
    var omega_K: L_fmol_per_J_per_s_4 {interface: public};
    var L_P: pL_L_per_J_per_s_4 {interface: public};
    var sigma_Na: dimensionless {interface: public};
    var sigma_Cl: dimensionless {interface: public};
    var sigma_K: dimensionless {interface: public};
    c_Na_bar = sel
      case abs(c_Na_o-c_Na_i) < 1e-7{mol_per_m3}:
        c_Na_o;
      otherwise:
        (c_Na_o-c_Na_i)/ln(c_Na_o/c_Na_i);
    endsel;
    c_K_bar = sel
      case abs(c_K_o-c_K_i) < 1e-7{mol_per_m3}:
        c_K_o;
      otherwise:
        (c_K_o-c_K_i)/ln(c_K_o/c_K_i);
    endsel;
    c_Cl_bar = sel
      case abs(c_Cl_o-c_Cl_i) < 1e-7{mol_per_m3}:
        c_Cl_o;
      otherwise:
        (c_Cl_o-c_Cl_i)/ln(c_Cl_o/c_Cl_i);
    endsel;
    u_P_pi_diff = u_P_pi_o-u_P_pi_i;
    u_mu_e_Na_diff = u_mu_e_Na_o-u_mu_e_Na_i;
    u_mu_e_Cl_diff = u_mu_e_Cl_o-u_mu_e_Cl_i;
    u_mu_e_K_diff = u_mu_e_K_o-u_mu_e_K_i;
    // constitutive relations
    v_V = L_P*((1{dimensionless}-sigma_Na)*c_Na_bar*u_mu_e_Na_diff+(1{dimensionless}-sigma_K)*c_K_bar*u_mu_e_K_diff+(1{dimensionless}-sigma_Cl)*c_Cl_bar*u_mu_e_Cl_diff+u_P_pi_diff);
    v_Na = omega_Na*c_Na_bar*u_mu_e_Na_diff+(1{dimensionless}-sigma_Na)*c_Na_bar*v_V;
    v_Cl = omega_Cl*c_Cl_bar*u_mu_e_Cl_diff+(1{dimensionless}-sigma_Cl)*c_Cl_bar*v_V;
    v_K = omega_K*c_K_bar*u_mu_e_K_diff+(1{dimensionless}-sigma_K)*c_K_bar*v_V;
    I_para = zNa*F*v_Na+zCl*F*v_Cl+zK*F*v_K;
  enddef;

  def comp blood_module as
    var t: second {interface: public};
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_12 {interface: public};
    var G_m: picoS {interface: public};
    var q_V_init: pL {interface: public};
    var q_Na_init: fmol {interface: public};
    var q_Cl_init: fmol {interface: public};
    var q_K_init: fmol {interface: public};
    var u_e_fluid: volt {interface: public};
    var u_e_Donnan: volt {interface: public};
    var u_mu_Na: J_per_mmol;
    var u_mu_K: J_per_mmol;
    var u_mu_Cl: J_per_mmol;
    var u_mu_e_Na: J_per_mmol {interface: public};
    var u_mu_e_K: J_per_mmol {interface: public};
    var u_mu_e_Cl: J_per_mmol {interface: public};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var u_pi_proteins: kPa;
    var u_P: kPa {interface: public};
    var u_P_pi: kPa {interface: public};
    var q_V: pL {init: q_V_init, interface: public};
    var q_Na: fmol {init: q_Na_init, interface: public};
    var q_K: fmol {init: q_K_init, interface: public};
    var q_Cl: fmol {init: q_Cl_init, interface: public};
    var q_proteins: fmol {interface: public};
    var q_albumin: fmol {interface: public};
    var c_Na: mol_per_m3 {interface: public};
    var c_K: mol_per_m3 {interface: public};
    var c_Cl: mol_per_m3 {interface: public};
    var c_proteins: mol_per_m3 {interface: public};
    var c_albumin: mol_per_m3 {interface: public};
    var K_Na: per_mM_7 {interface: public};
    var K_K: per_mM_7 {interface: public};
    var K_Cl: per_mM_7 {interface: public};
    var v_Na_fluid: fmol_per_s_12 {interface: public};
    var v_K_fluid: fmol_per_s_12 {interface: public};
    var v_Cl_fluid: fmol_per_s_12 {interface: public};
    var v_V_fluid: pL_per_s_12 {interface: public};
    var I_fluid: nSmV {interface: public};
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    c_Cl = q_Cl/q_V;
    c_proteins = q_proteins/q_V;
    c_albumin = q_albumin/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    u_pi_proteins = R*T*(c_proteins+c_albumin);
    u_mu_Na = R*T*ln(K_Na*c_Na);
    u_mu_K = R*T*ln(K_K*c_K);
    u_mu_Cl = R*T*ln(K_Cl*c_Cl);
    u_e_fluid = I_fluid/G_m+u_e_Donnan;
    u_P_pi = u_P-(u_pi_Na+u_pi_K+u_pi_Cl+u_pi_proteins);
    u_mu_e_Na = u_mu_Na+zNa*F*u_e_fluid;
    u_mu_e_K = u_mu_K+zK*F*u_e_fluid;
    u_mu_e_Cl = u_mu_Cl+zCl*F*u_e_fluid;
    // assume blood flow is such that the amount of these species don't change
    ode(q_Na, t) = 0{fmol_per_s_12};
    ode(q_K, t) = 0{fmol_per_s_12};
    ode(q_Cl, t) = 0{fmol_per_s_12};
    ode(q_V, t) = 0{pL_per_s_12};
  enddef;

  def comp lymph_module as
    var t: second {interface: public};
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_13 {interface: public};
    var G_m: picoS {interface: public};
    var q_V_init: pL {interface: public};
    var q_Na_init: fmol {interface: public};
    var q_Cl_init: fmol {interface: public};
    var q_K_init: fmol {interface: public};
    var u_e_fluid: volt {interface: public};
    var u_e_Donnan: volt {interface: public};
    var u_mu_Na: J_per_mmol;
    var u_mu_K: J_per_mmol;
    var u_mu_Cl: J_per_mmol;
    var u_mu_e_Na: J_per_mmol {interface: public};
    var u_mu_e_K: J_per_mmol {interface: public};
    var u_mu_e_Cl: J_per_mmol {interface: public};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var u_pi_proteins: kPa;
    var u_P: kPa {interface: public};
    var u_P_pi: kPa {interface: public};
    var q_V: pL {init: q_V_init, interface: public};
    var q_Na: fmol {init: q_Na_init, interface: public};
    var q_K: fmol {init: q_K_init, interface: public};
    var q_Cl: fmol {init: q_Cl_init, interface: public};
    var q_proteins: fmol {interface: public};
    var q_albumin: fmol {interface: public};
    var c_Na: mol_per_m3 {interface: public};
    var c_K: mol_per_m3 {interface: public};
    var c_Cl: mol_per_m3 {interface: public};
    var c_proteins: mol_per_m3 {interface: public};
    var c_albumin: mol_per_m3 {interface: public};
    var K_Na: per_mM_8 {interface: public};
    var K_K: per_mM_8 {interface: public};
    var K_Cl: per_mM_8 {interface: public};
    var v_Na_fluid: fmol_per_s_13 {interface: public};
    var v_K_fluid: fmol_per_s_13 {interface: public};
    var v_Cl_fluid: fmol_per_s_13 {interface: public};
    var v_V_fluid: pL_per_s_13 {interface: public};
    var I_fluid: nSmV {interface: public};
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    c_Cl = q_Cl/q_V;
    c_proteins = q_proteins/q_V;
    c_albumin = q_albumin/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    u_pi_proteins = R*T*(c_proteins+c_albumin);
    u_mu_Na = R*T*ln(K_Na*c_Na);
    u_mu_K = R*T*ln(K_K*c_K);
    u_mu_Cl = R*T*ln(K_Cl*c_Cl);
    u_e_fluid = I_fluid/G_m+u_e_Donnan;
    u_P_pi = u_P-(u_pi_Na+u_pi_K+u_pi_Cl+u_pi_proteins);
    u_mu_e_Na = u_mu_Na+zNa*F*u_e_fluid;
    u_mu_e_K = u_mu_K+zK*F*u_e_fluid;
    u_mu_e_Cl = u_mu_Cl+zCl*F*u_e_fluid;
    // assume blood flow is such that the amount of these species don't change
    ode(q_Na, t) = 0{fmol_per_s_13};
    ode(q_K, t) = 0{fmol_per_s_13};
    ode(q_Cl, t) = 0{fmol_per_s_13};
    ode(q_V, t) = 0{pL_per_s_13};
  enddef;

  def comp lymph_transport_module as
    var t: second {interface: public};
    var u_P_pi_o: kPa {interface: public};
    var u_P_pi_i: kPa {interface: public};
    var u_P_pi_diff: kPa;
    var u_mu_e_Na_o: J_per_mmol {interface: public};
    var u_mu_e_Cl_o: J_per_mmol {interface: public};
    var u_mu_e_K_o: J_per_mmol {interface: public};
    var u_mu_e_Na_i: J_per_mmol {interface: public};
    var u_mu_e_Cl_i: J_per_mmol {interface: public};
    var u_mu_e_K_i: J_per_mmol {interface: public};
    var u_mu_e_Na_diff: J_per_mmol;
    var u_mu_e_Cl_diff: J_per_mmol;
    var u_mu_e_K_diff: J_per_mmol;
    var c_Na_o: mol_per_m3 {interface: public};
    var c_Cl_o: mol_per_m3 {interface: public};
    var c_K_o: mol_per_m3 {interface: public};
    var c_Na_i: mol_per_m3 {interface: public};
    var c_Cl_i: mol_per_m3 {interface: public};
    var c_K_i: mol_per_m3 {interface: public};
    var c_Na_bar: mol_per_m3;
    var c_Cl_bar: mol_per_m3;
    var c_K_bar: mol_per_m3;
    var v_Na: fmol_per_s_14 {interface: public};
    var v_Cl: fmol_per_s_14 {interface: public};
    var v_K: fmol_per_s_14 {interface: public};
    var v_V: pL_per_s_14 {interface: public};
    var I_para: nSmV {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol_14 {interface: public};
    var zNa: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var omega_Na: L_fmol_per_J_per_s_5 {interface: public};
    var omega_Cl: L_fmol_per_J_per_s_5 {interface: public};
    var omega_K: L_fmol_per_J_per_s_5 {interface: public};
    var L_P: pL_L_per_J_per_s_5 {interface: public};
    var sigma_Na: dimensionless {interface: public};
    var sigma_Cl: dimensionless {interface: public};
    var sigma_K: dimensionless {interface: public};
    c_Na_bar = sel
      case abs(c_Na_o-c_Na_i) < 1e-7{mol_per_m3}:
        c_Na_o;
      otherwise:
        (c_Na_o-c_Na_i)/ln(c_Na_o/c_Na_i);
    endsel;
    c_K_bar = sel
      case abs(c_K_o-c_K_i) < 1e-7{mol_per_m3}:
        c_K_o;
      otherwise:
        (c_K_o-c_K_i)/ln(c_K_o/c_K_i);
    endsel;
    c_Cl_bar = sel
      case abs(c_Cl_o-c_Cl_i) < 1e-7{mol_per_m3}:
        c_Cl_o;
      otherwise:
        (c_Cl_o-c_Cl_i)/ln(c_Cl_o/c_Cl_i);
    endsel;
    u_P_pi_diff = u_P_pi_o-u_P_pi_i;
    u_mu_e_Na_diff = u_mu_e_Na_o-u_mu_e_Na_i;
    u_mu_e_Cl_diff = u_mu_e_Cl_o-u_mu_e_Cl_i;
    u_mu_e_K_diff = u_mu_e_K_o-u_mu_e_K_i;
    // constitutive relations
    v_V = L_P*((1{dimensionless}-sigma_Na)*c_Na_bar*u_mu_e_Na_diff+(1{dimensionless}-sigma_K)*c_K_bar*u_mu_e_K_diff+(1{dimensionless}-sigma_Cl)*c_Cl_bar*u_mu_e_Cl_diff+u_P_pi_diff);
    v_Na = omega_Na*c_Na_bar*u_mu_e_Na_diff+(1{dimensionless}-sigma_Na)*c_Na_bar*v_V;
    v_Cl = omega_Cl*c_Cl_bar*u_mu_e_Cl_diff+(1{dimensionless}-sigma_Cl)*c_Cl_bar*v_V;
    v_K = omega_K*c_K_bar*u_mu_e_K_diff+(1{dimensionless}-sigma_K)*c_K_bar*v_V;
    I_para = zNa*F*v_Na+zCl*F*v_Cl+zK*F*v_K;
  enddef;

  def comp terminal_venous_connection as
  enddef;

  def comp generic_junction_connection as
  enddef;

  def comp sum_blood_volume as
  enddef;

  def comp lumen as
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var q_V_init: pL {interface: public};
    var q_Na_init: fmol {interface: public};
    var q_Cl_init: fmol {interface: public};
    var q_K_init: fmol {interface: public};
    var q_V: pL {interface: public};
    var q_Na: fmol {interface: public};
    var q_Cl: fmol {interface: public};
    var q_K: fmol {interface: public};
    var u_e_lumen: volt {interface: public};
    var u_P: kPa {interface: public};
    var c_Na: mM {interface: public};
    var c_K: mM {interface: public};
    var c_Cl: mM {interface: public};
    var K_Na: per_mM {interface: public};
    var K_K: per_mM {interface: public};
    var K_Cl: per_mM {interface: public};
    var G_muc: picoS {interface: public};
    var phi_p: dimensionless {interface: public};
    var phi_p_o: dimensionless {interface: public};
  enddef;

  def comp muc_transport as
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var omega_Na: L_fmol_per_J_per_s {interface: public};
    var omega_Cl: L_fmol_per_J_per_s {interface: public};
    var omega_K: L_fmol_per_J_per_s {interface: public};
    var sigma_Na: dimensionless {interface: public};
    var sigma_Cl: dimensionless {interface: public};
    var sigma_K: dimensionless {interface: public};
    var L_P: pL_L_per_J_per_s {interface: public};
    var zNa: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var v_Na: fmol_per_s {interface: public};
    var v_K: fmol_per_s {interface: public};
    var v_Cl: fmol_per_s {interface: public};
    var v_V: pL_per_s {interface: public};
    var I_para: picoA {interface: public};
  enddef;

  def comp mucus as
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var V_w: L_per_mmol {interface: public};
    var q_V_init: pL {interface: public};
    var q_Na_init: fmol {interface: public};
    var q_Cl_init: fmol {interface: public};
    var q_K_init: fmol {interface: public};
    var u_e_mucus_init: volt {interface: public};
    var q_V: pL {interface: public};
    var q_Na: fmol {interface: public};
    var q_Cl: fmol {interface: public};
    var q_K: fmol {interface: public};
    var u_e_mucus: volt {interface: public};
    var u_e_Donnan: volt {interface: public};
    var c_Na: mM {interface: public};
    var c_K: mM {interface: public};
    var c_Cl: mM {interface: public};
    var C_m_bas: picoFarad {interface: public};
    var C_m_api: picoFarad {interface: public};
    var K_Na: per_mM {interface: public};
    var K_K: per_mM {interface: public};
    var K_Cl: per_mM {interface: public};
    var A: um2 {interface: public};
    var L: mm {interface: public};
    var phi_p: dimensionless {interface: public};
    var chi_p: dimensionless {interface: public};
    var nu_c: mM {interface: public};
    var phi_p_o: dimensionless {interface: public};
    var u_Pi_ion: kPa {interface: public};
    var u_Pi_mix: kPa {interface: public};
    var u_Pi_elastic: kPa {interface: public};
  enddef;

  def comp cell as
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var q_V_init: pL {interface: public};
    var q_Na_init: fmol {interface: public};
    var q_K_init: fmol {interface: public};
    var u_e_cell_init: volt {interface: public};
    var q_V: pL {interface: public};
    var q_Na: fmol {interface: public};
    var c_Cl: mM {interface: public};
    var q_K: fmol {interface: public};
    var c_ATP_init: mM {interface: public};
    var c_ADP_init: mM {interface: public};
    var c_Pi_init: mM {interface: public};
    var u_e_cell: volt {interface: public};
    var u_P: kPa {interface: public};
    var c_Na: mM {interface: public};
    var c_K: mM {interface: public};
    var c_ATP: mM {interface: public};
    var c_ADP: mM {interface: public};
    var c_Pi: mM {interface: public};
    var C_m_bas: picoFarad {interface: public};
  enddef;

  def comp int_fluid as
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var q_V_init: pL {interface: public};
    var q_Na_init: fmol {interface: public};
    var q_Cl_init: fmol {interface: public};
    var q_K_init: fmol {interface: public};
    var q_V: pL {interface: public};
    var q_Na: fmol {interface: public};
    var q_Cl: fmol {interface: public};
    var q_K: fmol {interface: public};
    var u_P: kPa {interface: public};
    var c_Na: mM {interface: public};
    var c_K: mM {interface: public};
    var c_Cl: mM {interface: public};
    var K_Na: per_mM {interface: public};
    var K_K: per_mM {interface: public};
    var K_Cl: per_mM {interface: public};
    var u_P_pi: kPa {interface: public};
    var u_mu_e_Na: J_per_mmol {interface: public};
    var u_mu_e_K: J_per_mmol {interface: public};
    var u_mu_e_Cl: J_per_mmol {interface: public};
    var v_Na_cap: fmol_per_s {interface: public};
    var v_Cl_cap: fmol_per_s {interface: public};
    var v_K_cap: fmol_per_s {interface: public};
    var v_V_cap: pL_per_s {interface: public};
  enddef;

  def comp para_transport as
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var omega_Na: L_fmol_per_J_per_s {interface: public};
    var omega_Cl: L_fmol_per_J_per_s {interface: public};
    var omega_K: L_fmol_per_J_per_s {interface: public};
    var sigma_Na: dimensionless {interface: public};
    var sigma_Cl: dimensionless {interface: public};
    var sigma_K: dimensionless {interface: public};
    var L_P: pL_L_per_J_per_s {interface: public};
    var zNa: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var v_Na: fmol_per_s {interface: public};
    var v_K: fmol_per_s {interface: public};
    var v_Cl: fmol_per_s {interface: public};
    var v_V: pL_per_s {interface: public};
    var I_para: picoA {interface: public};
  enddef;

  def comp bas_membrane as
    var I_bas: picoA {interface: public};
    var u_e_bas: volt {interface: public};
    var I_NKE: picoA {interface: public};
    var I_Kir: picoA {interface: public};
  enddef;

  def comp api_membrane as
    var I_apical: picoA {interface: public};
    var u_e_api: volt {interface: public};
    var I_ENaC: picoA {interface: public};
  enddef;

  def comp ENaC as
    var R: J_per_K_per_mmol {interface: public};
    var F: C_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var zNa: dimensionless {interface: public};
    var q_1_init: fmol {interface: public};
    var q_2_init: fmol {interface: public};
    var q_3_init: fmol {interface: public};
    var q_4_init: fmol {interface: public};
    var v_q_Na_i: fmol_per_s {interface: public};
    var v_q_Na_o: fmol_per_s {interface: public};
    var K_1: per_fmol {interface: public};
    var K_2: per_fmol {interface: public};
    var K_3: per_fmol {interface: public};
    var K_4: per_fmol {interface: public};
    var K_Na: per_mM {interface: public};
    var kappa_1: fmol_per_s {interface: public};
    var kappa_2: fmol_per_s {interface: public};
    var kappa_3: fmol_per_s {interface: public};
    var kappa_4: fmol_per_s {interface: public};
    var kappa_ENaC: pL_per_s {interface: public};
    var P_Na: pL_per_s_per_fmol {interface: public};
    var P_o: pL_per_s_per_fmol {interface: public};
  enddef;

  def comp AQ_api as
    var kappa_AQ: pL_per_kPa_per_s {interface: public};
    var v_AQ_i: pL_per_s {interface: public};
    var v_AQ_o: pL_per_s {interface: public};
  enddef;

  def comp AQ_bas as
    var kappa_AQ: pL_per_kPa_per_s {interface: public};
    var v_AQ_i: pL_per_s {interface: public};
    var v_AQ_o: pL_per_s {interface: public};
  enddef;

  def comp NKE as
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var z_1: dimensionless {interface: public};
    var q_1_init: fmol {interface: public};
    var q_2_init: fmol {interface: public};
    var q_3_init: fmol {interface: public};
    var q_4_init: fmol {interface: public};
    var q_5_init: fmol {interface: public};
    var q_6_init: fmol {interface: public};
    var q_1: fmol {interface: public};
    var q_2: fmol {interface: public};
    var q_3: fmol {interface: public};
    var q_4: fmol {interface: public};
    var q_5: fmol {interface: public};
    var q_6: fmol {interface: public};
    var Q_1: dimensionless {interface: public};
    var Q_2: dimensionless {interface: public};
    var Q_3: dimensionless {interface: public};
    var Q_4: dimensionless {interface: public};
    var Q_5: dimensionless {interface: public};
    var Q_6: dimensionless {interface: public};
    var Q_Na_o: dimensionless {interface: public};
    var Q_Na_i: dimensionless {interface: public};
    var Q_K_o: dimensionless {interface: public};
    var Q_K_i: dimensionless {interface: public};
    var Q_ATP: dimensionless {interface: public};
    var Q_ADP: dimensionless {interface: public};
    var Q_Pi: dimensionless {interface: public};
    var Q_H_i: dimensionless {interface: public};
    var v_1: fmol_per_s {interface: public};
    var v_2: fmol_per_s {interface: public};
    var v_3: fmol_per_s {interface: public};
    var v_4: fmol_per_s {interface: public};
    var v_5: fmol_per_s {interface: public};
    var v_6: fmol_per_s {interface: public};
    var v_q_Na_i: fmol_per_s {interface: public};
    var v_q_Na_o: fmol_per_s {interface: public};
    var v_q_K_i: fmol_per_s {interface: public};
    var v_q_K_o: fmol_per_s {interface: public};
    var K_1: per_fmol {interface: public};
    var K_2: per_fmol {interface: public};
    var K_3: per_fmol {interface: public};
    var K_4: per_fmol {interface: public};
    var K_5: per_fmol {interface: public};
    var K_6: per_fmol {interface: public};
    var K_Na: per_mM {interface: public};
    var K_K: per_mM {interface: public};
    var K_ADP: per_mM {interface: public};
    var K_ATP: per_mM {interface: public};
    var K_Pi: per_mM {interface: public};
    var kappa_1: fmol_per_s {interface: public};
    var kappa_2: fmol_per_s {interface: public};
    var kappa_3: fmol_per_s {interface: public};
    var kappa_4: fmol_per_s {interface: public};
    var kappa_5: fmol_per_s {interface: public};
    var kappa_6: fmol_per_s {interface: public};
  enddef;

  def comp Kir as
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var zK: dimensionless {interface: public};
    var v_Kir_o: fmol_per_s {interface: public};
    var v_Kir_i: fmol_per_s {interface: public};
    var kappa_Kir: pL_per_s {interface: public};
    var N_Kir: fmol {interface: public};
    var P_Kir: pL_per_s_per_fmol {interface: public};
  enddef;

  def comp cap_transport as
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var omega_Na: L_fmol_per_J_per_s {interface: public};
    var omega_Cl: L_fmol_per_J_per_s {interface: public};
    var omega_K: L_fmol_per_J_per_s {interface: public};
    var sigma_Na: dimensionless {interface: public};
    var sigma_Cl: dimensionless {interface: public};
    var sigma_K: dimensionless {interface: public};
    var L_P: pL_L_per_J_per_s {interface: public};
    var zNa: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var v_Na: fmol_per_s {interface: public};
    var v_K: fmol_per_s {interface: public};
    var v_Cl: fmol_per_s {interface: public};
    var v_V: pL_per_s {interface: public};
    var I_para: picoA {interface: public};
  enddef;

  def comp blood as
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var K_Na: per_mM {interface: public};
    var K_K: per_mM {interface: public};
    var K_Cl: per_mM {interface: public};
    var q_V_init: pL {interface: public};
    var q_Na_init: fmol {interface: public};
    var q_Cl_init: fmol {interface: public};
    var q_K_init: fmol {interface: public};
    var q_albumin: fmol {interface: public};
    var q_proteins: fmol {interface: public};
    var q_V: pL {interface: public};
    var q_Na: fmol {interface: public};
    var q_Cl: fmol {interface: public};
    var q_K: fmol {interface: public};
    var c_Na: mM {interface: public};
    var c_K: mM {interface: public};
    var c_Cl: mM {interface: public};
    var c_proteins: mM {interface: public};
    var c_albumin: mM {interface: public};
    var u_P: kPa {interface: public};
    var u_P_pi: kPa {interface: public};
    var u_e_fluid: volt {interface: public};
    var u_e_Donnan: volt {interface: public};
    var u_mu_e_Na: J_per_mmol {interface: public};
    var u_mu_e_K: J_per_mmol {interface: public};
    var u_mu_e_Cl: J_per_mmol {interface: public};
    var G_m: picoS {interface: public};
  enddef;

  def comp lymph as
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var K_Na: per_mM {interface: public};
    var K_K: per_mM {interface: public};
    var K_Cl: per_mM {interface: public};
    var q_V_init: pL {interface: public};
    var q_Na_init: fmol {interface: public};
    var q_Cl_init: fmol {interface: public};
    var q_K_init: fmol {interface: public};
    var q_albumin: fmol {interface: public};
    var q_proteins: fmol {interface: public};
    var q_V: pL {interface: public};
    var q_Na: fmol {interface: public};
    var q_Cl: fmol {interface: public};
    var q_K: fmol {interface: public};
    var c_Na: mM {interface: public};
    var c_K: mM {interface: public};
    var c_Cl: mM {interface: public};
    var c_proteins: mM {interface: public};
    var c_albumin: mM {interface: public};
    var u_P: kPa {interface: public};
    var u_P_pi: kPa {interface: public};
    var u_e_fluid: volt {interface: public};
    var u_e_Donnan: volt {interface: public};
    var u_mu_e_Na: J_per_mmol {interface: public};
    var u_mu_e_K: J_per_mmol {interface: public};
    var u_mu_e_Cl: J_per_mmol {interface: public};
    var G_m: picoS {interface: public};
  enddef;

  def comp lymph_transport as
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var omega_Na: L_fmol_per_J_per_s {interface: public};
    var omega_Cl: L_fmol_per_J_per_s {interface: public};
    var omega_K: L_fmol_per_J_per_s {interface: public};
    var sigma_Na: dimensionless {interface: public};
    var sigma_Cl: dimensionless {interface: public};
    var sigma_K: dimensionless {interface: public};
    var L_P: pL_L_per_J_per_s {interface: public};
    var zNa: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var v_Na: fmol_per_s {interface: public};
    var v_K: fmol_per_s {interface: public};
    var v_Cl: fmol_per_s {interface: public};
    var v_V: pL_per_s {interface: public};
    var I_para: picoA {interface: public};
  enddef;

  def comp global as
    var zNa: dimensionless {interface: public};
    var zK: dimensionless {interface: public};
    var zCl: dimensionless {interface: public};
    var R: J_per_K_per_mmol {interface: public};
    var T: kelvin {interface: public};
    var F: C_per_mmol {interface: public};
    var K_Na: per_mM {interface: public};
    var K_K: per_mM {interface: public};
    var K_Cl: per_mM {interface: public};
    var phi_p_o: dimensionless {interface: public};
    var V_w: L_per_mmol {interface: public};
    var C_m_bas: picoFarad {interface: public};
    var C_m_api: picoFarad {interface: public};
    var K_ADP: per_mM {interface: public};
    var K_ATP: per_mM {interface: public};
    var K_Pi: per_mM {interface: public};
  enddef;
  def map between parameters and lumen_module for
    vars q_V_init_lumen and q_V_init;
    vars q_Na_init_lumen and q_Na_init;
    vars q_Cl_init_lumen and q_Cl_init;
    vars q_K_init_lumen and q_K_init;
    vars u_P_lumen and u_P;
    vars G_muc_lumen and G_muc;
  enddef;
  def map between parameters and muc_transport_module for
    vars omega_Na_muc_transport and omega_Na;
    vars omega_Cl_muc_transport and omega_Cl;
    vars omega_K_muc_transport and omega_K;
    vars sigma_Na_muc_transport and sigma_Na;
    vars sigma_Cl_muc_transport and sigma_Cl;
    vars sigma_K_muc_transport and sigma_K;
    vars L_P_muc_transport and L_P;
  enddef;
  def map between parameters and mucus_module for
    vars q_V_init_mucus and q_V_init;
    vars q_Na_init_mucus and q_Na_init;
    vars q_Cl_init_mucus and q_Cl_init;
    vars q_K_init_mucus and q_K_init;
    vars u_e_mucus_init_mucus and u_e_mucus_init;
    vars u_e_Donnan_mucus and u_e_Donnan;
    vars A_mucus and A;
    vars chi_p_mucus and chi_p;
    vars nu_c_mucus and nu_c;
  enddef;
  def map between parameters and cell_module for
    vars q_V_init_cell and q_V_init;
    vars q_Na_init_cell and q_Na_init;
    vars q_K_init_cell and q_K_init;
    vars u_e_cell_init_cell and u_e_cell_init;
    vars c_Cl_cell and c_Cl;
    vars c_ATP_init_cell and c_ATP_init;
    vars c_ADP_init_cell and c_ADP_init;
    vars c_Pi_init_cell and c_Pi_init;
    vars u_P_cell and u_P;
  enddef;
  def map between parameters and int_fluid_module for
    vars q_V_init_int_fluid and q_V_init;
    vars q_Na_init_int_fluid and q_Na_init;
    vars q_Cl_init_int_fluid and q_Cl_init;
    vars q_K_init_int_fluid and q_K_init;
    vars u_P_int_fluid and u_P;
  enddef;
  def map between parameters and para_transport_module for
    vars omega_Na_para_transport and omega_Na;
    vars omega_Cl_para_transport and omega_Cl;
    vars omega_K_para_transport and omega_K;
    vars sigma_Na_para_transport and sigma_Na;
    vars sigma_Cl_para_transport and sigma_Cl;
    vars sigma_K_para_transport and sigma_K;
    vars L_P_para_transport and L_P;
  enddef;
  def map between parameters and ENaC_module for
    vars q_1_init_ENaC and q_1_init;
    vars q_2_init_ENaC and q_2_init;
    vars q_3_init_ENaC and q_3_init;
    vars q_4_init_ENaC and q_4_init;
    vars K_1_ENaC and K_1;
    vars K_2_ENaC and K_2;
    vars K_3_ENaC and K_3;
    vars K_4_ENaC and K_4;
    vars kappa_1_ENaC and kappa_1;
    vars kappa_2_ENaC and kappa_2;
    vars kappa_3_ENaC and kappa_3;
    vars kappa_4_ENaC and kappa_4;
    vars P_Na_ENaC and P_Na;
    vars P_o_ENaC and P_o;
  enddef;
  def map between parameters and AQ_api_module for
    vars kappa_AQ_AQ_api and kappa_AQ;
  enddef;
  def map between parameters and AQ_bas_module for
    vars kappa_AQ_AQ_bas and kappa_AQ;
  enddef;
  def map between parameters and NKE_module for
    vars z_1_NKE and z_1;
    vars q_1_init_NKE and q_1_init;
    vars q_2_init_NKE and q_2_init;
    vars q_3_init_NKE and q_3_init;
    vars q_4_init_NKE and q_4_init;
    vars q_5_init_NKE and q_5_init;
    vars q_6_init_NKE and q_6_init;
    vars K_1_NKE and K_1;
    vars K_2_NKE and K_2;
    vars K_3_NKE and K_3;
    vars K_4_NKE and K_4;
    vars K_5_NKE and K_5;
    vars K_6_NKE and K_6;
    vars kappa_1_NKE and kappa_1;
    vars kappa_2_NKE and kappa_2;
    vars kappa_3_NKE and kappa_3;
    vars kappa_4_NKE and kappa_4;
    vars kappa_5_NKE and kappa_5;
    vars kappa_6_NKE and kappa_6;
  enddef;
  def map between parameters and Kir_module for
    vars N_Kir_Kir and N_Kir;
    vars P_Kir_Kir and P_Kir;
  enddef;
  def map between parameters and cap_transport_module for
    vars omega_Na_cap_transport and omega_Na;
    vars omega_Cl_cap_transport and omega_Cl;
    vars omega_K_cap_transport and omega_K;
    vars sigma_Na_cap_transport and sigma_Na;
    vars sigma_Cl_cap_transport and sigma_Cl;
    vars sigma_K_cap_transport and sigma_K;
    vars L_P_cap_transport and L_P;
  enddef;
  def map between parameters and blood_module for
    vars q_V_init_blood and q_V_init;
    vars q_Na_init_blood and q_Na_init;
    vars q_Cl_init_blood and q_Cl_init;
    vars q_K_init_blood and q_K_init;
    vars q_albumin_blood and q_albumin;
    vars q_proteins_blood and q_proteins;
    vars u_P_blood and u_P;
    vars u_e_Donnan_blood and u_e_Donnan;
    vars G_m_blood and G_m;
  enddef;
  def map between parameters and lymph_module for
    vars q_V_init_lymph and q_V_init;
    vars q_Na_init_lymph and q_Na_init;
    vars q_Cl_init_lymph and q_Cl_init;
    vars q_K_init_lymph and q_K_init;
    vars q_albumin_lymph and q_albumin;
    vars q_proteins_lymph and q_proteins;
    vars u_P_lymph and u_P;
    vars u_e_Donnan_lymph and u_e_Donnan;
    vars G_m_lymph and G_m;
  enddef;
  def map between parameters and lymph_transport_module for
    vars omega_Na_lymph_transport and omega_Na;
    vars omega_Cl_lymph_transport and omega_Cl;
    vars omega_K_lymph_transport and omega_K;
    vars sigma_Na_lymph_transport and sigma_Na;
    vars sigma_Cl_lymph_transport and sigma_Cl;
    vars sigma_K_lymph_transport and sigma_K;
    vars L_P_lymph_transport and L_P;
  enddef;
  def map between parameters_global and global for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_Na and K_Na;
    vars K_K and K_K;
    vars K_Cl and K_Cl;
    vars phi_p_o and phi_p_o;
    vars V_w and V_w;
    vars C_m_bas and C_m_bas;
    vars C_m_api and C_m_api;
    vars K_ADP and K_ADP;
    vars K_ATP and K_ATP;
    vars K_Pi and K_Pi;
  enddef;
  def map between parameters_global and lumen_module for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_Na and K_Na;
    vars K_K and K_K;
    vars K_Cl and K_Cl;
    vars phi_p_o and phi_p_o;
  enddef;
  def map between parameters_global and muc_transport_module for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between parameters_global and mucus_module for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_Na and K_Na;
    vars K_K and K_K;
    vars K_Cl and K_Cl;
    vars phi_p_o and phi_p_o;
    vars V_w and V_w;
    vars C_m_bas and C_m_bas;
    vars C_m_api and C_m_api;
  enddef;
  def map between parameters_global and int_fluid_module for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_Na and K_Na;
    vars K_K and K_K;
    vars K_Cl and K_Cl;
  enddef;
  def map between parameters_global and para_transport_module for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between parameters_global and ENaC_module for
    vars zNa and zNa;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_Na and K_Na;
  enddef;
  def map between parameters_global and cap_transport_module for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between parameters_global and blood_module for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_Na and K_Na;
    vars K_K and K_K;
    vars K_Cl and K_Cl;
  enddef;
  def map between parameters_global and lymph_module for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_Na and K_Na;
    vars K_K and K_K;
    vars K_Cl and K_Cl;
  enddef;
  def map between parameters_global and lymph_transport_module for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between parameters_global and Kir_module for
    vars zK and zK;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between parameters_global and cell_module for
    vars R and R;
    vars T and T;
    vars F and F;
    vars C_m_bas and C_m_bas;
  enddef;
  def map between parameters_global and NKE_module for
    vars R and R;
    vars T and T;
    vars F and F;
    vars K_Na and K_Na;
    vars K_K and K_K;
    vars K_ADP and K_ADP;
    vars K_ATP and K_ATP;
    vars K_Pi and K_Pi;
  enddef;
  def map between environment and lumen_module for
    vars time and t;
  enddef;
  def map between environment and muc_transport_module for
    vars time and t;
  enddef;
  def map between environment and mucus_module for
    vars time and t;
  enddef;
  def map between environment and cell_module for
    vars time and t;
  enddef;
  def map between environment and int_fluid_module for
    vars time and t;
  enddef;
  def map between environment and para_transport_module for
    vars time and t;
  enddef;
  def map between environment and bas_membrane_module for
    vars time and t;
  enddef;
  def map between environment and api_membrane_module for
    vars time and t;
  enddef;
  def map between environment and ENaC_module for
    vars time and t;
  enddef;
  def map between environment and AQ_api_module for
    vars time and t;
  enddef;
  def map between environment and AQ_bas_module for
    vars time and t;
  enddef;
  def map between environment and NKE_module for
    vars time and t;
  enddef;
  def map between environment and Kir_module for
    vars time and t;
  enddef;
  def map between environment and cap_transport_module for
    vars time and t;
  enddef;
  def map between environment and blood_module for
    vars time and t;
  enddef;
  def map between environment and lymph_module for
    vars time and t;
  enddef;
  def map between environment and lymph_transport_module for
    vars time and t;
  enddef;
  def map between lumen_module and lumen for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
    vars q_V_init and q_V_init;
    vars q_Na_init and q_Na_init;
    vars q_Cl_init and q_Cl_init;
    vars q_K_init and q_K_init;
    vars u_e_lumen and u_e_lumen;
    vars u_P and u_P;
    vars q_V and q_V;
    vars q_Na and q_Na;
    vars q_K and q_K;
    vars q_Cl and q_Cl;
    vars c_Na and c_Na;
    vars c_K and c_K;
    vars c_Cl and c_Cl;
    vars K_Na and K_Na;
    vars K_K and K_K;
    vars K_Cl and K_Cl;
    vars G_muc and G_muc;
    vars phi_p and phi_p;
    vars phi_p_o and phi_p_o;
  enddef;
  def map between lumen_module and muc_transport_module for
    vars u_mu_e_Na and u_mu_e_Na_o;
    vars u_mu_e_K and u_mu_e_K_o;
    vars u_mu_e_Cl and u_mu_e_Cl_o;
    vars u_P_pi and u_P_pi_o;
    vars c_Na and c_Na_o;
    vars c_K and c_K_o;
    vars c_Cl and c_Cl_o;
    vars v_Na_lum and v_Na;
    vars v_K_lum and v_K;
    vars v_Cl_lum and v_Cl;
    vars v_V_lum and v_V;
    vars I_lum and I_para;
  enddef;
  def map between lumen_module and mucus_module for
    vars v_Na_lum and v_Na_lum;
    vars v_K_lum and v_K_lum;
    vars v_Cl_lum and v_Cl_lum;
    vars v_V_lum and v_V_lum;
    vars I_lum and I_lum;
    vars phi_p and phi_p;
  enddef;
  def map between muc_transport_module and mucus_module for
    vars u_P_pi_i and u_P_pi;
    vars u_mu_e_Na_i and u_mu_e_Na;
    vars u_mu_e_Cl_i and u_mu_e_Cl;
    vars u_mu_e_K_i and u_mu_e_K;
    vars c_Na_i and c_Na;
    vars c_Cl_i and c_Cl;
    vars c_K_i and c_K;
    vars v_Na and v_Na_lum;
    vars v_Cl and v_Cl_lum;
    vars v_K and v_K_lum;
    vars v_V and v_V_lum;
    vars I_para and I_lum;
  enddef;
  def map between muc_transport_module and muc_transport for
    vars v_Na and v_Na;
    vars v_Cl and v_Cl;
    vars v_K and v_K;
    vars v_V and v_V;
    vars I_para and I_para;
    vars R and R;
    vars T and T;
    vars F and F;
    vars zNa and zNa;
    vars zCl and zCl;
    vars zK and zK;
    vars omega_Na and omega_Na;
    vars omega_Cl and omega_Cl;
    vars omega_K and omega_K;
    vars L_P and L_P;
    vars sigma_Na and sigma_Na;
    vars sigma_Cl and sigma_Cl;
    vars sigma_K and sigma_K;
  enddef;
  def map between muc_transport_module and cell_module for
    vars I_para and I_lum;
  enddef;
  def map between mucus_module and mucus for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
    vars V_w and V_w;
    vars q_V_init and q_V_init;
    vars q_Na_init and q_Na_init;
    vars q_Cl_init and q_Cl_init;
    vars q_K_init and q_K_init;
    vars u_e_mucus_init and u_e_mucus_init;
    vars q_V and q_V;
    vars q_Na and q_Na;
    vars q_K and q_K;
    vars q_Cl and q_Cl;
    vars c_Na and c_Na;
    vars c_K and c_K;
    vars c_Cl and c_Cl;
    vars u_e_Donnan and u_e_Donnan;
    vars u_e_mucus and u_e_mucus;
    vars L and L;
    vars A and A;
    vars C_m_bas and C_m_bas;
    vars C_m_api and C_m_api;
    vars K_Na and K_Na;
    vars K_K and K_K;
    vars K_Cl and K_Cl;
    vars u_Pi_mix and u_Pi_mix;
    vars u_Pi_elastic and u_Pi_elastic;
    vars u_Pi_ion and u_Pi_ion;
    vars phi_p and phi_p;
    vars phi_p_o and phi_p_o;
    vars chi_p and chi_p;
    vars nu_c and nu_c;
  enddef;
  def map between mucus_module and para_transport_module for
    vars u_mu_e_Na and u_mu_e_Na_o;
    vars u_mu_e_K and u_mu_e_K_o;
    vars u_mu_e_Cl and u_mu_e_Cl_o;
    vars c_Na and c_Na_o;
    vars c_K and c_K_o;
    vars c_Cl and c_Cl_o;
    vars v_Na_para and v_Na;
    vars v_K_para and v_K;
    vars v_Cl_para and v_Cl;
    vars v_V_para and v_V;
    vars u_P_pi and u_P_pi_o;
    vars I_para and I_para;
  enddef;
  def map between mucus_module and ENaC_module for
    vars c_Na and c_Na_o;
    vars v_ENaC_o and v_q_Na_o;
  enddef;
  def map between mucus_module and AQ_api_module for
    vars v_AQ_o and v_AQ_o;
    vars u_P_pi and u_P_pi_o;
  enddef;
  def map between mucus_module and api_membrane_module for
    vars u_e_mucus and u_e_mucus;
    vars I_api and I_apical;
  enddef;
  def map between mucus_module and bas_membrane_module for
    vars I_bas and I_bas;
  enddef;
  def map between cell_module and cell for
    vars R and R;
    vars T and T;
    vars F and F;
    vars q_V_init and q_V_init;
    vars q_Na_init and q_Na_init;
    vars q_K_init and q_K_init;
    vars u_e_cell_init and u_e_cell_init;
    vars u_e_cell and u_e_cell;
    vars u_P and u_P;
    vars q_V and q_V;
    vars q_Na and q_Na;
    vars q_K and q_K;
    vars c_ATP_init and c_ATP_init;
    vars c_ADP_init and c_ADP_init;
    vars c_Pi_init and c_Pi_init;
    vars c_Na and c_Na;
    vars c_K and c_K;
    vars c_Cl and c_Cl;
    vars c_ADP and c_ADP;
    vars c_ATP and c_ATP;
    vars c_Pi and c_Pi;
    vars C_m_bas and C_m_bas;
  enddef;
  def map between cell_module and bas_membrane_module for
    vars u_e_cell and u_e_cell;
    vars I_bas and I_bas;
  enddef;
  def map between cell_module and api_membrane_module for
    vars u_e_cell and u_e_cell;
  enddef;
  def map between cell_module and AQ_api_module for
    vars u_P_pi and u_P_pi_i;
    vars v_AQ_api_i and v_AQ_i;
  enddef;
  def map between cell_module and AQ_bas_module for
    vars u_P_pi and u_P_pi_i;
    vars v_AQ_bas_i and v_AQ_i;
  enddef;
  def map between cell_module and ENaC_module for
    vars c_Na and c_Na_i;
    vars v_ENaC_i and v_q_Na_i;
  enddef;
  def map between cell_module and NKE_module for
    vars c_Na and c_Na_i;
    vars c_K and c_K_i;
    vars c_ADP and c_ADP;
    vars c_ATP and c_ATP;
    vars c_Pi and c_Pi;
    vars v_NKE_K_i and v_q_K_i;
    vars v_NKE_Na_i and v_q_Na_i;
  enddef;
  def map between cell_module and Kir_module for
    vars c_K and c_K_i;
    vars v_Kir_i and v_Kir_i;
  enddef;
  def map between cell_module and para_transport_module for
    vars I_para and I_para;
  enddef;
  def map between int_fluid_module and int_fluid for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
    vars q_V_init and q_V_init;
    vars q_Na_init and q_Na_init;
    vars q_Cl_init and q_Cl_init;
    vars q_K_init and q_K_init;
    vars u_mu_e_Na and u_mu_e_Na;
    vars u_mu_e_K and u_mu_e_K;
    vars u_mu_e_Cl and u_mu_e_Cl;
    vars u_P and u_P;
    vars u_P_pi and u_P_pi;
    vars q_V and q_V;
    vars q_Na and q_Na;
    vars q_K and q_K;
    vars q_Cl and q_Cl;
    vars c_Na and c_Na;
    vars c_K and c_K;
    vars c_Cl and c_Cl;
    vars K_Na and K_Na;
    vars K_K and K_K;
    vars K_Cl and K_Cl;
    vars v_Na_cap and v_Na_cap;
    vars v_K_cap and v_K_cap;
    vars v_Cl_cap and v_Cl_cap;
    vars v_V_cap and v_V_cap;
  enddef;
  def map between int_fluid_module and bas_membrane_module for
    vars u_e_int and u_e_int;
  enddef;
  def map between int_fluid_module and para_transport_module for
    vars u_mu_e_Na and u_mu_e_Na_i;
    vars u_mu_e_K and u_mu_e_K_i;
    vars u_mu_e_Cl and u_mu_e_Cl_i;
    vars u_P_pi and u_P_pi_i;
    vars c_Na and c_Na_i;
    vars c_K and c_K_i;
    vars c_Cl and c_Cl_i;
    vars v_Na_para and v_Na;
    vars v_K_para and v_K;
    vars v_Cl_para and v_Cl;
    vars v_V_para and v_V;
  enddef;
  def map between int_fluid_module and cap_transport_module for
    vars u_mu_e_Na and u_mu_e_Na_o;
    vars u_mu_e_K and u_mu_e_K_o;
    vars u_mu_e_Cl and u_mu_e_Cl_o;
    vars u_P_pi and u_P_pi_o;
    vars c_Na and c_Na_o;
    vars c_K and c_K_o;
    vars c_Cl and c_Cl_o;
    vars v_Na_cap and v_Na;
    vars v_K_cap and v_K;
    vars v_Cl_cap and v_Cl;
    vars v_V_cap and v_V;
  enddef;
  def map between int_fluid_module and lymph_transport_module for
    vars u_mu_e_Na and u_mu_e_Na_o;
    vars u_mu_e_K and u_mu_e_K_o;
    vars u_mu_e_Cl and u_mu_e_Cl_o;
    vars u_P_pi and u_P_pi_o;
    vars c_Na and c_Na_o;
    vars c_K and c_K_o;
    vars c_Cl and c_Cl_o;
    vars v_Na_lym and v_Na;
    vars v_K_lym and v_K;
    vars v_Cl_lym and v_Cl;
    vars v_V_lym and v_V;
  enddef;
  def map between int_fluid_module and AQ_bas_module for
    vars u_P_pi and u_P_pi_o;
    vars v_AQ_o and v_AQ_o;
  enddef;
  def map between int_fluid_module and NKE_module for
    vars c_Na and c_Na_o;
    vars c_K and c_K_o;
    vars v_NKE_Na_o and v_q_Na_o;
    vars v_NKE_K_o and v_q_K_o;
  enddef;
  def map between int_fluid_module and Kir_module for
    vars c_K and c_K_o;
    vars v_Kir_o and v_Kir_o;
  enddef;
  def map between para_transport_module and para_transport for
    vars v_Na and v_Na;
    vars v_Cl and v_Cl;
    vars v_K and v_K;
    vars v_V and v_V;
    vars I_para and I_para;
    vars R and R;
    vars T and T;
    vars F and F;
    vars zNa and zNa;
    vars zCl and zCl;
    vars zK and zK;
    vars omega_Na and omega_Na;
    vars omega_Cl and omega_Cl;
    vars omega_K and omega_K;
    vars L_P and L_P;
    vars sigma_Na and sigma_Na;
    vars sigma_Cl and sigma_Cl;
    vars sigma_K and sigma_K;
  enddef;
  def map between bas_membrane_module and bas_membrane for
    vars I_NKE and I_NKE;
    vars I_Kir and I_Kir;
    vars I_bas and I_bas;
    vars u_e_bas and u_e_bas;
  enddef;
  def map between bas_membrane_module and NKE_module for
    vars I_NKE and I_NKE;
    vars u_e_bas and u_e_m;
  enddef;
  def map between bas_membrane_module and Kir_module for
    vars I_Kir and I_Kir;
    vars u_e_bas and u_e_m;
  enddef;
  def map between api_membrane_module and api_membrane for
    vars I_ENaC and I_ENaC;
    vars I_apical and I_apical;
    vars u_e_api and u_e_api;
  enddef;
  def map between api_membrane_module and ENaC_module for
    vars I_ENaC and I_ENaC;
    vars u_e_api and u_e_m;
  enddef;
  def map between ENaC_module and ENaC for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zNa and zNa;
    vars q_1_init and q_1_init;
    vars q_2_init and q_2_init;
    vars q_3_init and q_3_init;
    vars q_4_init and q_4_init;
    vars K_1 and K_1;
    vars K_2 and K_2;
    vars K_3 and K_3;
    vars K_4 and K_4;
    vars K_Na and K_Na;
    vars kappa_1 and kappa_1;
    vars kappa_2 and kappa_2;
    vars kappa_3 and kappa_3;
    vars kappa_4 and kappa_4;
    vars P_Na and P_Na;
    vars P_o and P_o;
    vars kappa_ENaC and kappa_ENaC;
    vars v_q_Na_i and v_q_Na_i;
    vars v_q_Na_o and v_q_Na_o;
  enddef;
  def map between AQ_api_module and AQ_api for
    vars kappa_AQ and kappa_AQ;
    vars v_AQ_i and v_AQ_i;
    vars v_AQ_o and v_AQ_o;
  enddef;
  def map between AQ_bas_module and AQ_bas for
    vars kappa_AQ and kappa_AQ;
    vars v_AQ_i and v_AQ_i;
    vars v_AQ_o and v_AQ_o;
  enddef;
  def map between NKE_module and NKE for
    vars R and R;
    vars T and T;
    vars F and F;
    vars z_1 and z_1;
    vars q_1_init and q_1_init;
    vars q_2_init and q_2_init;
    vars q_3_init and q_3_init;
    vars q_4_init and q_4_init;
    vars q_5_init and q_5_init;
    vars q_6_init and q_6_init;
    vars q_1 and q_1;
    vars q_2 and q_2;
    vars q_3 and q_3;
    vars q_4 and q_4;
    vars q_5 and q_5;
    vars q_6 and q_6;
    vars K_1 and K_1;
    vars K_2 and K_2;
    vars K_3 and K_3;
    vars K_4 and K_4;
    vars K_5 and K_5;
    vars K_6 and K_6;
    vars K_K and K_K;
    vars K_ADP and K_ADP;
    vars K_ATP and K_ATP;
    vars K_Na and K_Na;
    vars K_Pi and K_Pi;
    vars kappa_1 and kappa_1;
    vars kappa_2 and kappa_2;
    vars kappa_3 and kappa_3;
    vars kappa_4 and kappa_4;
    vars kappa_5 and kappa_5;
    vars kappa_6 and kappa_6;
    vars Q_1 and Q_1;
    vars Q_2 and Q_2;
    vars Q_3 and Q_3;
    vars Q_4 and Q_4;
    vars Q_5 and Q_5;
    vars Q_6 and Q_6;
    vars Q_Na_o and Q_Na_o;
    vars Q_Na_i and Q_Na_i;
    vars Q_K_o and Q_K_o;
    vars Q_K_i and Q_K_i;
    vars Q_ATP and Q_ATP;
    vars Q_ADP and Q_ADP;
    vars Q_Pi and Q_Pi;
    vars Q_H_i and Q_H_i;
    vars v_1 and v_1;
    vars v_2 and v_2;
    vars v_3 and v_3;
    vars v_4 and v_4;
    vars v_5 and v_5;
    vars v_6 and v_6;
    vars v_q_Na_i and v_q_Na_i;
    vars v_q_Na_o and v_q_Na_o;
    vars v_q_K_i and v_q_K_i;
    vars v_q_K_o and v_q_K_o;
  enddef;
  def map between Kir_module and Kir for
    vars R and R;
    vars T and T;
    vars F and F;
    vars zK and zK;
    vars kappa_Kir and kappa_Kir;
    vars P_Kir and P_Kir;
    vars N_Kir and N_Kir;
    vars v_Kir_o and v_Kir_o;
    vars v_Kir_i and v_Kir_i;
  enddef;
  def map between cap_transport_module and blood_module for
    vars u_P_pi_i and u_P_pi;
    vars u_mu_e_Na_i and u_mu_e_Na;
    vars u_mu_e_Cl_i and u_mu_e_Cl;
    vars u_mu_e_K_i and u_mu_e_K;
    vars c_Na_i and c_Na;
    vars c_Cl_i and c_Cl;
    vars c_K_i and c_K;
    vars v_Na and v_Na_fluid;
    vars v_Cl and v_Cl_fluid;
    vars v_K and v_K_fluid;
    vars v_V and v_V_fluid;
    vars I_para and I_fluid;
  enddef;
  def map between cap_transport_module and cap_transport for
    vars v_Na and v_Na;
    vars v_Cl and v_Cl;
    vars v_K and v_K;
    vars v_V and v_V;
    vars I_para and I_para;
    vars R and R;
    vars T and T;
    vars F and F;
    vars zNa and zNa;
    vars zCl and zCl;
    vars zK and zK;
    vars omega_Na and omega_Na;
    vars omega_Cl and omega_Cl;
    vars omega_K and omega_K;
    vars L_P and L_P;
    vars sigma_Na and sigma_Na;
    vars sigma_Cl and sigma_Cl;
    vars sigma_K and sigma_K;
  enddef;
  def map between blood_module and blood for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
    vars G_m and G_m;
    vars q_V_init and q_V_init;
    vars q_Na_init and q_Na_init;
    vars q_Cl_init and q_Cl_init;
    vars q_K_init and q_K_init;
    vars u_e_fluid and u_e_fluid;
    vars u_e_Donnan and u_e_Donnan;
    vars u_mu_e_Na and u_mu_e_Na;
    vars u_mu_e_K and u_mu_e_K;
    vars u_mu_e_Cl and u_mu_e_Cl;
    vars u_P and u_P;
    vars u_P_pi and u_P_pi;
    vars q_V and q_V;
    vars q_Na and q_Na;
    vars q_K and q_K;
    vars q_Cl and q_Cl;
    vars q_proteins and q_proteins;
    vars q_albumin and q_albumin;
    vars c_Na and c_Na;
    vars c_K and c_K;
    vars c_Cl and c_Cl;
    vars c_proteins and c_proteins;
    vars c_albumin and c_albumin;
    vars K_Na and K_Na;
    vars K_K and K_K;
    vars K_Cl and K_Cl;
  enddef;
  def map between lymph_module and lymph for
    vars zNa and zNa;
    vars zK and zK;
    vars zCl and zCl;
    vars R and R;
    vars T and T;
    vars F and F;
    vars G_m and G_m;
    vars q_V_init and q_V_init;
    vars q_Na_init and q_Na_init;
    vars q_Cl_init and q_Cl_init;
    vars q_K_init and q_K_init;
    vars u_e_fluid and u_e_fluid;
    vars u_e_Donnan and u_e_Donnan;
    vars u_mu_e_Na and u_mu_e_Na;
    vars u_mu_e_K and u_mu_e_K;
    vars u_mu_e_Cl and u_mu_e_Cl;
    vars u_P and u_P;
    vars u_P_pi and u_P_pi;
    vars q_V and q_V;
    vars q_Na and q_Na;
    vars q_K and q_K;
    vars q_Cl and q_Cl;
    vars q_proteins and q_proteins;
    vars q_albumin and q_albumin;
    vars c_Na and c_Na;
    vars c_K and c_K;
    vars c_Cl and c_Cl;
    vars c_proteins and c_proteins;
    vars c_albumin and c_albumin;
    vars K_Na and K_Na;
    vars K_K and K_K;
    vars K_Cl and K_Cl;
  enddef;
  def map between lymph_module and lymph_transport_module for
    vars u_mu_e_Na and u_mu_e_Na_i;
    vars u_mu_e_K and u_mu_e_K_i;
    vars u_mu_e_Cl and u_mu_e_Cl_i;
    vars u_P_pi and u_P_pi_i;
    vars c_Na and c_Na_i;
    vars c_K and c_K_i;
    vars c_Cl and c_Cl_i;
    vars v_Na_fluid and v_Na;
    vars v_K_fluid and v_K;
    vars v_Cl_fluid and v_Cl;
    vars v_V_fluid and v_V;
    vars I_fluid and I_para;
  enddef;
  def map between lymph_transport_module and lymph_transport for
    vars v_Na and v_Na;
    vars v_Cl and v_Cl;
    vars v_K and v_K;
    vars v_V and v_V;
    vars I_para and I_para;
    vars R and R;
    vars T and T;
    vars F and F;
    vars zNa and zNa;
    vars zCl and zCl;
    vars zK and zK;
    vars omega_Na and omega_Na;
    vars omega_Cl and omega_Cl;
    vars omega_K and omega_K;
    vars L_P and L_P;
    vars sigma_Na and sigma_Na;
    vars sigma_Cl and sigma_Cl;
    vars sigma_K and sigma_K;
  enddef;
enddef;
