def model modules as
  // ------------module_units------------//
  def import using "colon_FTU_units.cellml" for
    unit s2 using unit s2;
    unit Hz using unit Hz;
    unit millis using unit millis;
    unit per_millis using unit per_millis;
    unit mm using unit mm;
    unit m2 using unit m2;
    unit mm2 using unit mm2;
    unit m3 using unit m3;
    unit m4 using unit m4;
    unit mm3 using unit mm3;
    unit J_per_s using unit J_per_s;
    unit mol_per_s using unit mol_per_s;
    unit mmol_per_s using unit mmol_per_s;
    unit umol_per_s using unit umol_per_s;
    unit C_per_s using unit C_per_s;
    unit mC_per_s using unit mC_per_s;
    unit uC_per_s using unit uC_per_s;
    unit nC_per_s using unit nC_per_s;
    unit Cm_per_millis using unit Cm_per_millis;
    unit m_per_s using unit m_per_s;
    unit mm_per_s using unit mm_per_s;
    unit um_per_s using unit um_per_s;
    unit rad_per_s using unit rad_per_s;
    unit m3_per_s using unit m3_per_s;
    unit mL using unit mL;
    unit per_milliL_s using unit per_milliL_s;
    unit s_per_m3 using unit s_per_m3;
    unit s_per_milliV using unit s_per_milliV;
    unit s_per_millis using unit s_per_millis;
    unit millis_per_s using unit millis_per_s;
    unit mm3_per_s using unit mm3_per_s;
    unit l_per_s using unit l_per_s;
    unit per_ml_s using unit per_ml_s;
    unit per_m3_s using unit per_m3_s;
    unit J_per_mol using unit J_per_mol;
    unit J_per_kmol_K using unit J_per_kmol_K;
    unit J_per_M using unit J_per_M;
    unit J_per_C using unit J_per_C;
    unit J_per_C_s using unit J_per_C_s;
    unit J_per_m using unit J_per_m;
    unit J_per_m3 using unit J_per_m3;
    unit mmHg using unit mmHg;
    unit per_mmHg using unit per_mmHg;
    unit mmHg2 using unit mmHg2;
    unit Pa_per_mmHg using unit Pa_per_mmHg;
    unit m3_per_J using unit m3_per_J;
    unit J_per_m3s using unit J_per_m3s;
    unit m3_per_Js using unit m3_per_Js;
    unit J2_per_m6 using unit J2_per_m6;
    unit Js2_per_C2 using unit Js2_per_C2;
    unit Js2_per_mol2 using unit Js2_per_mol2;
    unit Js_per_mol2 using unit Js_per_mol2;
    unit Js_per_C2 using unit Js_per_C2;
    unit J_per_mol2 using unit J_per_mol2;
    unit C2_per_J_s using unit C2_per_J_s;
    unit J_per_C2 using unit J_per_C2;
    unit C2_per_J using unit C2_per_J;
    unit mol_per_m3 using unit mol_per_m3;
    unit M using unit M;
    unit mM using unit mM;
    unit milliM using unit milliM;
    unit uM using unit uM;
    unit kg_per_m3 using unit kg_per_m3;
    unit m3_per_kg using unit m3_per_kg;
    unit per_m3 using unit per_m3;
    unit mol_per_m2_s using unit mol_per_m2_s;
    unit mM_m_per_s using unit mM_m_per_s;
    unit J_per_m2_s using unit J_per_m2_s;
    unit Js_per_m4 using unit Js_per_m4;
    unit mM_per_s using unit mM_per_s;
    unit per_s using unit per_s;
    unit per_mM_s using unit per_mM_s;
    unit m6_per_mol2_s using unit m6_per_mol2_s;
    unit m3_per_mol using unit m3_per_mol;
    unit mol_per_m3_s using unit mol_per_m3_s;
    unit per_mol using unit per_mol;
    unit J_per_mol_K using unit J_per_mol_K;
    unit m2_per_s using unit m2_per_s;
    unit per_C using unit per_C;
    unit per_m using unit per_m;
    unit per_mM using unit per_mM;
    unit Js2_per_m2 using unit Js2_per_m2;
    unit Js_per_m2 using unit Js_per_m2;
    unit J_per_m2 using unit J_per_m2;
    unit m_per_s2 using unit m_per_s2;
    unit rad_per_s2 using unit rad_per_s2;
    unit Js_per_m3 using unit Js_per_m3;
    unit Js2_per_m5 using unit Js2_per_m5;
    unit m5_per_Js2 using unit m5_per_Js2;
    unit J_per_m6 using unit J_per_m6;
    unit m6_per_J using unit m6_per_J;
    unit m6_per_Js using unit m6_per_Js;
    unit mm6_per_J using unit mm6_per_J;
    unit Js2_per_m9 using unit Js2_per_m9;
    unit m6s_per_J using unit m6s_per_J;
    unit Js_per_m6 using unit Js_per_m6;
    unit Js2_per_m6 using unit Js2_per_m6;
    unit m3_per_s2 using unit m3_per_s2;
    unit mm3_per_s2 using unit mm3_per_s2;
    unit per_mm3 using unit per_mm3;
    unit UnitValve using unit UnitValve;
    unit J_per_m9 using unit J_per_m9;
    unit milliV using unit milliV;
    unit per_milliV using unit per_milliV;
    unit millis_per_milliV using unit millis_per_milliV;
    unit per_V using unit per_V;
    unit milliV_per_V using unit milliV_per_V;
    unit V_per_milliV using unit V_per_milliV;
    unit V_per_s using unit V_per_s;
    unit milliV_per_kiloV using unit milliV_per_kiloV;
    unit V2 using unit V2;
    unit milliV2 using unit milliV2;
    unit millimol using unit millimol;
    unit millimolar using unit millimolar;
    unit per_millimolar using unit per_millimolar;
    unit per_millimolar_s using unit per_millimolar_s;
    unit per_millimolar2_s using unit per_millimolar2_s;
    unit millimolar_per_s using unit millimolar_per_s;
    unit millimolar_per_megamolar using unit millimolar_per_megamolar;
    unit per_millimol_milliS using unit per_millimol_milliS;
    unit per_millimol_millis using unit per_millimol_millis;
    unit per_millimol_s using unit per_millimol_s;
    unit microm using unit microm;
    unit microS using unit microS;
    unit microm3 using unit microm3;
    unit m3_per_microm3 using unit m3_per_microm3;
    unit picoF using unit picoF;
    unit S_per_F using unit S_per_F;
    unit m3_per_Fs using unit m3_per_Fs;
    unit A_per_F using unit A_per_F;
    unit megaOhm using unit megaOhm;
    unit nanoA using unit nanoA;
    unit nanoA_per_milliA using unit nanoA_per_milliA;
    unit nanoA_per_A using unit nanoA_per_A;
    unit A_per_nanoA using unit A_per_nanoA;
    unit C_per_mol using unit C_per_mol;
    unit m3_per_J_millis using unit m3_per_J_millis;
    unit m3_per_mol_millis using unit m3_per_mol_millis;
    unit m3_per_millimol_s using unit m3_per_millimol_s;
    unit millimol_per_m3 using unit millimol_per_m3;
    unit Hz2 using unit Hz2;
    unit cm using unit cm;
    unit J_per_m4_s using unit J_per_m4_s;
    unit J_per_mmol using unit J_per_mmol;
    unit m3_per_mol_per_sec using unit m3_per_mol_per_sec;
    unit mol_per_m3_per_kPa using unit mol_per_m3_per_kPa;
    unit mol_per_m3_per_Pa using unit mol_per_m3_per_Pa;
    unit m3_per_mol_per_s using unit m3_per_mol_per_s;
    unit mol_per_m3_per_s using unit mol_per_m3_per_s;
    unit dim using unit dim;
    unit fmol using unit fmol;
    unit per_fmol using unit per_fmol;
    unit nJ_per_s using unit nJ_per_s;
    unit fmol_per_s using unit fmol_per_s;
    unit nC_per_fmol using unit nC_per_fmol;
    unit nC using unit nC;
    unit nJ_per_fmol using unit nJ_per_fmol;
    unit nJ_per_nC using unit nJ_per_nC;
    unit fC using unit fC;
    unit fF using unit fF;
    unit uF using unit uF;
    unit nF using unit nF;
    unit volt_per_sec using unit volt_per_sec;
    unit J_per_K_per_mmol using unit J_per_K_per_mmol;
    unit nS using unit nS;
    unit nSmV using unit nSmV;
    unit per_ms using unit per_ms;
    unit mM4 using unit mM4;
    unit mM_per_ms using unit mM_per_ms;
    unit mMms using unit mMms;
    unit per_mMms using unit per_mMms;
    unit molar using unit molar;
    unit micromolar using unit micromolar;
    unit nanomolar using unit nanomolar;
    unit ms using unit ms;
    unit m_cubed using unit m_cubed;
    unit mV using unit mV;
    unit m_cubed_per_second using unit m_cubed_per_second;
    unit micromolar_m_cubed using unit micromolar_m_cubed;
    unit C using unit C;
    unit pC using unit pC;
    unit C_per_mmol using unit C_per_mmol;
    unit picoA using unit picoA;
    unit picoS using unit picoS;
    unit picoS_per_fmol using unit picoS_per_fmol;
    unit L_fmol_per_J_per_s using unit L_fmol_per_J_per_s;
    unit picoA_per_picoFarad using unit picoA_per_picoFarad;
    unit microL using unit microL;
    unit picoFarad using unit picoFarad;
    unit cm3_per_second using unit cm3_per_second;
    unit um3_per_second using unit um3_per_second;
    unit m3mM using unit m3mM;
    unit ms2 using unit ms2;
    unit nM3_per_ps using unit nM3_per_ps;
    unit per_s_squared_m_cubed using unit per_s_squared_m_cubed;
    unit per_meters_cubed using unit per_meters_cubed;
    unit umeter3 using unit umeter3;
    unit mill1 using unit mill1;
    unit picoV using unit picoV;
    unit pic0 using unit pic0;
    unit nanoV using unit nanoV;
    unit nan0 using unit nan0;
    unit pL_per_s_per_fmol using unit pL_per_s_per_fmol;
    unit kPa using unit kPa;
    unit L_per_s using unit L_per_s;
    unit L_per_s_per_kPa using unit L_per_s_per_kPa;
    unit kPa_per_L using unit kPa_per_L;
    unit kPa_per_s using unit kPa_per_s;
    unit L_per_kPa using unit L_per_kPa;
    unit kPa_s_per_L using unit kPa_s_per_L;
    unit pL_L_per_J_per_s using unit pL_L_per_J_per_s;
    unit pL using unit pL;
    unit pL_per_s using unit pL_per_s;
    unit pL_per_kPa_per_s using unit pL_per_kPa_per_s;
    unit L_per_mmol using unit L_per_mmol;
    unit nm using unit nm;
    unit um2 using unit um2;
    unit um2_per_s using unit um2_per_s;
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;

  def comp apical_membrane as
    var t: second {pub: in};
    // flows
    var I_ENaC: picoA {pub: in};
    var I_apical: picoA {pub: out};
    // state variables
    var u_e_mucus: volt {pub: in};
    var u_e_cell: volt {pub: in};
    var u_e_api: volt {pub: out};
    // constitutive equations
    I_apical = I_ENaC;
    u_e_api = u_e_cell-u_e_mucus;
  enddef;

  def comp basolateral_membrane as
    var t: second {pub: in};
    // flows
    var I_NKE: picoA {pub: in};
    var I_Kir: picoA {pub: in};
    var I_bas: picoA {pub: out};
    // state variables
    var u_e_bas: volt {pub: out};
    var u_e_cell: volt {pub: in};
    var u_e_int: volt {pub: in};
    // constitutive equations
    I_bas = I_NKE+I_Kir;
    u_e_bas = u_e_cell-u_e_int;
  enddef;
  // paracellular transport

  def comp paracellular_module as
    var t: second {pub: in};
    // currently ignores movement of albumin
    // state variables
    var u_P_pi_o: kPa {pub: in};
    var u_P_pi_i: kPa {pub: in};
    var u_P_pi_diff: kPa;
    var u_mu_e_Na_o: J_per_mmol {pub: in};
    var u_mu_e_Cl_o: J_per_mmol {pub: in};
    var u_mu_e_K_o: J_per_mmol {pub: in};
    var u_mu_e_Na_i: J_per_mmol {pub: in};
    var u_mu_e_Cl_i: J_per_mmol {pub: in};
    var u_mu_e_K_i: J_per_mmol {pub: in};
    var u_mu_e_Na_diff: J_per_mmol;
    var u_mu_e_Cl_diff: J_per_mmol;
    var u_mu_e_K_diff: J_per_mmol;
    var c_Na_o: mM {pub: in};
    var c_Cl_o: mM {pub: in};
    var c_K_o: mM {pub: in};
    var c_Na_i: mM {pub: in};
    var c_Cl_i: mM {pub: in};
    var c_K_i: mM {pub: in};
    var c_Na_bar: mM;
    var c_Cl_bar: mM;
    var c_K_bar: mM;
    c_Na_bar = sel
      case abs(c_Na_o-c_Na_i) < 1e-7{mM}:
        c_Na_o;
      otherwise:
        (c_Na_o-c_Na_i)/ln(c_Na_o/c_Na_i);
    endsel;
    c_K_bar = sel
      case abs(c_K_o-c_K_i) < 1e-7{mM}:
        c_K_o;
      otherwise:
        (c_K_o-c_K_i)/ln(c_K_o/c_K_i);
    endsel;
    c_Cl_bar = sel
      case abs(c_Cl_o-c_Cl_i) < 1e-7{mM}:
        c_Cl_o;
      otherwise:
        (c_Cl_o-c_Cl_i)/ln(c_Cl_o/c_Cl_i);
    endsel;
    var v_Na: fmol_per_s {pub: out};
    var v_Cl: fmol_per_s {pub: out};
    var v_K: fmol_per_s {pub: out};
    var v_V: pL_per_s {pub: out};
    var I_para: picoA {pub: out};
    // constants
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var zNa: dimensionless {pub: in};
    var zCl: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    // constitutive parameters
    var omega_Na: L_fmol_per_J_per_s {pub: in};
    var omega_Cl: L_fmol_per_J_per_s {pub: in};
    var omega_K: L_fmol_per_J_per_s {pub: in};
    var L_P: pL_L_per_J_per_s {pub: in};
    var sigma_Na: dimensionless {pub: in};
    var sigma_Cl: dimensionless {pub: in};
    var sigma_K: dimensionless {pub: in};
    // conservation laws
    u_P_pi_diff = u_P_pi_o-u_P_pi_i;
    u_mu_e_Na_diff = u_mu_e_Na_o-u_mu_e_Na_i;
    u_mu_e_Cl_diff = u_mu_e_Cl_o-u_mu_e_Cl_i;
    u_mu_e_K_diff = u_mu_e_K_o-u_mu_e_K_i;
    // constitutive relations
    v_V = L_P*((1{dimensionless}-sigma_Na)*c_Na_bar*u_mu_e_Na_diff+(1{dimensionless}-sigma_K)*c_K_bar*u_mu_e_K_diff+(1{dimensionless}-sigma_Cl)*c_Cl_bar*u_mu_e_Cl_diff+u_P_pi_diff);
    v_Na = omega_Na*c_Na_bar*u_mu_e_Na_diff+(1{dimensionless}-sigma_Na)*c_Na_bar*v_V;
    v_Cl = omega_Cl*c_Cl_bar*u_mu_e_Cl_diff+(1{dimensionless}-sigma_Cl)*c_Cl_bar*v_V;
    v_K = omega_K*c_K_bar*u_mu_e_K_diff+(1{dimensionless}-sigma_K)*c_K_bar*v_V;
    I_para = zNa*F*v_Na+zCl*F*v_Cl+zK*F*v_K;
  enddef;
  // #########################################################
  // ################## Compartments #########################
  // #########################################################

  def comp lumen_ as
    var t: second {pub: in};
    // constants
    var zNa: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    var zCl: dimensionless {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    // initial conditions
    var q_V_init: pL {pub: in};
    var q_Na_init: fmol {pub: in};
    var q_Cl_init: fmol {pub: in};
    var q_K_init: fmol {pub: in};
    // state variables
    var u_e_lumen: volt {pub: out};
    var u_mu_e_Na: J_per_mmol {pub: out};
    var u_mu_e_K: J_per_mmol {pub: out};
    var u_mu_e_Cl: J_per_mmol {pub: out};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var u_P: kPa {pub: in};
    var u_P_pi: kPa {pub: out};
    var q_V: pL {init: q_V_init, pub: out};
    var q_Na: fmol {init: q_Na_init, pub: out};
    var q_K: fmol {init: q_K_init, pub: out};
    var q_Cl: fmol {init: q_Cl_init, pub: out};
    var c_Na: mM {pub: out};
    var c_K: mM {pub: out};
    var c_Cl: mM {pub: out};
    var v_Na_lum: fmol_per_s {pub: in};
    var v_K_lum: fmol_per_s {pub: in};
    var v_Cl_lum: fmol_per_s {pub: in};
    var v_V_lum: pL_per_s {pub: in};
    var I_lum: picoA {pub: in};
    // constitutive parameters
    var K_Na: per_mM {pub: in};
    var K_K: per_mM {pub: in};
    var K_Cl: per_mM {pub: in};
    var G_muc: picoS {pub: in};
    // constitutive relations
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    c_Cl = q_Cl/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    // conservation laws
    u_P_pi = u_P-(u_pi_Na+u_pi_K+u_pi_Cl);
    u_mu_e_Na = R*T*ln(K_Na*c_Na)+zNa*F*u_e_lumen;
    u_mu_e_K = R*T*ln(K_K*c_K)+zK*F*u_e_lumen;
    u_mu_e_Cl = R*T*ln(K_Cl*c_Cl)+zCl*F*u_e_lumen;
    // ode(q_Na, t) = -v_Na_lum;
    // ode(q_K, t)  = -v_K_lum;
    // ode(q_Cl, t) = -v_Cl_lum;
    // ode(q_V, t)  = -v_V_lum;
    ode(q_Na, t) = 0{fmol_per_s};
    ode(q_K, t) = 0{fmol_per_s};
    ode(q_Cl, t) = 0{fmol_per_s};
    ode(q_V, t) = 0{pL_per_s};
    var phi_p: dimensionless {pub: in};
    var phi_p_o: dimensionless {pub: in};
    u_e_lumen = I_lum/G_muc;
  enddef;

  def comp mucus as
    var t: second {pub: in};
    // constants
    var zNa: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    var zCl: dimensionless {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var V_w: L_per_mmol {pub: in};
    var RT: J_per_mmol;
    RT = R*T;
    // initial conditions
    var q_V_init: pL {pub: in};
    var q_Na_init: fmol {pub: in};
    var q_Cl_init: fmol {pub: in};
    var q_K_init: fmol {pub: in};
    var u_e_mucus_init: volt {pub: in};
    // state variables
    var u_e_mucus_ion: volt {init: u_e_mucus_init};
    var u_mu_e_Na: J_per_mmol {pub: out};
    var u_mu_e_K: J_per_mmol {pub: out};
    var u_mu_e_Cl: J_per_mmol {pub: out};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var q_V: pL {init: q_V_init, pub: out};
    var q_Na: fmol {init: q_Na_init, pub: out};
    var q_K: fmol {init: q_K_init, pub: out};
    var q_Cl: fmol {init: q_Cl_init, pub: out};
    var c_Na: mM {pub: out};
    var c_K: mM {pub: out};
    var c_Cl: mM {pub: out};
    var v_Na_para: fmol_per_s {pub: in};
    var v_K_para: fmol_per_s {pub: in};
    var v_Cl_para: fmol_per_s {pub: in};
    var v_V_para: pL_per_s {pub: in};
    var v_Na_lum: fmol_per_s {pub: in};
    var v_K_lum: fmol_per_s {pub: in};
    var v_Cl_lum: fmol_per_s {pub: in};
    var v_V_lum: pL_per_s {pub: in};
    var v_ENaC_o: fmol_per_s {pub: in};
    var v_AQ_o: pL_per_s {pub: in};
    // describes the negative fixed potential contributed by mucins
    var u_e_Donnan: volt {pub: in};
    var u_e_mucus: volt {pub: out};
    var u_P_pi: kPa {pub: out};
    var L: mm {pub: out};
    var A: um2 {pub: in};
    // constitutive parameters
    var C_m_bas: picoFarad {pub: in};
    var C_m_api: picoFarad {pub: in};
    var K_Na: per_mM {pub: in};
    var K_K: per_mM {pub: in};
    var K_Cl: per_mM {pub: in};
    // constitutive relations
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    c_Cl = q_Cl/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    // Flory-Rehner pressures
    var u_Pi_mix: kPa {pub: out};
    var u_Pi_elastic: kPa {pub: out};
    var u_Pi_ion: kPa {pub: out};
    // volume fraction of mucin polymers
    var phi_p: dimensionless {pub: out};
    var phi_p_o: dimensionless {pub: in};
    // Flory-Rehner solvent-polymer interaction term
    var chi_p: dimensionless {pub: in};
    // Moles of elastically effective chains per unit volumne of polymer network
    var nu_c: mM {pub: in};
    u_Pi_mix = RT/V_w*(ln(1{dimensionless}-phi_p)+phi_p+chi_p*sqr(phi_p));
    u_Pi_elastic = nu_c*RT*(0.5{dimensionless}*phi_p-pow(phi_p, 1{dimensionless}/3{dimensionless}));
    phi_p = phi_p_o*q_V_init/q_V;
    L = q_V/A;
    // conservation laws
    u_Pi_ion = -(u_pi_Na+u_pi_K+u_pi_Cl);
    u_P_pi = u_Pi_elastic+u_Pi_mix+u_Pi_ion;
    u_mu_e_Na = R*T*ln(K_Na*c_Na)+zNa*F*u_e_mucus;
    u_mu_e_K = R*T*ln(K_K*c_K)+zK*F*u_e_mucus;
    u_mu_e_Cl = R*T*ln(K_Cl*c_Cl)+zCl*F*u_e_mucus;
    ode(q_Na, t) = v_Na_lum-v_Na_para+v_ENaC_o;
    ode(q_K, t) = v_K_lum-v_K_para;
    ode(q_Cl, t) = v_Cl_lum-v_Cl_para;
    ode(q_V, t) = v_V_lum-v_V_para+v_AQ_o;
    var I_para: picoA {pub: in};
    var I_bas: picoA {pub: in};
    var I_api: picoA {pub: in};
    var I_lum: picoA {pub: in};
    ode(u_e_mucus_ion, t) = (I_lum-(I_para+I_bas))/C_m_bas+(I_lum+I_api-I_para)/C_m_api;
    u_e_mucus = u_e_mucus_ion+u_e_Donnan;
  enddef;

  def comp colonocyte as
    var t: second {pub: in};
    // constants
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    // initial conditions
    var q_V_init: pL {pub: in};
    var q_Na_init: fmol {pub: in};
    var q_K_init: fmol {pub: in};
    var u_e_cell_init: volt {pub: in};
    // state variables
    var u_e_cell: volt {init: u_e_cell_init, pub: out};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var u_P: kPa {pub: in};
    var u_P_pi: kPa {pub: out};
    var q_V: pL {init: q_V_init, pub: out};
    var q_Na: fmol {init: q_Na_init, pub: out};
    var q_K: fmol {init: q_K_init, pub: out};
    var c_ATP_init: mM {pub: in};
    var c_ADP_init: mM {pub: in};
    var c_Pi_init: mM {pub: in};
    var c_Na: mM {pub: out};
    var c_K: mM {pub: out};
    var c_Cl: mM {pub: in};
    var c_ADP: mM {init: c_ADP_init, pub: out};
    var c_ATP: mM {init: c_ATP_init, pub: out};
    var c_Pi: mM {init: c_Pi_init, pub: out};
    // apical fluxes
    var v_ENaC_i: fmol_per_s {pub: in};
    var v_AQ_api_i: pL_per_s {pub: in};
    // basolateral fluxes
    var v_Kir_i: fmol_per_s {pub: in};
    var v_NKE_K_i: fmol_per_s {pub: in};
    var v_NKE_Na_i: fmol_per_s {pub: in};
    var v_AQ_bas_i: pL_per_s {pub: in};
    // currents
    var I_para: picoA {pub: in};
    var I_bas: picoA {pub: in};
    var I_lum: picoA {pub: in};
    // constitutive parameters
    var C_m_bas: picoFarad {pub: in};
    // constitutive relations
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    // conservation laws
    u_P_pi = u_P-(u_pi_Na+u_pi_K+u_pi_Cl);
    ode(q_Na, t) = v_ENaC_i+v_NKE_Na_i;
    ode(q_K, t) = v_NKE_K_i+v_Kir_i;
    ode(q_V, t) = v_AQ_api_i+v_AQ_bas_i;
    ode(u_e_cell, t) = (I_lum-(I_para+I_bas))/C_m_bas;
  enddef;

  def comp interstitial_fluid as
    var t: second {pub: in};
    // constants
    var zNa: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    var zCl: dimensionless {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    // initial conditions
    var q_V_init: pL {pub: in};
    var q_Na_init: fmol {pub: in};
    var q_Cl_init: fmol {pub: in};
    var q_K_init: fmol {pub: in};
    // state variables
    var u_e_int: volt {init: 0, pub: out};
    var u_mu_Na: J_per_mmol;
    var u_mu_K: J_per_mmol;
    var u_mu_Cl: J_per_mmol;
    var u_mu_e_Na: J_per_mmol {pub: out};
    var u_mu_e_K: J_per_mmol {pub: out};
    var u_mu_e_Cl: J_per_mmol {pub: out};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var u_P: kPa {pub: in};
    var u_P_pi: kPa {pub: out};
    var q_V: pL {init: q_V_init, pub: out};
    var q_Na: fmol {init: q_Na_init, pub: out};
    var q_K: fmol {init: q_K_init, pub: out};
    var q_Cl: fmol {init: q_Cl_init, pub: out};
    var c_Na: mM {pub: out};
    var c_K: mM {pub: out};
    var c_Cl: mM {pub: out};
    // constitutive parameters
    var K_Na: per_mM {pub: in};
    var K_K: per_mM {pub: in};
    var K_Cl: per_mM {pub: in};
    // constitutive relations
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    c_Cl = q_Cl/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    u_mu_Na = R*T*ln(K_Na*c_Na);
    u_mu_K = R*T*ln(K_K*c_K);
    u_mu_Cl = R*T*ln(K_Cl*c_Cl);
    // flows
    var v_Na_para: fmol_per_s {pub: in};
    var v_K_para: fmol_per_s {pub: in};
    var v_Cl_para: fmol_per_s {pub: in};
    var v_V_para: pL_per_s {pub: in};
    var v_Na_cap: fmol_per_s {pub: in};
    var v_K_cap: fmol_per_s {pub: in};
    var v_Cl_cap: fmol_per_s {pub: in};
    var v_V_cap: pL_per_s {pub: in};
    var v_Na_lym: fmol_per_s {pub: in};
    var v_K_lym: fmol_per_s {pub: in};
    var v_Cl_lym: fmol_per_s {pub: in};
    var v_V_lym: pL_per_s {pub: in};
    var v_NKE_Na_o: fmol_per_s {pub: in};
    var v_NKE_K_o: fmol_per_s {pub: in};
    var v_Kir_o: fmol_per_s {pub: in};
    var v_AQ_o: pL_per_s {pub: in};
    // conservation laws
    u_P_pi = u_P-(u_pi_Na+u_pi_K+u_pi_Cl);
    u_mu_e_Na = u_mu_Na+zNa*F*u_e_int;
    u_mu_e_K = u_mu_K+zK*F*u_e_int;
    u_mu_e_Cl = u_mu_Cl+zCl*F*u_e_int;
    ode(q_Na, t) = v_Na_para-v_Na_cap-v_Na_lym+v_NKE_Na_o;
    ode(q_K, t) = v_K_para-v_K_cap-v_K_lym+v_NKE_K_o+v_Kir_o;
    ode(q_Cl, t) = v_Cl_para-v_Cl_lym-v_Cl_cap;
    ode(q_V, t) = v_V_para-v_V_lym-v_V_cap+v_AQ_o;
  enddef;

  def comp blood_lymph as
    var t: second {pub: in};
    // constants
    var zNa: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    var zCl: dimensionless {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var G_m: picoS {pub: in};
    // initial conditions
    var q_V_init: pL {pub: in};
    var q_Na_init: fmol {pub: in};
    var q_Cl_init: fmol {pub: in};
    var q_K_init: fmol {pub: in};
    // state variables
    var u_e_fluid: volt {pub: out};
    // describes the negative fixed potential contributed by the plasma (albumin)
    var u_e_Donnan: volt {pub: in};
    // u_e_Donnan = RT/z_proteinF*ln(c_protein_plasma/c_protein_interstitial) + RT/z_albuminF*ln(c_albumin_plasma/c_albumin_interstitial)
    // z_protein = -2-5, z_albumin = -14; c_protein_plasma = 15 mM, c_protein_int = 5 mM, c_albumin_plasma = 60 mM, c_albumin_ int = 20 mM
    var u_mu_Na: J_per_mmol;
    var u_mu_K: J_per_mmol;
    var u_mu_Cl: J_per_mmol;
    var u_mu_e_Na: J_per_mmol {pub: out};
    var u_mu_e_K: J_per_mmol {pub: out};
    var u_mu_e_Cl: J_per_mmol {pub: out};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var u_pi_proteins: kPa;
    var u_P: kPa {pub: in};
    var u_P_pi: kPa {pub: out};
    var q_V: pL {init: q_V_init, pub: out};
    var q_Na: fmol {init: q_Na_init, pub: out};
    var q_K: fmol {init: q_K_init, pub: out};
    var q_Cl: fmol {init: q_Cl_init, pub: out};
    var q_proteins: fmol {pub: in};
    var q_albumin: fmol {pub: in};
    var c_Na: mM {pub: out};
    var c_K: mM {pub: out};
    var c_Cl: mM {pub: out};
    var c_proteins: mM {pub: out};
    var c_albumin: mM {pub: out};
    // constitutive parameters
    var K_Na: per_mM {pub: in};
    var K_K: per_mM {pub: in};
    var K_Cl: per_mM {pub: in};
    // constitutive relations
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    c_Cl = q_Cl/q_V;
    c_proteins = q_proteins/q_V;
    c_albumin = q_albumin/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    u_pi_proteins = R*T*(c_proteins+c_albumin);
    u_mu_Na = R*T*ln(K_Na*c_Na);
    u_mu_K = R*T*ln(K_K*c_K);
    u_mu_Cl = R*T*ln(K_Cl*c_Cl);
    u_e_fluid = I_fluid/G_m+u_e_Donnan;
    // flows
    var v_Na_fluid: fmol_per_s {pub: in};
    var v_K_fluid: fmol_per_s {pub: in};
    var v_Cl_fluid: fmol_per_s {pub: in};
    var v_V_fluid: pL_per_s {pub: in};
    var I_fluid: picoA {pub: in};
    // conservation laws
    u_P_pi = u_P-(u_pi_Na+u_pi_K+u_pi_Cl+u_pi_proteins);
    u_mu_e_Na = u_mu_Na+zNa*F*u_e_fluid;
    u_mu_e_K = u_mu_K+zK*F*u_e_fluid;
    u_mu_e_Cl = u_mu_Cl+zCl*F*u_e_fluid;
    // assume blood flow is such that the amount of these species don't change
    ode(q_Na, t) = 0{fmol_per_s};
    ode(q_K, t) = 0{fmol_per_s};
    ode(q_Cl, t) = 0{fmol_per_s};
    ode(q_V, t) = 0{pL_per_s};
  enddef;
  // #########################################################
  // #################### Proteins ###########################
  // #########################################################

  def comp ENaC as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var RT: J_per_mmol;
    var zNa: dimensionless {pub: in};
    RT = R*T;
    // Quantities
    var q_1_init: fmol {pub: in};
    var q_2_init: fmol {pub: in};
    var q_3_init: fmol {pub: in};
    var q_4_init: fmol {pub: in};
    var q_1: fmol {init: q_1_init};
    var q_2: fmol {init: q_2_init};
    var q_3: fmol {init: q_3_init};
    var q_4: fmol {init: q_4_init};
    var c_Na_i: mM {pub: in};
    var c_Na_o: mM {pub: in};
    // Parameters
    var K_1: per_fmol {pub: in};
    var K_2: per_fmol {pub: in};
    var K_3: per_fmol {pub: in};
    var K_4: per_fmol {pub: in};
    var K_Na: per_mM {pub: in};
    var kappa_1: fmol_per_s {pub: in};
    var kappa_2: fmol_per_s {pub: in};
    var kappa_3: fmol_per_s {pub: in};
    var kappa_4: fmol_per_s {pub: in};
    var P_Na: pL_per_s_per_fmol {pub: in};
    var P_o: pL_per_s_per_fmol {pub: in};
    // Potentials
    var u_e_m: volt {pub: in};
    // flows
    var v_1: fmol_per_s;
    var v_2: fmol_per_s;
    var v_3: fmol_per_s;
    var v_4: fmol_per_s;
    v_1 = kappa_1*(K_2*q_2-K_1*q_1);
    v_2 = kappa_2*(K_1*q_1*K_Na*c_Na_o-K_3*q_3);
    v_3 = kappa_3*(K_3*q_3-K_4*q_4);
    v_4 = kappa_4*(K_4*q_4-K_2*q_2*K_Na*c_Na_o);
    // net fluxes
    var kappa_ENaC: pL_per_s {pub: out};
    var v_q_Na_i: fmol_per_s {pub: out};
    var v_q_Na_o: fmol_per_s {pub: out};
    var I_ENaC: picoA {pub: out};
    ode(q_1, t) = v_1-v_2;
    ode(q_2, t) = v_4-v_1;
    ode(q_3, t) = v_2-v_3;
    ode(q_4, t) = v_3-v_4;
    kappa_ENaC = P_Na*q_3+P_o*q_1;
    I_ENaC = sel
      case abs(u_e_m) < 1e-9{volt}:
        0{picoA};
      otherwise:
        kappa_ENaC*sqr(zNa)*u_e_m*sqr(F)/RT*(c_Na_i-c_Na_o*exp(-zNa*F*u_e_m/RT))/(1{dimensionless}-exp(-zNa*F*u_e_m/RT));
    endsel;
    // output fluxes
    v_q_Na_i = -I_ENaC/(zNa*F);
    v_q_Na_o = v_4-v_2-v_q_Na_i;
  enddef;
  // ###########################################

  def comp AQ as
    var t: second {pub: in};
    // Parameters
    var kappa_AQ: pL_per_kPa_per_s {pub: in};
    // Potentials
    var u_P_pi_i: kPa {pub: in};
    var u_P_pi_o: kPa {pub: in};
    // Flows
    var v_AQ_i: pL_per_s {pub: out};
    var v_AQ_o: pL_per_s {pub: out};
    v_AQ_i = kappa_AQ*(u_P_pi_o-u_P_pi_i);
    v_AQ_o = -v_AQ_i;
  enddef;
  // ###########################################

  def comp Kir as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var zK: dimensionless {pub: in};
    var RT: J_per_mmol;
    RT = R*T;
    // Parameters
    var kappa_Kir: pL_per_s {pub: out};
    var P_Kir: pL_per_s_per_fmol {pub: in};
    var N_Kir: fmol {pub: in};
    kappa_Kir = P_Kir*N_Kir;
    // Quantities
    var c_K_o: mM {pub: in};
    var c_K_i: mM {pub: in};
    // Potentials
    var u_e_m: volt {pub: in};
    // Flows
    var v_Kir_o: fmol_per_s {pub: out};
    var v_Kir_i: fmol_per_s {pub: out};
    var I_Kir: picoA {pub: out};
    I_Kir = sel
      case abs(u_e_m) < 1e-9{volt}:
        0{picoA};
      otherwise:
        kappa_Kir*sqr(zK)*u_e_m*sqr(F)/RT*(c_K_i-c_K_o*exp(-zK*F*u_e_m/RT))/(1{dimensionless}-exp(-zK*F*u_e_m/RT));
    endsel;
    v_Kir_i = -I_Kir/(zK*F);
    v_Kir_o = -v_Kir_i;
  enddef;
  // #########################################################

  def comp NKE as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var RT: J_per_mmol;
    var z_1: dimensionless {pub: in};
    var z_2: dimensionless;
    z_2 = 1{dimensionless}-z_1;
    RT = R*T;
    var c_Na_o: mM {pub: in};
    var c_Na_i: mM {pub: in};
    var c_K_o: mM {pub: in};
    var c_K_i: mM {pub: in};
    var c_ATP: mM {pub: in};
    var c_ADP: mM {pub: in};
    var c_Pi: mM {pub: in};
    var c_H_i: mM;
    var u_e_m: volt {pub: in};
    var e_1: dimensionless;
    var e_2: dimensionless;
    c_H_i = pow(10{dimensionless}, -7{dimensionless})*1{mM};
    e_1 = exp(z_1*F*u_e_m/RT);
    e_2 = exp(z_2*F*u_e_m/RT);
    var q_1_init: fmol {pub: in};
    var q_2_init: fmol {pub: in};
    var q_3_init: fmol {pub: in};
    var q_4_init: fmol {pub: in};
    var q_5_init: fmol {pub: in};
    var q_6_init: fmol {pub: in};
    var q_1: fmol {init: q_1_init, pub: out};
    var q_2: fmol {init: q_2_init, pub: out};
    var q_3: fmol {init: q_3_init, pub: out};
    var q_4: fmol {init: q_4_init, pub: out};
    var q_5: fmol {init: q_5_init, pub: out};
    var q_6: fmol {init: q_6_init, pub: out};
    // Constitutive parameters
    var K_1: per_fmol {pub: in};
    var K_2: per_fmol {pub: in};
    var K_3: per_fmol {pub: in};
    var K_4: per_fmol {pub: in};
    var K_5: per_fmol {pub: in};
    var K_6: per_fmol {pub: in};
    var K_K: per_mM {pub: in};
    var K_ADP: per_mM {pub: in};
    var K_ATP: per_mM {pub: in};
    var K_Na: per_mM {pub: in};
    var K_Pi: per_mM {pub: in};
    var K_H: per_mM {init: 1};
    var kappa_1: fmol_per_s {pub: in};
    var kappa_2: fmol_per_s {pub: in};
    var kappa_3: fmol_per_s {pub: in};
    var kappa_4: fmol_per_s {pub: in};
    var kappa_5: fmol_per_s {pub: in};
    var kappa_6: fmol_per_s {pub: in};
    //
    var Q_1: dimensionless {pub: out};
    var Q_2: dimensionless {pub: out};
    var Q_3: dimensionless {pub: out};
    var Q_4: dimensionless {pub: out};
    var Q_5: dimensionless {pub: out};
    var Q_6: dimensionless {pub: out};
    var Q_Na_o: dimensionless {pub: out};
    var Q_Na_i: dimensionless {pub: out};
    var Q_K_o: dimensionless {pub: out};
    var Q_K_i: dimensionless {pub: out};
    var Q_ATP: dimensionless {pub: out};
    var Q_ADP: dimensionless {pub: out};
    var Q_Pi: dimensionless {pub: out};
    var Q_H_i: dimensionless {pub: out};
    Q_1 = K_1*q_1;
    Q_2 = K_2*q_2;
    Q_3 = K_3*q_3;
    Q_4 = K_4*q_4;
    Q_5 = K_5*q_5;
    Q_6 = K_6*q_6;
    Q_Na_o = K_Na*c_Na_o;
    Q_Na_i = K_Na*c_Na_i;
    Q_K_o = K_K*c_K_o;
    Q_K_i = K_K*c_K_i;
    Q_ATP = K_ATP*c_ATP;
    Q_ADP = K_ADP*c_ADP;
    Q_Pi = K_Pi*c_Pi;
    Q_H_i = K_H*c_H_i;
    // flows
    var v_1: fmol_per_s {pub: out};
    var v_2: fmol_per_s {pub: out};
    var v_3: fmol_per_s {pub: out};
    var v_4: fmol_per_s {pub: out};
    var v_5: fmol_per_s {pub: out};
    var v_6: fmol_per_s {pub: out};
    v_1 = kappa_1*(Q_1*pow(Q_Na_i, 3{dimensionless})*Q_ATP-Q_2);
    v_2 = kappa_2*(Q_2-Q_3*Q_ADP);
    v_3 = kappa_3*(Q_3-Q_4*pow(Q_Na_o, 3{dimensionless})*e_1);
    v_4 = kappa_4*(Q_4*sqr(Q_K_o)-Q_5);
    v_5 = kappa_5*(Q_5-Q_6*Q_Pi*Q_H_i);
    v_6 = kappa_6*(Q_6-Q_1*sqr(Q_K_i)*e_2);
    // conservation equations
    ode(q_1, t) = v_6-v_1;
    ode(q_2, t) = v_1-v_2;
    ode(q_3, t) = v_2-v_3;
    ode(q_4, t) = v_3-v_4;
    ode(q_5, t) = v_4-v_5;
    ode(q_6, t) = v_5-v_6;
    var v_q_Na_i: fmol_per_s {pub: out};
    var v_q_Na_o: fmol_per_s {pub: out};
    var v_q_K_i: fmol_per_s {pub: out};
    var v_q_K_o: fmol_per_s {pub: out};
    v_q_Na_i = -3{dimensionless}*v_1;
    v_q_Na_o = 3{dimensionless}*v_3;
    v_q_K_o = -2{dimensionless}*v_4;
    v_q_K_i = 2{dimensionless}*v_6;
    var I_NKE: picoA {pub: out};
    I_NKE = (v_6*z_2+v_3*z_1)*F;
  enddef;
  // #########################################################
  // #################### Processes ##########################
  // #########################################################
enddef;
