<?xml version='1.0' encoding='UTF-8'?>
<model name="modules" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
<!--&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;module_units&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;&#45;//-->
<import xlink:href="ENaC_pe_units.cellml">
    <units name="s2" units_ref="s2"/>
    <units name="Hz" units_ref="Hz"/>
    <units name="millis" units_ref="millis"/>
    <units name="per_millis" units_ref="per_millis"/>
    <units name="mm" units_ref="mm"/>
    <units name="m2" units_ref="m2"/>
    <units name="mm2" units_ref="mm2"/>
    <units name="m3" units_ref="m3"/>
    <units name="m4" units_ref="m4"/>
    <units name="mm3" units_ref="mm3"/>
    <units name="J_per_s" units_ref="J_per_s"/>
    <units name="mol_per_s" units_ref="mol_per_s"/>
    <units name="mmol_per_s" units_ref="mmol_per_s"/>
    <units name="umol_per_s" units_ref="umol_per_s"/>
    <units name="C_per_s" units_ref="C_per_s"/>
    <units name="mC_per_s" units_ref="mC_per_s"/>
    <units name="uC_per_s" units_ref="uC_per_s"/>
    <units name="nC_per_s" units_ref="nC_per_s"/>
    <units name="Cm_per_millis" units_ref="Cm_per_millis"/>
    <units name="m_per_s" units_ref="m_per_s"/>
    <units name="mm_per_s" units_ref="mm_per_s"/>
    <units name="um_per_s" units_ref="um_per_s"/>
    <units name="rad_per_s" units_ref="rad_per_s"/>
    <units name="m3_per_s" units_ref="m3_per_s"/>
    <units name="mL" units_ref="mL"/>
    <units name="per_milliL_s" units_ref="per_milliL_s"/>
    <units name="s_per_m3" units_ref="s_per_m3"/>
    <units name="s_per_milliV" units_ref="s_per_milliV"/>
    <units name="s_per_millis" units_ref="s_per_millis"/>
    <units name="millis_per_s" units_ref="millis_per_s"/>
    <units name="mm3_per_s" units_ref="mm3_per_s"/>
    <units name="l_per_s" units_ref="l_per_s"/>
    <units name="per_ml_s" units_ref="per_ml_s"/>
    <units name="per_m3_s" units_ref="per_m3_s"/>
    <units name="J_per_mol" units_ref="J_per_mol"/>
    <units name="J_per_kmol_K" units_ref="J_per_kmol_K"/>
    <units name="J_per_M" units_ref="J_per_M"/>
    <units name="J_per_C" units_ref="J_per_C"/>
    <units name="J_per_C_s" units_ref="J_per_C_s"/>
    <units name="J_per_m" units_ref="J_per_m"/>
    <units name="J_per_m3" units_ref="J_per_m3"/>
    <units name="mmHg" units_ref="mmHg"/>
    <units name="per_mmHg" units_ref="per_mmHg"/>
    <units name="mmHg2" units_ref="mmHg2"/>
    <units name="Pa_per_mmHg" units_ref="Pa_per_mmHg"/>
    <units name="m3_per_J" units_ref="m3_per_J"/>
    <units name="J_per_m3s" units_ref="J_per_m3s"/>
    <units name="m3_per_Js" units_ref="m3_per_Js"/>
    <units name="J2_per_m6" units_ref="J2_per_m6"/>
    <units name="Js2_per_C2" units_ref="Js2_per_C2"/>
    <units name="Js2_per_mol2" units_ref="Js2_per_mol2"/>
    <units name="Js_per_mol2" units_ref="Js_per_mol2"/>
    <units name="Js_per_C2" units_ref="Js_per_C2"/>
    <units name="J_per_mol2" units_ref="J_per_mol2"/>
    <units name="C2_per_J_s" units_ref="C2_per_J_s"/>
    <units name="J_per_C2" units_ref="J_per_C2"/>
    <units name="C2_per_J" units_ref="C2_per_J"/>
    <units name="mol_per_m3" units_ref="mol_per_m3"/>
    <units name="M" units_ref="M"/>
    <units name="mM" units_ref="mM"/>
    <units name="milliM" units_ref="milliM"/>
    <units name="uM" units_ref="uM"/>
    <units name="kg_per_m3" units_ref="kg_per_m3"/>
    <units name="m3_per_kg" units_ref="m3_per_kg"/>
    <units name="per_m3" units_ref="per_m3"/>
    <units name="mol_per_m2_s" units_ref="mol_per_m2_s"/>
    <units name="mM_m_per_s" units_ref="mM_m_per_s"/>
    <units name="J_per_m2_s" units_ref="J_per_m2_s"/>
    <units name="Js_per_m4" units_ref="Js_per_m4"/>
    <units name="mM_per_s" units_ref="mM_per_s"/>
    <units name="per_s" units_ref="per_s"/>
    <units name="per_mM_s" units_ref="per_mM_s"/>
    <units name="m6_per_mol2_s" units_ref="m6_per_mol2_s"/>
    <units name="m3_per_mol" units_ref="m3_per_mol"/>
    <units name="mol_per_m3_s" units_ref="mol_per_m3_s"/>
    <units name="per_mol" units_ref="per_mol"/>
    <units name="J_per_mol_K" units_ref="J_per_mol_K"/>
    <units name="m2_per_s" units_ref="m2_per_s"/>
    <units name="per_C" units_ref="per_C"/>
    <units name="per_m" units_ref="per_m"/>
    <units name="per_mM" units_ref="per_mM"/>
    <units name="Js2_per_m2" units_ref="Js2_per_m2"/>
    <units name="Js_per_m2" units_ref="Js_per_m2"/>
    <units name="J_per_m2" units_ref="J_per_m2"/>
    <units name="m_per_s2" units_ref="m_per_s2"/>
    <units name="rad_per_s2" units_ref="rad_per_s2"/>
    <units name="Js_per_m3" units_ref="Js_per_m3"/>
    <units name="Js2_per_m5" units_ref="Js2_per_m5"/>
    <units name="m5_per_Js2" units_ref="m5_per_Js2"/>
    <units name="J_per_m6" units_ref="J_per_m6"/>
    <units name="m6_per_J" units_ref="m6_per_J"/>
    <units name="m6_per_Js" units_ref="m6_per_Js"/>
    <units name="mm6_per_J" units_ref="mm6_per_J"/>
    <units name="Js2_per_m9" units_ref="Js2_per_m9"/>
    <units name="m6s_per_J" units_ref="m6s_per_J"/>
    <units name="Js_per_m6" units_ref="Js_per_m6"/>
    <units name="Js2_per_m6" units_ref="Js2_per_m6"/>
    <units name="m3_per_s2" units_ref="m3_per_s2"/>
    <units name="mm3_per_s2" units_ref="mm3_per_s2"/>
    <units name="per_mm3" units_ref="per_mm3"/>
    <units name="UnitValve" units_ref="UnitValve"/>
    <units name="J_per_m9" units_ref="J_per_m9"/>
    <units name="milliV" units_ref="milliV"/>
    <units name="per_milliV" units_ref="per_milliV"/>
    <units name="millis_per_milliV" units_ref="millis_per_milliV"/>
    <units name="per_V" units_ref="per_V"/>
    <units name="milliV_per_V" units_ref="milliV_per_V"/>
    <units name="V_per_milliV" units_ref="V_per_milliV"/>
    <units name="V_per_s" units_ref="V_per_s"/>
    <units name="milliV_per_kiloV" units_ref="milliV_per_kiloV"/>
    <units name="V2" units_ref="V2"/>
    <units name="milliV2" units_ref="milliV2"/>
    <units name="millimol" units_ref="millimol"/>
    <units name="millimolar" units_ref="millimolar"/>
    <units name="per_millimolar" units_ref="per_millimolar"/>
    <units name="per_millimolar_s" units_ref="per_millimolar_s"/>
    <units name="per_millimolar2_s" units_ref="per_millimolar2_s"/>
    <units name="millimolar_per_s" units_ref="millimolar_per_s"/>
    <units name="millimolar_per_megamolar" units_ref="millimolar_per_megamolar"/>
    <units name="per_millimol_milliS" units_ref="per_millimol_milliS"/>
    <units name="per_millimol_millis" units_ref="per_millimol_millis"/>
    <units name="per_millimol_s" units_ref="per_millimol_s"/>
    <units name="microm" units_ref="microm"/>
    <units name="microS" units_ref="microS"/>
    <units name="microm3" units_ref="microm3"/>
    <units name="m3_per_microm3" units_ref="m3_per_microm3"/>
    <units name="picoF" units_ref="picoF"/>
    <units name="S_per_F" units_ref="S_per_F"/>
    <units name="m3_per_Fs" units_ref="m3_per_Fs"/>
    <units name="A_per_F" units_ref="A_per_F"/>
    <units name="megaOhm" units_ref="megaOhm"/>
    <units name="nanoA" units_ref="nanoA"/>
    <units name="nanoA_per_milliA" units_ref="nanoA_per_milliA"/>
    <units name="nanoA_per_A" units_ref="nanoA_per_A"/>
    <units name="A_per_nanoA" units_ref="A_per_nanoA"/>
    <units name="C_per_mol" units_ref="C_per_mol"/>
    <units name="m3_per_J_millis" units_ref="m3_per_J_millis"/>
    <units name="m3_per_mol_millis" units_ref="m3_per_mol_millis"/>
    <units name="m3_per_millimol_s" units_ref="m3_per_millimol_s"/>
    <units name="millimol_per_m3" units_ref="millimol_per_m3"/>
    <units name="Hz2" units_ref="Hz2"/>
    <units name="cm" units_ref="cm"/>
    <units name="J_per_m4_s" units_ref="J_per_m4_s"/>
    <units name="J_per_mmol" units_ref="J_per_mmol"/>
    <units name="m3_per_mol_per_sec" units_ref="m3_per_mol_per_sec"/>
    <units name="mol_per_m3_per_kPa" units_ref="mol_per_m3_per_kPa"/>
    <units name="mol_per_m3_per_Pa" units_ref="mol_per_m3_per_Pa"/>
    <units name="m3_per_mol_per_s" units_ref="m3_per_mol_per_s"/>
    <units name="mol_per_m3_per_s" units_ref="mol_per_m3_per_s"/>
    <units name="dim" units_ref="dim"/>
    <units name="fmol" units_ref="fmol"/>
    <units name="per_fmol" units_ref="per_fmol"/>
    <units name="nJ_per_s" units_ref="nJ_per_s"/>
    <units name="fmol_per_s" units_ref="fmol_per_s"/>
    <units name="nC_per_fmol" units_ref="nC_per_fmol"/>
    <units name="nC" units_ref="nC"/>
    <units name="nJ_per_fmol" units_ref="nJ_per_fmol"/>
    <units name="nJ_per_nC" units_ref="nJ_per_nC"/>
    <units name="fC" units_ref="fC"/>
    <units name="fF" units_ref="fF"/>
    <units name="uF" units_ref="uF"/>
    <units name="nF" units_ref="nF"/>
    <units name="volt_per_sec" units_ref="volt_per_sec"/>
    <units name="J_per_K_per_mmol" units_ref="J_per_K_per_mmol"/>
    <units name="nS" units_ref="nS"/>
    <units name="nSmV" units_ref="nSmV"/>
    <units name="per_ms" units_ref="per_ms"/>
    <units name="mM4" units_ref="mM4"/>
    <units name="mM_per_ms" units_ref="mM_per_ms"/>
    <units name="mMms" units_ref="mMms"/>
    <units name="per_mMms" units_ref="per_mMms"/>
    <units name="molar" units_ref="molar"/>
    <units name="micromolar" units_ref="micromolar"/>
    <units name="nanomolar" units_ref="nanomolar"/>
    <units name="ms" units_ref="ms"/>
    <units name="m_cubed" units_ref="m_cubed"/>
    <units name="mV" units_ref="mV"/>
    <units name="m_cubed_per_second" units_ref="m_cubed_per_second"/>
    <units name="micromolar_m_cubed" units_ref="micromolar_m_cubed"/>
    <units name="C" units_ref="C"/>
    <units name="pC" units_ref="pC"/>
    <units name="C_per_mmol" units_ref="C_per_mmol"/>
    <units name="picoA" units_ref="picoA"/>
    <units name="picoS" units_ref="picoS"/>
    <units name="picoS_per_fmol" units_ref="picoS_per_fmol"/>
    <units name="L_fmol_per_J_per_s" units_ref="L_fmol_per_J_per_s"/>
    <units name="picoA_per_picoFarad" units_ref="picoA_per_picoFarad"/>
    <units name="microL" units_ref="microL"/>
    <units name="picoFarad" units_ref="picoFarad"/>
    <units name="cm3_per_second" units_ref="cm3_per_second"/>
    <units name="um3_per_second" units_ref="um3_per_second"/>
    <units name="m3mM" units_ref="m3mM"/>
    <units name="ms2" units_ref="ms2"/>
    <units name="nM3_per_ps" units_ref="nM3_per_ps"/>
    <units name="per_s_squared_m_cubed" units_ref="per_s_squared_m_cubed"/>
    <units name="per_meters_cubed" units_ref="per_meters_cubed"/>
    <units name="umeter3" units_ref="umeter3"/>
    <units name="mill1" units_ref="mill1"/>
    <units name="picoV" units_ref="picoV"/>
    <units name="pic0" units_ref="pic0"/>
    <units name="nanoV" units_ref="nanoV"/>
    <units name="nan0" units_ref="nan0"/>
    <units name="pL_per_s_per_fmol" units_ref="pL_per_s_per_fmol"/>
    <units name="kPa" units_ref="kPa"/>
    <units name="L_per_s" units_ref="L_per_s"/>
    <units name="L_per_s_per_kPa" units_ref="L_per_s_per_kPa"/>
    <units name="kPa_per_L" units_ref="kPa_per_L"/>
    <units name="kPa_per_s" units_ref="kPa_per_s"/>
    <units name="L_per_kPa" units_ref="L_per_kPa"/>
    <units name="kPa_s_per_L" units_ref="kPa_s_per_L"/>
    <units name="pL_L_per_J_per_s" units_ref="pL_L_per_J_per_s"/>
    <units name="pL" units_ref="pL"/>
    <units name="pL_per_s" units_ref="pL_per_s"/>
    <units name="pL_per_kPa_per_s" units_ref="pL_per_kPa_per_s"/>
    <units name="L_per_mmol" units_ref="L_per_mmol"/>
    <units name="nm" units_ref="nm"/>
    <units name="um2" units_ref="um2"/>
    <units name="um2_per_s" units_ref="um2_per_s"/>
    <units name="per_s_per_K" units_ref="per_s_per_K"/>
</import>
    <component name="zero_flow">
        <variable name="v_zero" public_interface="out" units="m3_per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_zero</ci>
                <cn cellml:units="m3_per_s">0</cn>
            </apply>
        </math>
    </component>
    <component name="ENaC_PE">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="R" public_interface="in" units="J_per_K_per_mmol"/>
        <variable name="T" public_interface="in" units="kelvin"/>
        <variable name="F" public_interface="in" units="C_per_mmol"/>
        <variable name="RT" units="J_per_mmol"/>
        <variable name="V_o" public_interface="in" units="pL"/>
        <variable name="V_i" public_interface="in" units="pL"/>
        <variable name="zNa" public_interface="in" units="dimensionless"/>
        <variable name="C_ref" public_interface="in" units="mM"/>
        <variable name="q_ref" public_interface="in" units="fmol"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>RT</ci>
                <apply>
                    <times/>
                    <ci>R</ci>
                    <ci>T</ci>
                </apply>
            </apply>
        </math>
        <!-- Thermodynamic constants-->
        <variable name="u_G_1" units="J_per_mmol"/>
        <variable name="u_G_2" public_interface="in" units="J_per_mmol"/>
        <variable name="u_G_3" units="J_per_mmol"/>
        <variable name="u_G_4" units="J_per_mmol"/>
        <variable name="u_G_5" public_interface="in" units="J_per_mmol"/>
        <variable name="u_G_6" public_interface="in" units="J_per_mmol"/>
        <variable name="u_G_Na" public_interface="in" units="J_per_mmol"/>
        <!-- Rate constants-->
        <variable name="kappa_1" public_interface="in" units="per_s_per_K"/>
        <variable name="kappa_2" public_interface="in" units="per_s_per_K"/>
        <variable name="kappa_3" public_interface="in" units="per_s_per_K"/>
        <variable name="kappa_4" public_interface="in" units="per_s_per_K"/>
        <variable name="kappa_5" public_interface="in" units="per_s_per_K"/>
        <variable name="kappa_6" public_interface="in" units="per_s_per_K"/>
        <!-- other variables-->
        <variable name="d_1" public_interface="in" units="dimensionless"/>
        <variable name="d_2" public_interface="in" units="dimensionless"/>
        <variable name="d_3" public_interface="in" units="dimensionless"/>
        <variable name="d_4" public_interface="in" units="dimensionless"/>
        <variable name="d_5" public_interface="in" units="dimensionless"/>
        <variable name="d_6" public_interface="in" units="dimensionless"/>
        <!-- Initial values-->
        <variable name="q_1_init" public_interface="in" units="fmol"/>
        <variable name="q_2_init" public_interface="in" units="fmol"/>
        <variable name="q_3_init" public_interface="in" units="fmol"/>
        <variable name="q_4_init" public_interface="in" units="fmol"/>
        <variable name="q_5_init" public_interface="in" units="fmol"/>
        <variable name="q_6_init" public_interface="in" units="fmol"/>
        <variable initial_value="q_1_init" name="q_1" public_interface="out" units="fmol"/>
        <variable initial_value="q_2_init" name="q_2" public_interface="out" units="fmol"/>
        <variable initial_value="q_3_init" name="q_3" public_interface="out" units="fmol"/>
        <variable initial_value="q_4_init" name="q_4" public_interface="out" units="fmol"/>
        <variable initial_value="q_5_init" name="q_5" public_interface="out" units="fmol"/>
        <variable initial_value="q_6_init" name="q_6" public_interface="out" units="fmol"/>
        <variable name="q_Na_i" public_interface="in" units="fmol"/>
        <variable name="q_Na_o" public_interface="in" units="fmol"/>
        <variable name="C_Na_i" public_interface="out" units="mM"/>
        <variable name="C_Na_o" public_interface="out" units="mM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>C_Na_i</ci>
                <apply>
                    <divide/>
                    <ci>q_Na_i</ci>
                    <ci>V_i</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>C_Na_o</ci>
                <apply>
                    <divide/>
                    <ci>q_Na_o</ci>
                    <ci>V_o</ci>
                </apply>
            </apply>
        </math>
        <variable name="u_1" units="J_per_mmol"/>
        <variable name="u_2" units="J_per_mmol"/>
        <variable name="u_3" units="J_per_mmol"/>
        <variable name="u_4" units="J_per_mmol"/>
        <variable name="u_5" units="J_per_mmol"/>
        <variable name="u_6" units="J_per_mmol"/>
        <variable name="u_Na_i" units="J_per_mmol"/>
        <variable name="u_Na_o" units="J_per_mmol"/>
        <!-- constraints-->
        <variable name="u_G_1_ref" public_interface="in" units="J_per_mmol"/>
        <variable name="u_G_2_ref" public_interface="in" units="J_per_mmol"/>
        <variable name="u_G_5_ref" public_interface="in" units="J_per_mmol"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>u_G_1</ci>
                <apply>
                    <minus/>
                    <ci>u_G_2</ci>
                    <apply>
                        <plus/>
                        <ci>u_G_Na</ci>
                        <ci>u_G_1_ref</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_G_3</ci>
                <apply>
                    <minus/>
                    <ci>u_G_2_ref</ci>
                    <ci>u_G_2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_G_4</ci>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <ci>u_G_2</ci>
                        <ci>u_G_Na</ci>
                    </apply>
                    <ci>u_G_5_ref</ci>
                </apply>
            </apply>
            <!-- Efforts-->
            <apply>
                <eq/>
                <ci>u_1</ci>
                <apply>
                    <plus/>
                    <ci>u_G_1</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>q_1</ci>
                                <ci>q_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_2</ci>
                <apply>
                    <plus/>
                    <ci>u_G_2</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>q_2</ci>
                                <ci>q_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_3</ci>
                <apply>
                    <plus/>
                    <ci>u_G_3</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>q_3</ci>
                                <ci>q_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_4</ci>
                <apply>
                    <plus/>
                    <ci>u_G_4</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>q_4</ci>
                                <ci>q_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_5</ci>
                <apply>
                    <plus/>
                    <ci>u_G_5</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>q_5</ci>
                                <ci>q_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_6</ci>
                <apply>
                    <plus/>
                    <ci>u_G_6</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>q_6</ci>
                                <ci>q_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Na_i</ci>
                <apply>
                    <plus/>
                    <ci>u_G_Na</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>C_Na_i</ci>
                                <ci>C_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Na_o</ci>
                <apply>
                    <plus/>
                    <ci>u_G_Na</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>C_Na_o</ci>
                                <ci>C_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- electrical potential-->
        <variable name="u_e_m" public_interface="in" units="volt"/>
        <!-- chemical affinities-->
        <variable name="u_Re_1_f" units="J_per_mmol"/>
        <variable name="u_Re_1_r" units="J_per_mmol"/>
        <variable name="u_Re_2_f" units="J_per_mmol"/>
        <variable name="u_Re_2_r" units="J_per_mmol"/>
        <variable name="u_Re_3_f" units="J_per_mmol"/>
        <variable name="u_Re_3_r" units="J_per_mmol"/>
        <variable name="u_Re_4_f" units="J_per_mmol"/>
        <variable name="u_Re_4_r" units="J_per_mmol"/>
        <variable name="u_Re_5_f" units="J_per_mmol"/>
        <variable name="u_Re_5_r" units="J_per_mmol"/>
        <variable name="u_Re_6_f" units="J_per_mmol"/>
        <variable name="u_Re_6_r" units="J_per_mmol"/>
        <!-- Ion transit affinities-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>u_Re_1_f</ci>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <ci>u_1</ci>
                        <ci>u_Na_o</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_1</ci>
                            <ci>d_2</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_1_r</ci>
                <apply>
                    <plus/>
                    <ci>u_2</ci>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_1</ci>
                            <ci>d_2</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_2_f</ci>
                <apply>
                    <minus/>
                    <ci>u_2</ci>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_3</ci>
                            <ci>d_4</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_2_r</ci>
                <apply>
                    <plus/>
                    <ci>u_3</ci>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_3</ci>
                            <ci>d_4</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_3_f</ci>
                <apply>
                    <minus/>
                    <ci>u_3</ci>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_5</ci>
                            <ci>d_6</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_3_r</ci>
                <apply>
                    <plus/>
                    <ci>u_Na_i</ci>
                    <ci>u_1</ci>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_5</ci>
                            <ci>d_6</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_4_f</ci>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <ci>u_3</ci>
                        <ci>u_Na_o</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_1</ci>
                            <ci>d_2</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_4_r</ci>
                <apply>
                    <plus/>
                    <ci>u_4</ci>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_1</ci>
                            <ci>d_2</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_5_f</ci>
                <apply>
                    <minus/>
                    <ci>u_4</ci>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_5</ci>
                            <ci>d_6</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_5_r</ci>
                <apply>
                    <plus/>
                    <ci>u_2</ci>
                    <ci>u_Na_i</ci>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_5</ci>
                            <ci>d_6</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <!-- Allosteric site affinities-->
            <apply>
                <eq/>
                <ci>u_Re_6_f</ci>
                <apply>
                    <plus/>
                    <ci>u_5</ci>
                    <ci>u_Na_o</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_6_r</ci>
                <ci>u_6</ci>
            </apply>
        </math>
        <!-- Constitutive equations-->
        <variable name="v_1" public_interface="out" units="fmol_per_s"/>
        <variable name="v_2" public_interface="out" units="fmol_per_s"/>
        <variable name="v_3" public_interface="out" units="fmol_per_s"/>
        <variable name="v_4" public_interface="out" units="fmol_per_s"/>
        <variable name="v_5" public_interface="out" units="fmol_per_s"/>
        <variable name="v_6" public_interface="out" units="fmol_per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_1</ci>
                <apply>
                    <times/>
                    <ci>kappa_1</ci>
                    <ci>q_ref</ci>
                    <ci>T</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_1_f</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_1_r</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_2</ci>
                <apply>
                    <times/>
                    <ci>kappa_2</ci>
                    <ci>q_ref</ci>
                    <ci>T</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_2_f</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_2_r</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_3</ci>
                <apply>
                    <times/>
                    <ci>kappa_3</ci>
                    <ci>q_ref</ci>
                    <ci>T</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_3_f</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_3_r</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_4</ci>
                <apply>
                    <times/>
                    <ci>kappa_4</ci>
                    <ci>q_ref</ci>
                    <ci>T</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_4_f</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_4_r</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_5</ci>
                <apply>
                    <times/>
                    <ci>kappa_5</ci>
                    <ci>q_ref</ci>
                    <ci>T</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_5_f</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_5_r</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- fix v_6 for now-->
            <apply>
                <eq/>
                <ci>v_6</ci>
                <cn cellml:units="fmol_per_s">0</cn>
            </apply>
        </math>
        <!-- v_6 = kappa_6*q_ref*(exp(u_Re_6_f/RT)-exp(u_Re_6_r/RT));-->
        <!-- Conservation equations-->
        <variable name="I_m" public_interface="out" units="picoA"/>
        <variable name="I_m_recorded" public_interface="out" units="picoA"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>I_m</ci>
                <apply>
                    <times/>
                    <ci>zNa</ci>
                    <ci>F</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <apply>
                                <plus/>
                                <ci>v_1</ci>
                                <ci>v_4</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <ci>d_1</ci>
                                <ci>d_2</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>v_2</ci>
                            <apply>
                                <plus/>
                                <ci>d_3</ci>
                                <ci>d_4</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <plus/>
                                <ci>v_5</ci>
                                <ci>v_3</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <ci>d_5</ci>
                                <ci>d_6</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_m_recorded</ci>
                <apply>
                    <minus/>
                    <ci>I_m</ci>
                </apply>
            </apply>
            <!-- assumes equal likelihood of allosteric inhibition-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_1</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>v_3</ci>
                        <ci>v_1</ci>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>v_6</ci>
                            <ci>q_1</ci>
                        </apply>
                        <ci>q_5</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_2</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <plus/>
                            <ci>v_1</ci>
                            <ci>v_5</ci>
                        </apply>
                        <ci>v_2</ci>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>v_6</ci>
                            <ci>q_2</ci>
                        </apply>
                        <ci>q_5</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_3</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>v_2</ci>
                            <ci>v_4</ci>
                        </apply>
                        <ci>v_3</ci>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>v_6</ci>
                            <ci>q_3</ci>
                        </apply>
                        <ci>q_5</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_4</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>v_4</ci>
                        <ci>v_5</ci>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>v_6</ci>
                            <ci>q_4</ci>
                        </apply>
                        <ci>q_5</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_5</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_6</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_6</ci>
                </apply>
                <ci>v_6</ci>
            </apply>
        </math>
        <variable name="v_Na_i" public_interface="out" units="fmol_per_s"/>
        <variable name="v_Na_o" public_interface="out" units="fmol_per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_Na_i</ci>
                <apply>
                    <plus/>
                    <ci>v_3</ci>
                    <ci>v_5</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_Na_o</ci>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>v_6</ci>
                        </apply>
                        <ci>v_4</ci>
                    </apply>
                    <ci>v_1</ci>
                </apply>
            </apply>
        </math>
        <!-- ode(q_Na_i, t)
 ode(q_Na_o, t) = -v_6-v_4-v_1;-->
    </component>
    <!-- ###########################################-->
</model>
