<?xml version='1.0' encoding='UTF-8'?>
<model name="ENaC" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="ENaC">
        <variable name="t" public_interface="in" units="s"/>
        <variable name="R" public_interface="in" units="J_per_mmol_per_K"/>
        <variable name="T" public_interface="in" units="kelvin"/>
        <variable name="F" public_interface="in" units="C_per_mmol"/>
        <variable name="RT" units="J_per_mmol"/>
        <variable name="N_A" public_interface="in" units="per_fmol"/>
        <variable name="V_o" public_interface="in" units="pL"/>
        <variable name="V_i" public_interface="in" units="pL"/>
        <variable name="zNa" public_interface="in" units="dimensionless"/>
        <variable name="C_ref" public_interface="in" units="mM"/>
        <variable name="q_ref" public_interface="in" units="fmol"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>RT</ci>
                <apply>
                    <times/>
                    <ci>R</ci>
                    <ci>T</ci>
                </apply>
            </apply>
        </math>
        <!-- Thermodynamic constants-->
        <variable name="u_G_1" units="J_per_mmol"/>
        <variable name="u_G_2" public_interface="in" units="J_per_mmol"/>
        <variable name="u_G_3" units="J_per_mmol"/>
        <variable name="u_G_4" units="J_per_mmol"/>
        <variable name="u_G_5" public_interface="in" units="J_per_mmol"/>
        <variable name="u_G_6" public_interface="in" units="J_per_mmol"/>
        <variable name="u_G_Na" public_interface="in" units="J_per_mmol"/>
        <!-- Rate constants-->
        <variable name="kappa_1" public_interface="in" units="per_s"/>
        <variable name="kappa_2" public_interface="in" units="per_s"/>
        <variable name="kappa_3" public_interface="in" units="per_s"/>
        <variable name="kappa_4" public_interface="in" units="per_s"/>
        <variable name="kappa_5" public_interface="in" units="per_s"/>
        <variable name="kappa_6" public_interface="in" units="per_s"/>
        <!-- other variables-->
        <variable name="d_1" public_interface="in" units="dimensionless"/>
        <variable name="d_2" public_interface="in" units="dimensionless"/>
        <variable name="d_3" public_interface="in" units="dimensionless"/>
        <variable name="d_4" public_interface="in" units="dimensionless"/>
        <variable name="d_5" public_interface="in" units="dimensionless"/>
        <variable name="d_6" public_interface="in" units="dimensionless"/>
        <!-- Initial values-->
        <variable name="q_1_init" public_interface="in" units="fmol"/>
        <variable name="q_2_init" public_interface="in" units="fmol"/>
        <variable name="q_3_init" public_interface="in" units="fmol"/>
        <variable name="q_4_init" public_interface="in" units="fmol"/>
        <variable name="q_5_init" public_interface="in" units="fmol"/>
        <variable name="q_6_init" public_interface="in" units="fmol"/>
        <variable initial_value="q_1_init" name="q_1" public_interface="out" units="fmol"/>
        <variable initial_value="q_2_init" name="q_2" public_interface="out" units="fmol"/>
        <variable initial_value="q_3_init" name="q_3" public_interface="out" units="fmol"/>
        <variable initial_value="q_4_init" name="q_4" public_interface="out" units="fmol"/>
        <variable initial_value="q_5_init" name="q_5" public_interface="out" units="fmol"/>
        <variable initial_value="q_6_init" name="q_6" public_interface="out" units="fmol"/>
        <variable name="q_Na_i" public_interface="in" units="fmol"/>
        <variable name="q_Na_o" public_interface="in" units="fmol"/>
        <variable name="C_Na_i" public_interface="out" units="mM"/>
        <variable name="C_Na_o" public_interface="out" units="mM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>C_Na_i</ci>
                <apply>
                    <divide/>
                    <ci>q_Na_i</ci>
                    <ci>V_i</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>C_Na_o</ci>
                <apply>
                    <divide/>
                    <ci>q_Na_o</ci>
                    <ci>V_o</ci>
                </apply>
            </apply>
        </math>
        <variable name="u_1" units="J_per_mmol"/>
        <variable name="u_2" units="J_per_mmol"/>
        <variable name="u_3" units="J_per_mmol"/>
        <variable name="u_4" units="J_per_mmol"/>
        <variable name="u_5" units="J_per_mmol"/>
        <variable name="u_6" units="J_per_mmol"/>
        <variable name="u_Na_i" units="J_per_mmol"/>
        <variable name="u_Na_o" units="J_per_mmol"/>
        <!-- constraints-->
        <variable name="u_G_1_ref" public_interface="in" units="J_per_mmol"/>
        <variable name="u_G_2_ref" public_interface="in" units="J_per_mmol"/>
        <variable name="u_G_5_ref" public_interface="in" units="J_per_mmol"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>u_G_1</ci>
                <apply>
                    <minus/>
                    <ci>u_G_2</ci>
                    <apply>
                        <plus/>
                        <ci>u_G_Na</ci>
                        <ci>u_G_1_ref</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_G_3</ci>
                <apply>
                    <minus/>
                    <ci>u_G_2_ref</ci>
                    <ci>u_G_2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_G_4</ci>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <ci>u_G_2</ci>
                        <ci>u_G_Na</ci>
                    </apply>
                    <ci>u_G_5_ref</ci>
                </apply>
            </apply>
            <!-- Efforts-->
            <apply>
                <eq/>
                <ci>u_1</ci>
                <apply>
                    <plus/>
                    <ci>u_G_1</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>q_1</ci>
                                <ci>q_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_2</ci>
                <apply>
                    <plus/>
                    <ci>u_G_2</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>q_2</ci>
                                <ci>q_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_3</ci>
                <apply>
                    <plus/>
                    <ci>u_G_3</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>q_3</ci>
                                <ci>q_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_4</ci>
                <apply>
                    <plus/>
                    <ci>u_G_4</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>q_4</ci>
                                <ci>q_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_5</ci>
                <apply>
                    <plus/>
                    <ci>u_G_5</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>q_5</ci>
                                <ci>q_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_6</ci>
                <apply>
                    <plus/>
                    <ci>u_G_6</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>q_6</ci>
                                <ci>q_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Na_i</ci>
                <apply>
                    <plus/>
                    <ci>u_G_Na</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>C_Na_i</ci>
                                <ci>C_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Na_o</ci>
                <apply>
                    <plus/>
                    <ci>u_G_Na</ci>
                    <apply>
                        <times/>
                        <ci>RT</ci>
                        <apply>
                            <ln/>
                            <apply>
                                <divide/>
                                <ci>C_Na_o</ci>
                                <ci>C_ref</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- electrical potential-->
        <variable name="u_e_m" public_interface="in" units="volt"/>
        <!-- chemical affinities-->
        <variable name="u_Re_1_f" units="J_per_mmol"/>
        <variable name="u_Re_1_r" units="J_per_mmol"/>
        <variable name="u_Re_2_f" units="J_per_mmol"/>
        <variable name="u_Re_2_r" units="J_per_mmol"/>
        <variable name="u_Re_3_f" units="J_per_mmol"/>
        <variable name="u_Re_3_r" units="J_per_mmol"/>
        <variable name="u_Re_4_f" units="J_per_mmol"/>
        <variable name="u_Re_4_r" units="J_per_mmol"/>
        <variable name="u_Re_5_f" units="J_per_mmol"/>
        <variable name="u_Re_5_r" units="J_per_mmol"/>
        <variable name="u_Re_6_f" units="J_per_mmol"/>
        <variable name="u_Re_6_r" units="J_per_mmol"/>
        <!-- Ion transit affinities-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>u_Re_1_f</ci>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <ci>u_1</ci>
                        <ci>u_Na_o</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_1</ci>
                            <ci>d_2</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_1_r</ci>
                <ci>u_2</ci>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_2_f</ci>
                <apply>
                    <minus/>
                    <ci>u_2</ci>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_3</ci>
                            <ci>d_4</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_2_r</ci>
                <ci>u_3</ci>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_3_f</ci>
                <apply>
                    <minus/>
                    <ci>u_3</ci>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_5</ci>
                            <ci>d_6</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_3_r</ci>
                <apply>
                    <plus/>
                    <ci>u_Na_i</ci>
                    <ci>u_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_4_f</ci>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <ci>u_3</ci>
                        <ci>u_Na_o</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_1</ci>
                            <ci>d_2</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_4_r</ci>
                <ci>u_4</ci>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_5_f</ci>
                <apply>
                    <minus/>
                    <ci>u_4</ci>
                    <apply>
                        <times/>
                        <ci>zNa</ci>
                        <ci>F</ci>
                        <apply>
                            <plus/>
                            <ci>d_5</ci>
                            <ci>d_6</ci>
                        </apply>
                        <ci>u_e_m</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_5_r</ci>
                <apply>
                    <plus/>
                    <ci>u_2</ci>
                    <ci>u_Na_i</ci>
                </apply>
            </apply>
            <!-- Allosteric site affinities-->
            <apply>
                <eq/>
                <ci>u_Re_6_f</ci>
                <apply>
                    <plus/>
                    <ci>u_5</ci>
                    <ci>u_Na_o</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_Re_6_r</ci>
                <ci>u_6</ci>
            </apply>
        </math>
        <!-- Constitutive equations-->
        <variable name="v_1" units="fmol_per_s"/>
        <variable name="v_2" units="fmol_per_s"/>
        <variable name="v_3" units="fmol_per_s"/>
        <variable name="v_4" units="fmol_per_s"/>
        <variable name="v_5" units="fmol_per_s"/>
        <variable name="v_6" units="fmol_per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_1</ci>
                <apply>
                    <times/>
                    <ci>kappa_1</ci>
                    <ci>q_ref</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_1_f</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_1_r</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_2</ci>
                <apply>
                    <times/>
                    <ci>kappa_2</ci>
                    <ci>q_ref</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_2_f</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_2_r</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_3</ci>
                <apply>
                    <times/>
                    <ci>kappa_3</ci>
                    <ci>q_ref</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_3_f</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_3_r</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_4</ci>
                <apply>
                    <times/>
                    <ci>kappa_4</ci>
                    <ci>q_ref</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_4_f</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_4_r</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_5</ci>
                <apply>
                    <times/>
                    <ci>kappa_5</ci>
                    <ci>q_ref</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_5_f</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_5_r</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v_6</ci>
                <apply>
                    <times/>
                    <ci>kappa_6</ci>
                    <ci>q_ref</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_6_f</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <ci>u_Re_6_r</ci>
                                <ci>RT</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- Conservation equations-->
        <variable name="I_m" public_interface="out" units="pA"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>I_m</ci>
                <apply>
                    <times/>
                    <ci>zNa</ci>
                    <ci>F</ci>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <apply>
                                <plus/>
                                <ci>v_1</ci>
                                <ci>v_4</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <ci>d_1</ci>
                                <ci>d_2</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>v_2</ci>
                            <apply>
                                <plus/>
                                <ci>d_3</ci>
                                <ci>d_4</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <plus/>
                                <ci>v_5</ci>
                                <ci>v_3</ci>
                            </apply>
                            <apply>
                                <plus/>
                                <ci>d_5</ci>
                                <ci>d_6</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- assumes equal likelihood of allosteric inhibition-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_1</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>v_3</ci>
                        <ci>v_1</ci>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>v_6</ci>
                            <ci>q_1</ci>
                        </apply>
                        <ci>q_5</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_2</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <plus/>
                            <ci>v_1</ci>
                            <ci>v_5</ci>
                        </apply>
                        <ci>v_2</ci>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>v_6</ci>
                            <ci>q_2</ci>
                        </apply>
                        <ci>q_5</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_3</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>v_2</ci>
                            <ci>v_4</ci>
                        </apply>
                        <ci>v_3</ci>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>v_6</ci>
                            <ci>q_3</ci>
                        </apply>
                        <ci>q_5</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_4</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>v_4</ci>
                        <ci>v_5</ci>
                    </apply>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>v_6</ci>
                            <ci>q_4</ci>
                        </apply>
                        <ci>q_5</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_5</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_6</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_6</ci>
                </apply>
                <ci>v_6</ci>
            </apply>
        </math>
        <!-- ode(q_Na_i, t) = v_3+v_5;
 ode(q_Na_o, t) = -v_6-v_4-v_1;-->
    </component>
</model>
