def model colon_ftu_modules as
  // #########################################################
  // ##################### Membranes #########################
  // #########################################################

  def comp simple_membrane as
    var t: second {pub: in};
    var u_e_m: volt {pub: out};
    var C_m: picoFarad {pub: in};
    var q_e_m_init: pC {pub: in};
    var q_e_m: pC {init: q_e_m_init};
    var zNa: dimensionless {pub: in};
    var F: C_per_mmol {pub: in};
    var v_ENaC_i: fmol_per_s {pub: in};
    ode(q_e_m, t) = zNa*F*v_ENaC_i;
    u_e_m = q_e_m/C_m;
  enddef;

  def comp membrane as
    var t: second {pub: in};
    // material parameters
    var C_m: picoFarad {pub: in};
    // constants
    var zNa: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    var z_1_NKE: dimensionless {pub: in};
    var z_2_NKE: dimensionless;
    var F: C_per_mmol {pub: in};
    z_2_NKE = 1{dimensionless}-z_1_NKE;
    // initial values
    var q_e_m_init: pC {pub: in};
    // flows
    var v_ENaC_i: fmol_per_s {pub: in};
    var v_NKE_K_o: fmol_per_s {pub: in};
    var v_NKE_Na_i: fmol_per_s {pub: in};
    var v_Kir_i: fmol_per_s {pub: in};
    // state variables
    var u_e_m: volt {pub: out};
    var q_e_m: pC {init: q_e_m_init};
    // constitutive equations
    ode(q_e_m, t) = z_2_NKE*F*v_NKE_K_o+z_1_NKE*F*v_NKE_Na_i+zNa*F*v_ENaC_i+zK*F*v_Kir_i;
    u_e_m = q_e_m/C_m;
  enddef;

  def comp apical_membrane as
    var t: second {pub: in};
    // flows
    var I_ENaC: picoA {pub: in};
    var I_apical: picoA {pub: out};
    // state variables
    var u_e_mucus: volt {pub: in};
    var u_e_cell: volt {pub: in};
    var u_e_api: volt {pub: out};
    // constitutive equations
    I_apical = I_ENaC;
    u_e_api = u_e_cell-u_e_mucus;
  enddef;

  def comp basolateral_membrane as
    var t: second {pub: in};
    // flows
    var I_NKE: picoA {pub: in};
    var I_Kir: picoA {pub: in};
    var I_bas: picoA {pub: out};
    // state variables
    var u_e_bas: volt {pub: out};
    var u_e_cell: volt {pub: in};
    var u_e_int: volt {pub: in};
    // constitutive equations
    I_bas = I_NKE+I_Kir;
    u_e_bas = u_e_cell-u_e_int;
  enddef;
  // #########################################################
  // ################## Compartments #########################
  // #########################################################

  def comp simple_lumen as
    var t: second {pub: in};
    var q_Na_lumen_init: fmol {pub: in};
    var q_Na_lumen: fmol {init: q_Na_lumen_init, pub: out};
    var v_ENaC_o: fmol_per_s {pub: in};
    ode(q_Na_lumen, t) = v_ENaC_o;
  enddef;

  def comp simple_cell as
    var t: second {pub: in};
    var q_Na_cell_init: fmol {pub: in};
    var q_Na_cell: fmol {init: q_Na_cell_init, pub: out};
    var v_ENaC_i: fmol_per_s {pub: in};
    ode(q_Na_cell, t) = v_ENaC_i;
  enddef;

  def comp lumen_ as
    var t: second {pub: in};
    // constants
    var zNa: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    var zCl: dimensionless {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    // initial conditions
    var q_V_init: pL {pub: in};
    var q_Na_init: fmol {pub: in};
    var q_Cl_init: fmol {pub: in};
    var q_K_init: fmol {pub: in};
    // state variables
    var u_e_lumen: volt {pub: out};
    var u_mu_e_Na: J_per_mmol {pub: out};
    var u_mu_e_K: J_per_mmol {pub: out};
    var u_mu_e_Cl: J_per_mmol {pub: out};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var u_P: kPa {pub: in};
    var u_P_pi: kPa {pub: out};
    var q_V: pL {init: q_V_init, pub: out};
    var q_Na: fmol {init: q_Na_init, pub: out};
    var q_K: fmol {init: q_K_init, pub: out};
    var q_Cl: fmol {init: q_Cl_init, pub: out};
    var c_Na: mM {pub: out};
    var c_K: mM {pub: out};
    var c_Cl: mM {pub: out};
    var v_Na_lum: fmol_per_s {pub: in};
    var v_K_lum: fmol_per_s {pub: in};
    var v_Cl_lum: fmol_per_s {pub: in};
    var v_V_lum: pL_per_s {pub: in};
    var I_lum: picoA {pub: in};
    // constitutive parameters
    var K_Na: per_mM {pub: in};
    var K_K: per_mM {pub: in};
    var K_Cl: per_mM {pub: in};
    var G_muc: picoS {pub: in};
    // constitutive relations
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    c_Cl = q_Cl/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    // conservation laws
    u_P_pi = u_P-(u_pi_Na+u_pi_K+u_pi_Cl);
    u_mu_e_Na = R*T*ln(K_Na*c_Na)+zNa*F*u_e_lumen;
    u_mu_e_K = R*T*ln(K_K*c_K)+zK*F*u_e_lumen;
    u_mu_e_Cl = R*T*ln(K_Cl*c_Cl)+zCl*F*u_e_lumen;
    ode(q_Na, t) = -v_Na_lum;
    ode(q_K, t) = -v_K_lum;
    ode(q_Cl, t) = -v_Cl_lum;
    ode(q_V, t) = -v_V_lum;
    var phi_p: dimensionless {pub: in};
    var phi_p_o: dimensionless {pub: in};
    u_e_lumen = I_lum/G_muc;
  enddef;

  def comp mucus_transport_params as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var RT: J_per_mmol;
    RT = R*T;
    var zNa: dimensionless {pub: in};
    var zCl: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    var rNa: nm {pub: in};
    var rCl: nm {pub: in};
    var rK: nm {pub: in};
    var rFV: nm {pub: in};
    var L_P: pL_L_per_J_per_s {pub: out};
    var phi_p: dimensionless {pub: in};
    var c_Na: mM {pub: in};
    var c_K: mM {pub: in};
    var c_Cl: mM {pub: in};
    // thickness of the mucus layer
    var L: mm {pub: in};
    // Kozeny-Carman eqn. for hydraulic conductivity with changing mucus layer
    var C_K: um2_per_s {pub: in};
    var kappa: um2_per_s {pub: in};
    var mu_w: kPa {pub: in};
    kappa = C_K*pow(1{dimensionless}-phi_p, 3{dimensionless})/sqr(phi_p);
    L_P = kappa/(L*mu_w);
    // Axpe relation for scaling diffusion coefficients
    var D_Na: dimensionless;
    var D_Cl: dimensionless;
    var D_K: dimensionless;
    var r_Na: nm;
    var r_Cl: nm;
    var r_K: nm;
    var r_FV: nm;
    var D_Na_init: dimensionless;
    var D_Cl_init: dimensionless;
    var D_K_init: dimensionless;
    var omega_Na_init: L_fmol_per_J_per_s {pub: in};
    var omega_Cl_init: L_fmol_per_J_per_s {pub: in};
    var omega_K_init: L_fmol_per_J_per_s {pub: in};
    var omega_Na: L_fmol_per_J_per_s {pub: out};
    var omega_Cl: L_fmol_per_J_per_s {pub: out};
    var omega_K: L_fmol_per_J_per_s {pub: out};
    D_Na_init = RT*omega_Na_init/(sqr(zNa*F)*c_Na);
    D_K_init = RT*omega_K_init/(sqr(zK*F)*c_K);
    D_Cl_init = RT*omega_Cl_init/(sqr(zCl*F)*c_Cl);
    D_Na = D_Na_init*exp(-pow(r_Na/r_FV, 3{dimensionless})*phi_p/(1{dimensionless}-phi_p));
    D_K = D_K_init*exp(-pow(r_K/r_FV, 3{dimensionless})*phi_p/(1{dimensionless}-phi_p));
    D_Cl = D_Cl_init*exp(-pow(r_Cl/r_FV, 3{dimensionless})*phi_p/(1{dimensionless}-phi_p));
    omega_Na = sqr(zNa*F)*c_Na/RT*D_Na;
    omega_K = sqr(zK*F)*c_K/RT*D_K;
    omega_Cl = sqr(zCl*F)*c_Cl/RT*D_Cl;
  enddef;

  def comp mucus as
    var t: second {pub: in};
    // constants
    var zNa: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    var zCl: dimensionless {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var V_w: L_per_mmol {pub: in};
    var RT: J_per_mmol;
    RT = R*T;
    // initial conditions
    var q_V_init: pL {pub: in};
    var q_Na_init: fmol {pub: in};
    var q_Cl_init: fmol {pub: in};
    var q_K_init: fmol {pub: in};
    var u_e_mucus_init: volt {pub: in};
    // state variables
    var u_e_mucus_ion: volt {init: u_e_mucus_init};
    var u_mu_e_Na: J_per_mmol {pub: out};
    var u_mu_e_K: J_per_mmol {pub: out};
    var u_mu_e_Cl: J_per_mmol {pub: out};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var q_V: pL {init: q_V_init, pub: out};
    var q_Na: fmol {init: q_Na_init, pub: out};
    var q_K: fmol {init: q_K_init, pub: out};
    var q_Cl: fmol {init: q_Cl_init, pub: out};
    var c_Na: mM {pub: out};
    var c_K: mM {pub: out};
    var c_Cl: mM {pub: out};
    var v_Na_para: fmol_per_s {pub: in};
    var v_K_para: fmol_per_s {pub: in};
    var v_Cl_para: fmol_per_s {pub: in};
    var v_V_para: pL_per_s {pub: in};
    var v_Na_lum: fmol_per_s {pub: in};
    var v_K_lum: fmol_per_s {pub: in};
    var v_Cl_lum: fmol_per_s {pub: in};
    var v_V_lum: pL_per_s {pub: in};
    var v_ENaC_o: fmol_per_s {pub: in};
    var v_AQ_o: pL_per_s {pub: in};
    // describes the negative fixed potential contributed by mucins
    var u_e_Donnan: volt {pub: in};
    var u_e_mucus: volt {pub: out};
    var u_P_pi: kPa {pub: out};
    var L: mm {pub: out};
    var A: um2 {pub: in};
    // constitutive parameters
    var C_m_bas: picoFarad {pub: in};
    var C_m_api: picoFarad {pub: in};
    var K_Na: per_mM {pub: in};
    var K_K: per_mM {pub: in};
    var K_Cl: per_mM {pub: in};
    // constitutive relations
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    c_Cl = q_Cl/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    // Flory-Rehner pressures
    var u_Pi_mix: kPa {pub: out};
    var u_Pi_elastic: kPa {pub: out};
    var u_Pi_ion: kPa {pub: out};
    // volume fraction of mucin polymers
    var phi_p: dimensionless {pub: out};
    var phi_p_o: dimensionless {pub: in};
    // Flory-Rehner solvent-polymer interaction term
    var chi_p: dimensionless {pub: in};
    // Moles of elastically effective chains per unit volumne of polymer network
    var nu_c: mM {pub: in};
    u_Pi_mix = RT/V_w*(ln(1{dimensionless}-phi_p)+phi_p+chi_p*sqr(phi_p));
    u_Pi_elastic = -nu_c*RT*(0.5{dimensionless}*phi_p-pow(phi_p, 1{dimensionless}/3{dimensionless}));
    phi_p = phi_p_o*q_V_init/q_V;
    L = q_V/A;
    // conservation laws
    u_Pi_ion = -(u_pi_Na+u_pi_K+u_pi_Cl);
    u_P_pi = u_Pi_elastic+u_Pi_mix+u_Pi_ion;
    u_mu_e_Na = R*T*ln(K_Na*c_Na)+zNa*F*u_e_mucus;
    u_mu_e_K = R*T*ln(K_K*c_K)+zK*F*u_e_mucus;
    u_mu_e_Cl = R*T*ln(K_Cl*c_Cl)+zCl*F*u_e_mucus;
    ode(q_Na, t) = v_Na_lum-v_Na_para+v_ENaC_o;
    ode(q_K, t) = v_K_lum-v_K_para;
    ode(q_Cl, t) = v_Cl_lum-v_Cl_para;
    ode(q_V, t) = v_V_lum-v_V_para+v_AQ_o;
    var I_para: picoA {pub: in};
    var I_bas: picoA {pub: in};
    var I_api: picoA {pub: in};
    var I_lum: picoA {pub: in};
    ode(u_e_mucus_ion, t) = (I_lum-(I_para+I_bas))/C_m_bas+(I_lum+I_api-I_para)/C_m_api;
    u_e_mucus = u_e_mucus_ion+u_e_Donnan;
  enddef;

  def comp colonocyte as
    var t: second {pub: in};
    // constants
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    // initial conditions
    var q_V_init: pL {pub: in};
    var q_Na_init: fmol {pub: in};
    var q_K_init: fmol {pub: in};
    var u_e_cell_init: volt {pub: in};
    // state variables
    var u_e_cell: volt {init: u_e_cell_init, pub: out};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var u_P: kPa {pub: in};
    var u_P_pi: kPa {pub: out};
    var q_V: pL {init: q_V_init, pub: out};
    var q_Na: fmol {init: q_Na_init, pub: out};
    var q_K: fmol {init: q_K_init, pub: out};
    var c_ATP_init: mM {pub: in};
    var c_ADP_init: mM {pub: in};
    var c_Pi_init: mM {pub: in};
    var c_Na: mM {pub: out};
    var c_K: mM {pub: out};
    var c_Cl: mM {pub: in};
    var c_ADP: mM {init: c_ADP_init, pub: out};
    var c_ATP: mM {init: c_ATP_init, pub: out};
    var c_Pi: mM {init: c_Pi_init, pub: out};
    // apical fluxes
    var v_ENaC_i: fmol_per_s {pub: in};
    var v_AQ_api_i: pL_per_s {pub: in};
    // basolateral fluxes
    var v_Kir_i: fmol_per_s {pub: in};
    var v_NKE_K_i: fmol_per_s {pub: in};
    var v_NKE_Na_i: fmol_per_s {pub: in};
    var v_AQ_bas_i: pL_per_s {pub: in};
    // currents
    var I_para: picoA {pub: in};
    var I_bas: picoA {pub: in};
    var I_lum: picoA {pub: in};
    // constitutive parameters
    var C_m_bas: picoFarad {pub: in};
    // constitutive relations
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    // conservation laws
    u_P_pi = u_P-(u_pi_Na+u_pi_K+u_pi_Cl);
    ode(q_Na, t) = v_ENaC_i+v_NKE_Na_i;
    ode(q_K, t) = v_NKE_K_i+v_Kir_i;
    ode(q_V, t) = v_AQ_api_i+v_AQ_bas_i;
    ode(u_e_cell, t) = (I_lum-(I_para+I_bas))/C_m_bas;
  enddef;

  def comp interstitial_fluid as
    var t: second {pub: in};
    // constants
    var zNa: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    var zCl: dimensionless {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    // initial conditions
    var q_V_init: pL {pub: in};
    var q_Na_init: fmol {pub: in};
    var q_Cl_init: fmol {pub: in};
    var q_K_init: fmol {pub: in};
    // state variables
    var u_e_int: volt {init: 0, pub: out};
    var u_mu_Na: J_per_mmol;
    var u_mu_K: J_per_mmol;
    var u_mu_Cl: J_per_mmol;
    var u_mu_e_Na: J_per_mmol {pub: out};
    var u_mu_e_K: J_per_mmol {pub: out};
    var u_mu_e_Cl: J_per_mmol {pub: out};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var u_P: kPa {pub: in};
    var u_P_pi: kPa {pub: out};
    var q_V: pL {init: q_V_init, pub: out};
    var q_Na: fmol {init: q_Na_init, pub: out};
    var q_K: fmol {init: q_K_init, pub: out};
    var q_Cl: fmol {init: q_Cl_init, pub: out};
    var c_Na: mM {pub: out};
    var c_K: mM {pub: out};
    var c_Cl: mM {pub: out};
    // constitutive parameters
    var K_Na: per_mM {pub: in};
    var K_K: per_mM {pub: in};
    var K_Cl: per_mM {pub: in};
    // constitutive relations
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    c_Cl = q_Cl/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    u_mu_Na = R*T*ln(K_Na*c_Na);
    u_mu_K = R*T*ln(K_K*c_K);
    u_mu_Cl = R*T*ln(K_Cl*c_Cl);
    // flows
    var v_Na_para: fmol_per_s {pub: in};
    var v_K_para: fmol_per_s {pub: in};
    var v_Cl_para: fmol_per_s {pub: in};
    var v_V_para: pL_per_s {pub: in};
    var v_Na_cap: fmol_per_s {pub: in};
    var v_K_cap: fmol_per_s {pub: in};
    var v_Cl_cap: fmol_per_s {pub: in};
    var v_V_cap: pL_per_s {pub: in};
    var v_Na_lym: fmol_per_s {pub: in};
    var v_K_lym: fmol_per_s {pub: in};
    var v_Cl_lym: fmol_per_s {pub: in};
    var v_V_lym: pL_per_s {pub: in};
    var v_NKE_Na_o: fmol_per_s {pub: in};
    var v_NKE_K_o: fmol_per_s {pub: in};
    var v_Kir_o: fmol_per_s {pub: in};
    var v_AQ_o: pL_per_s {pub: in};
    // conservation laws
    u_P_pi = u_P-(u_pi_Na+u_pi_K+u_pi_Cl);
    u_mu_e_Na = u_mu_Na+zNa*F*u_e_int;
    u_mu_e_K = u_mu_K+zK*F*u_e_int;
    u_mu_e_Cl = u_mu_Cl+zCl*F*u_e_int;
    ode(q_Na, t) = v_Na_para-v_Na_cap-v_Na_lym+v_NKE_Na_o;
    ode(q_K, t) = v_K_para-v_K_cap-v_K_lym+v_NKE_K_o+v_Kir_o;
    ode(q_Cl, t) = v_Cl_para-v_Cl_lym-v_Cl_cap;
    ode(q_V, t) = v_V_para-v_V_lym-v_V_cap+v_AQ_o;
  enddef;

  def comp blood_lymph as
    var t: second {pub: in};
    // constants
    var zNa: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    var zCl: dimensionless {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var G_m: picoS {pub: in};
    // initial conditions
    var q_V_init: pL {pub: in};
    var q_Na_init: fmol {pub: in};
    var q_Cl_init: fmol {pub: in};
    var q_K_init: fmol {pub: in};
    // state variables
    var u_e_fluid: volt {pub: out};
    // describes the negative fixed potential contributed by the plasma (albumin)
    var u_e_Donnan: volt {pub: in};
    // u_e_Donnan = RT/z_proteinF*ln(c_protein_plasma/c_protein_interstitial) + RT/z_albuminF*ln(c_albumin_plasma/c_albumin_interstitial)
    // z_protein = -2-5, z_albumin = -14; c_protein_plasma = 15 mM, c_protein_int = 5 mM, c_albumin_plasma = 60 mM, c_albumin_ int = 20 mM
    var u_mu_Na: J_per_mmol;
    var u_mu_K: J_per_mmol;
    var u_mu_Cl: J_per_mmol;
    var u_mu_e_Na: J_per_mmol {pub: out};
    var u_mu_e_K: J_per_mmol {pub: out};
    var u_mu_e_Cl: J_per_mmol {pub: out};
    var u_pi_Na: kPa;
    var u_pi_K: kPa;
    var u_pi_Cl: kPa;
    var u_pi_proteins: kPa;
    var u_P: kPa {pub: in};
    var u_P_pi: kPa {pub: out};
    var q_V: pL {init: q_V_init, pub: out};
    var q_Na: fmol {init: q_Na_init, pub: out};
    var q_K: fmol {init: q_K_init, pub: out};
    var q_Cl: fmol {init: q_Cl_init, pub: out};
    var q_proteins: fmol {pub: in};
    var q_albumin: fmol {pub: in};
    var c_Na: mM {pub: out};
    var c_K: mM {pub: out};
    var c_Cl: mM {pub: out};
    var c_proteins: mM {pub: out};
    var c_albumin: mM {pub: out};
    // constitutive parameters
    var K_Na: per_mM {pub: in};
    var K_K: per_mM {pub: in};
    var K_Cl: per_mM {pub: in};
    // constitutive relations
    c_Na = q_Na/q_V;
    c_K = q_K/q_V;
    c_Cl = q_Cl/q_V;
    c_proteins = q_proteins/q_V;
    c_albumin = q_albumin/q_V;
    u_pi_Na = R*T*c_Na;
    u_pi_K = R*T*c_K;
    u_pi_Cl = R*T*c_Cl;
    u_pi_proteins = R*T*(c_proteins+c_albumin);
    u_mu_Na = R*T*ln(K_Na*c_Na);
    u_mu_K = R*T*ln(K_K*c_K);
    u_mu_Cl = R*T*ln(K_Cl*c_Cl);
    u_e_fluid = I_fluid/G_m+u_e_Donnan;
    // flows
    var v_Na_fluid: fmol_per_s {pub: in};
    var v_K_fluid: fmol_per_s {pub: in};
    var v_Cl_fluid: fmol_per_s {pub: in};
    var v_V_fluid: pL_per_s {pub: in};
    var I_fluid: picoA {pub: in};
    // conservation laws
    u_P_pi = u_P-(u_pi_Na+u_pi_K+u_pi_Cl+u_pi_proteins);
    u_mu_e_Na = u_mu_Na+zNa*F*u_e_fluid;
    u_mu_e_K = u_mu_K+zK*F*u_e_fluid;
    u_mu_e_Cl = u_mu_Cl+zCl*F*u_e_fluid;
    // assume blood flow is such that the amount of these species don't change
    // ode(q_Na, t) = 0{fmol_per_s};
    // ode(q_K, t)  = 0{fmol_per_s};
    // ode(q_Cl, t) = 0{fmol_per_s};
    // ode(q_V, t)  = 0{pL_per_s};
    ode(q_Na, t) = v_Na_fluid;
    ode(q_K, t) = v_K_fluid;
    ode(q_Cl, t) = v_Cl_fluid;
    ode(q_V, t) = v_V_fluid;
  enddef;
  // #########################################################
  // #################### Proteins ###########################
  // #########################################################

  def comp ENaC as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var RT: J_per_mmol;
    var zNa: dimensionless {pub: in};
    RT = R*T;
    // Quantities
    var q_1_init: fmol {pub: in};
    var q_2_init: fmol {pub: in};
    var q_3_init: fmol {pub: in};
    var q_4_init: fmol {pub: in};
    var q_1: fmol {init: q_1_init};
    var q_2: fmol {init: q_2_init};
    var q_3: fmol {init: q_3_init};
    var q_4: fmol {init: q_4_init};
    var c_Na_i: mM {pub: in};
    var c_Na_o: mM {pub: in};
    // Parameters
    var K_1: per_fmol {pub: in};
    var K_2: per_fmol {pub: in};
    var K_3: per_fmol {pub: in};
    var K_4: per_fmol {pub: in};
    var K_Na: per_mM {pub: in};
    var kappa_1: fmol_per_s {pub: in};
    var kappa_2: fmol_per_s {pub: in};
    var kappa_3: fmol_per_s {pub: in};
    var kappa_4: fmol_per_s {pub: in};
    var P_Na: pL_per_s_per_fmol {pub: in};
    var P_o: pL_per_s_per_fmol {pub: in};
    // Potentials
    var u_e_m: volt {pub: in};
    // flows
    var v_1: fmol_per_s;
    var v_2: fmol_per_s;
    var v_3: fmol_per_s;
    var v_4: fmol_per_s;
    v_1 = kappa_1*(K_2*q_2-K_1*q_1);
    v_2 = kappa_2*(K_1*q_1*K_Na*c_Na_o-K_3*q_3);
    v_3 = kappa_3*(K_3*q_3-K_4*q_4);
    v_4 = kappa_4*(K_4*q_4-K_2*q_2*K_Na*c_Na_o);
    // net fluxes
    var kappa_ENaC: pL_per_s {pub: out};
    var v_q_Na_i: fmol_per_s {pub: out};
    var v_q_Na_o: fmol_per_s {pub: out};
    var I_ENaC: picoA {pub: out};
    ode(q_1, t) = v_1-v_2;
    ode(q_2, t) = v_4-v_1;
    ode(q_3, t) = v_2-v_3;
    ode(q_4, t) = v_3-v_4;
    kappa_ENaC = P_Na*q_3+P_o*q_1;
    I_ENaC = sel
      case abs(u_e_m) < 1e-9{volt}:
        kappa_ENaC*zNa*F*(c_Na_i-c_Na_o);
      otherwise:
        kappa_ENaC*sqr(zNa)*u_e_m*sqr(F)/RT*(c_Na_i-c_Na_o*exp(-zNa*F*u_e_m/RT))/(1{dimensionless}-exp(-zNa*F*u_e_m/RT));
    endsel;
    // output fluxes
    v_q_Na_i = -I_ENaC/(zNa*F);
    v_q_Na_o = v_4-v_2-v_q_Na_i;
  enddef;

  def comp ENaC_SS as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var RT: J_per_mmol;
    var zNa: dimensionless {pub: in};
    var C_ref: mM {pub: in};
    var q_ref: fmol {pub: in};
    RT = R*T;
    // Thermodynamic constants
    var u_G_00: J_per_mmol;
    var u_G_10: J_per_mmol {pub: in};
    var u_G_01: J_per_mmol;
    var u_G_Na: J_per_mmol {pub: in};
    // Rate constant
    var kappa_2: fmol_per_s_per_K {pub: in};
    // Initial values
    var q_ENaC: fmol {pub: in};
    var C_Na_i: mM {pub: in};
    var C_Na_o: mM {pub: in};
    // constraints
    var u_G_1_ref: J_per_mmol {pub: in};
    var u_G_2_ref: J_per_mmol {pub: in};
    u_G_00 = u_G_10-(u_G_Na+u_G_1_ref);
    u_G_01 = u_G_2_ref+u_G_10;
    // electrical potential
    var u_e_m: volt {pub: in};
    // steady state flux
    var v: fmol_per_s {pub: out};
    v = kappa_2*T*q_ENaC/q_ref/(exp((-u_G_00-u_G_Na)/RT)+C_Na_o/C_ref*exp(-u_G_10/RT)+C_Na_i/C_ref*exp(-u_G_01/RT))*(C_Na_o/C_ref*exp(-zNa*F*u_e_m/RT)-C_Na_i/C_ref);
    // Conservation equations
    var I_m: picoA {pub: out};
    var I_m_recorded: picoA {pub: out};
    I_m = zNa*F*v;
    I_m_recorded = -I_m;
    ode(q_ENaC, t) = 0{fmol_per_s};
  enddef;
  // pragmatic ENaC model

  def comp ENaC_PE as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var RT: J_per_mmol;
    var zNa: dimensionless {pub: in};
    var C_ref: mM {pub: in};
    var q_ref: fmol {pub: in};
    var G_ENaC: pS_per_fmol {pub: in};
    var P_o_1: dimensionless {pub: in};
    var P_o_2: dimensionless {pub: in};
    RT = R*T;
    // Thermodynamic constants
    var u_G_1: J_per_mmol {pub: in};
    var u_G_2: J_per_mmol {pub: in};
    var u_G_Na: J_per_mmol {pub: in};
    // Rate constants
    var kappa_1: fmol_per_s {pub: in};
    var kappa_2: picoS {pub: out};
    kappa_2 = G_ENaC*(q_1*P_o_1+q_2*P_o_2);
    // Initial values
    var q_1_init: fmol {pub: in};
    var q_2_init: fmol {pub: in};
    var q_1: fmol {init: q_1_init, pub: out};
    var q_2: fmol {init: q_2_init, pub: out};
    var C_Na_i: mM {pub: in};
    var C_Na_o: mM {pub: in};
    var u_1: J_per_mmol;
    var u_2: J_per_mmol;
    var u_Na_o: J_per_mmol;
    // Efforts
    u_1 = u_G_1+RT*ln(q_1/q_ref);
    u_2 = u_G_2+RT*ln(q_2/q_ref);
    u_Na_o = u_G_Na+RT*ln(C_Na_o/C_ref);
    // electrical potential
    var u_e_m: volt {pub: in};
    // chemical affinities
    var u_Re_1_f: J_per_mmol;
    var u_Re_1_r: J_per_mmol;
    u_Re_1_f = u_1+u_Na_o;
    u_Re_1_r = u_2;
    // Constitutive equations
    var v_1: fmol_per_s {pub: out};
    v_1 = kappa_1*(exp(u_Re_1_f/RT)-exp(u_Re_1_r/RT));
    I_m = kappa_2*(u_e_m-RT/(zNa*F)*ln(C_Na_o/C_Na_i));
    // Conservation equations
    var I_m: picoA {pub: out};
    var I_m_recorded: picoA {pub: out};
    I_m_recorded = -I_m;
    ode(q_1, t) = -v_1;
    ode(q_2, t) = v_1;
    var v_Na_i: fmol_per_s {pub: out};
    var v_Na_o: fmol_per_s {pub: out};
    v_Na_i = -v_Na_o;
    v_Na_o = I_m/(zNa*F)-v_1;
  enddef;

  def comp ENaC_Kellenberger as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var RT: J_per_mmol;
    var V_o: pL {pub: in};
    var V_i: pL {pub: in};
    var zNa: dimensionless {pub: in};
    var C_ref: mM {pub: in};
    var q_ref: fmol {pub: in};
    RT = R*T;
    // Thermodynamic constants
    var u_G_1: J_per_mmol;
    var u_G_2: J_per_mmol {pub: in};
    var u_G_3: J_per_mmol;
    var u_G_4: J_per_mmol {pub: in};
    var u_G_5: J_per_mmol {pub: in};
    var u_G_Na: J_per_mmol {pub: in};
    // Rate constants
    var kappa_1: per_s {pub: in};
    var kappa_2: per_s {pub: in};
    var kappa_3: per_s {pub: in};
    var kappa_4: per_s {pub: in};
    // other variables
    var d_1: dimensionless {pub: in};
    var d_2: dimensionless {pub: in};
    var d_3: dimensionless {pub: in};
    var d_4: dimensionless {pub: in};
    var d_5: dimensionless {pub: in};
    var d_6: dimensionless {pub: in};
    // Initial values
    var q_1_init: fmol {pub: in};
    var q_2_init: fmol {pub: in};
    var q_3_init: fmol {pub: in};
    var q_4_init: fmol {pub: in};
    var q_5_init: fmol {pub: in};
    var q_1: fmol {init: q_1_init, pub: out};
    var q_2: fmol {init: q_2_init, pub: out};
    var q_3: fmol {init: q_3_init, pub: out};
    var q_4: fmol {init: q_4_init, pub: out};
    var q_5: fmol {init: q_5_init, pub: out};
    var q_Na_i: fmol {pub: in};
    var q_Na_o: fmol {pub: in};
    var C_Na_i: mM {pub: out};
    var C_Na_o: mM {pub: out};
    C_Na_i = q_Na_i/V_i;
    C_Na_o = q_Na_o/V_o;
    var u_1: J_per_mmol;
    var u_2: J_per_mmol;
    var u_3: J_per_mmol;
    var u_4: J_per_mmol;
    var u_5: J_per_mmol;
    var u_Na_i: J_per_mmol;
    var u_Na_o: J_per_mmol;
    // constraints
    var u_G_1_ref: J_per_mmol {pub: in};
    var u_G_2_ref: J_per_mmol {pub: in};
    u_G_1 = u_G_2-(u_G_Na+u_G_1_ref);
    u_G_3 = u_G_2_ref-u_G_2;
    // Efforts
    u_1 = u_G_1+RT*ln(q_1/q_ref);
    u_2 = u_G_2+RT*ln(q_2/q_ref);
    u_3 = u_G_3+RT*ln(q_3/q_ref);
    u_4 = u_G_4+RT*ln(q_4/q_ref);
    u_5 = u_G_5+RT*ln(q_5/q_ref);
    u_Na_i = u_G_Na+RT*ln(C_Na_i/C_ref);
    u_Na_o = u_G_Na+RT*ln(C_Na_o/C_ref);
    // electrical potential
    var u_e_m: volt {pub: in};
    // chemical affinities
    var u_Re_1_f: J_per_mmol;
    var u_Re_1_r: J_per_mmol;
    var u_Re_2_f: J_per_mmol;
    var u_Re_2_r: J_per_mmol;
    var u_Re_3_f: J_per_mmol;
    var u_Re_3_r: J_per_mmol;
    var u_Re_4_f: J_per_mmol;
    var u_Re_4_r: J_per_mmol;
    // Ion transit affinities
    u_Re_1_f = u_1+u_Na_o;
    u_Re_1_r = u_2-zNa*F*(d_1+d_2)*u_e_m;
    u_Re_2_f = u_2-zNa*F*(d_1+d_2)*u_e_m;
    u_Re_2_r = u_3-zNa*F*(d_1+d_2+d_3+d_4)*u_e_m;
    u_Re_3_f = u_3-zNa*F*(d_1+d_2+d_3+d_4)*u_e_m;
    u_Re_3_r = u_Na_i+u_1-zNa*F*u_e_m;
    // Allosteric site affinities
    u_Re_4_f = u_4+u_Na_o;
    u_Re_4_r = u_5;
    // Constitutive equations
    var v_1: fmol_per_s {pub: out};
    var v_2: fmol_per_s {pub: out};
    var v_3: fmol_per_s {pub: out};
    var v_4: fmol_per_s {pub: out};
    v_1 = kappa_1*q_ref*(exp(u_Re_1_f/RT)-exp(u_Re_1_r/RT));
    v_2 = kappa_2*q_ref*(exp(u_Re_2_f/RT)-exp(u_Re_2_r/RT));
    v_3 = kappa_3*q_ref*(exp(u_Re_3_f/RT)-exp(u_Re_3_r/RT));
    // fix v_ for now
    v_4 = 0{fmol_per_s};
    // v_4 = kappa_4*q_ref*T*(exp(u_Re_4_f/RT)-exp(u_Re_4_r/RT));
    // Conservation equations
    var I_m: picoA {pub: out};
    var I_m_recorded: picoA {pub: out};
    I_m = zNa*F*(v_1*(d_1+d_2)+v_2*(d_3+d_4)+v_3*(d_5+d_6));
    I_m_recorded = -I_m;
    // assumes equal likelihood of allosteric inhibition
    ode(q_1, t) = v_3-v_1-v_4*q_1/q_4;
    ode(q_2, t) = v_1-v_2-v_4*q_2/q_4;
    ode(q_3, t) = v_2-v_3-v_4*q_3/q_4;
    ode(q_4, t) = -v_4;
    ode(q_5, t) = v_4;
    var v_Na_i: fmol_per_s {pub: out};
    var v_Na_o: fmol_per_s {pub: out};
    v_Na_i = v_3;
    v_Na_o = -v_4-v_1;
    // ode(q_Na_i, t)
    // ode(q_Na_o, t) = -v_6-v_4-v_1;
  enddef;
  // ###########################################

  def comp AQ as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    // Parameters
    var kappa: pL_per_kPa_per_s {pub: out};
    var n: fmol {pub: in};
    var gamma_37: pL_per_kPa_per_s_per_fmol {pub: in};
    var E_a: J_per_mmol {pub: in};
    kappa = n*gamma_37*exp(-E_a/R*(1{dimensionless}/T-1{dimensionless}/310.15{kelvin}));
    // Potentials
    var u_P_pi_i: kPa {pub: in};
    var u_P_pi_o: kPa {pub: in};
    // Flows
    var v_AQ_i: pL_per_s {pub: out};
    var v_AQ_o: pL_per_s {pub: out};
    v_AQ_i = kappa*(u_P_pi_o-u_P_pi_i);
    v_AQ_o = -v_AQ_i;
  enddef;
  // ###########################################

  def comp Kir as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var zK: dimensionless {pub: in};
    var RT: J_per_mmol;
    RT = R*T;
    // Parameters
    var kappa_Kir: picoS {pub: out};
    var gamma_Kir: picoS_per_fmol {pub: in};
    var P_Kir: dimensionless {pub: in};
    var N_Kir: fmol {pub: in};
    kappa_Kir = gamma_Kir*P_Kir*N_Kir;
    // Quantities
    var c_K_o: mM {pub: in};
    var c_K_i: mM {pub: in};
    // Potentials
    var u_e_m: volt {pub: in};
    // Flows
    var v_Kir_o: fmol_per_s {pub: out};
    var v_Kir_i: fmol_per_s {pub: out};
    var I_Kir: picoA {pub: out};
    I_Kir = kappa_Kir*(u_e_m-RT/(zK*F)*ln(c_K_o/c_K_i));
    v_Kir_i = I_Kir/(zK*F);
    v_Kir_o = -v_Kir_i;
  enddef;
  // #########################################################

  def comp NKE as
    var t: second {pub: in};
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var RT: J_per_mmol;
    var z_1: dimensionless {pub: in};
    var z_2: dimensionless;
    z_2 = 1{dimensionless}-z_1;
    RT = R*T;
    var c_Na_o: mM {pub: in};
    var c_Na_i: mM {pub: in};
    var c_K_o: mM {pub: in};
    var c_K_i: mM {pub: in};
    var c_ATP: mM {pub: in};
    var c_ADP: mM {pub: in};
    var c_Pi: mM {pub: in};
    var c_H_i: mM;
    var u_e_m: volt {pub: in};
    var e_1: dimensionless;
    var e_2: dimensionless;
    c_H_i = pow(10{dimensionless}, -7{dimensionless})*1{mM};
    e_1 = exp(z_1*F*u_e_m/RT);
    e_2 = exp(z_2*F*u_e_m/RT);
    var q_1_init: fmol {pub: in};
    var q_2_init: fmol {pub: in};
    var q_3_init: fmol {pub: in};
    var q_4_init: fmol {pub: in};
    var q_5_init: fmol {pub: in};
    var q_6_init: fmol {pub: in};
    var q_1: fmol {init: q_1_init, pub: out};
    var q_2: fmol {init: q_2_init, pub: out};
    var q_3: fmol {init: q_3_init, pub: out};
    var q_4: fmol {init: q_4_init, pub: out};
    var q_5: fmol {init: q_5_init, pub: out};
    var q_6: fmol {init: q_6_init, pub: out};
    // Constitutive parameters
    var K_1: per_fmol {pub: in};
    var K_2: per_fmol {pub: in};
    var K_3: per_fmol {pub: in};
    var K_4: per_fmol {pub: in};
    var K_5: per_fmol {pub: in};
    var K_6: per_fmol {pub: in};
    var K_K: per_mM {pub: in};
    var K_ADP: per_mM {pub: in};
    var K_ATP: per_mM {pub: in};
    var K_Na: per_mM {pub: in};
    var K_Pi: per_mM {pub: in};
    var K_H: per_mM {pub: in};
    var kappa_1: fmol_per_s {pub: in};
    var kappa_2: fmol_per_s {pub: in};
    var kappa_3: fmol_per_s {pub: in};
    var kappa_4: fmol_per_s {pub: in};
    var kappa_5: fmol_per_s {pub: in};
    var kappa_6: fmol_per_s {pub: in};
    //
    var Q_1: dimensionless {pub: out};
    var Q_2: dimensionless {pub: out};
    var Q_3: dimensionless {pub: out};
    var Q_4: dimensionless {pub: out};
    var Q_5: dimensionless {pub: out};
    var Q_6: dimensionless {pub: out};
    var Q_Na_o: dimensionless {pub: out};
    var Q_Na_i: dimensionless {pub: out};
    var Q_K_o: dimensionless {pub: out};
    var Q_K_i: dimensionless {pub: out};
    var Q_ATP: dimensionless {pub: out};
    var Q_ADP: dimensionless {pub: out};
    var Q_Pi: dimensionless {pub: out};
    var Q_H_i: dimensionless {pub: out};
    Q_1 = K_1*q_1;
    Q_2 = K_2*q_2;
    Q_3 = K_3*q_3;
    Q_4 = K_4*q_4;
    Q_5 = K_5*q_5;
    Q_6 = K_6*q_6;
    Q_Na_o = K_Na*c_Na_o;
    Q_Na_i = K_Na*c_Na_i;
    Q_K_o = K_K*c_K_o;
    Q_K_i = K_K*c_K_i;
    Q_ATP = K_ATP*c_ATP;
    Q_ADP = K_ADP*c_ADP;
    Q_Pi = K_Pi*c_Pi;
    Q_H_i = K_H*c_H_i;
    // flows
    var v_1: fmol_per_s {pub: out};
    var v_2: fmol_per_s {pub: out};
    var v_3: fmol_per_s {pub: out};
    var v_4: fmol_per_s {pub: out};
    var v_5: fmol_per_s {pub: out};
    var v_6: fmol_per_s {pub: out};
    v_1 = kappa_1*(Q_1*pow(Q_Na_i, 3{dimensionless})*Q_ATP-Q_2);
    v_2 = kappa_2*(Q_2-Q_3*Q_ADP);
    v_3 = kappa_3*(Q_3-Q_4*pow(Q_Na_o, 3{dimensionless})*e_1);
    v_4 = kappa_4*(Q_4*sqr(Q_K_o)-Q_5);
    v_5 = kappa_5*(Q_5-Q_6*Q_Pi*Q_H_i);
    v_6 = kappa_6*(Q_6-Q_1*sqr(Q_K_i)*e_2);
    // conservation equations
    ode(q_1, t) = v_6-v_1;
    ode(q_2, t) = v_1-v_2;
    ode(q_3, t) = v_2-v_3;
    ode(q_4, t) = v_3-v_4;
    ode(q_5, t) = v_4-v_5;
    ode(q_6, t) = v_5-v_6;
    var v_q_Na_i: fmol_per_s {pub: out};
    var v_q_Na_o: fmol_per_s {pub: out};
    var v_q_K_i: fmol_per_s {pub: out};
    var v_q_K_o: fmol_per_s {pub: out};
    v_q_Na_i = -3{dimensionless}*v_1;
    v_q_Na_o = 3{dimensionless}*v_3;
    v_q_K_o = -2{dimensionless}*v_4;
    v_q_K_i = 2{dimensionless}*v_6;
    var I_NKE: picoA {pub: out};
    I_NKE = (v_6*z_2+v_3*z_1)*F;
  enddef;
  // copy of NKE_BG_6_state_ATPNaZK from NKE_BG_6_state_ATPNaZK_free_fixedV_withSS.cellml
  // changes:
  //      - remove u_Vm0
  //      - set u_Vm to {pub: in};
  //      - set i_Vm to {pub: out};
  //      - set v_x for all chemical species to {pub: out};
  //      - change species to be concentrations
  //      - add volume consideration

  def comp NKE_hunter as
    // Global constants
    var R: J_per_K_mol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mol {pub: in};
    // Thermodynamic constants
    var K_1: per_fmol {pub: in};
    var K_2: per_fmol {pub: in};
    var K_3: per_fmol {pub: in};
    var K_4: per_fmol {pub: in};
    var K_5: per_fmol {pub: in};
    var K_6: per_fmol {pub: in};
    var K_Ki: per_fmol {pub: in};
    var K_Ko: per_fmol {pub: in};
    var K_Nai: per_fmol {pub: in};
    var K_Nao: per_fmol {pub: in};
    var K_ATP: per_fmol {pub: in};
    var K_ADP: per_fmol {pub: in};
    var K_Pi: per_fmol {pub: in};
    var K_H: per_fmol {pub: in};
    // added by Jarrah
    var q_V_o: pL {pub: in};
    var q_V_i: pL {pub: in};
    // Kinetic rate constants
    var kappa_r1: fmol_per_s {pub: in};
    var kappa_r2: fmol_per_s {pub: in};
    var kappa_r3: fmol_per_s {pub: in};
    var kappa_r4: fmol_per_s {pub: in};
    var kappa_r5: fmol_per_s {pub: in};
    var kappa_r6: fmol_per_s {pub: in};
    // chemical species
    var c_Ki: mM {pub: in};
    var c_Ko: mM {pub: in};
    var c_Nai: mM {pub: in};
    var c_Nao: mM {pub: in};
    var c_ATP: mM {pub: in};
    var c_ADP: mM {pub: in};
    var c_Pi: mM {pub: in};
    var c_H: mM {pub: in};
    // membrane electrical potential
    var z_z1: dimensionless {pub: in};
    var z_z2: dimensionless {pub: in};
    var u_Vm: volt {pub: in};
    var i_Vm: fA {pub: out};
    i_Vm = F*v_r3*z_z2+F*v_r6*z_z1;
    var q_1_init: fmol {pub: in};
    var q_2_init: fmol {pub: in};
    var q_3_init: fmol {pub: in};
    var q_4_init: fmol {pub: in};
    var q_5_init: fmol {pub: in};
    var q_6_init: fmol {pub: in};
    var q_1: fmol {init: q_1_init, pub: out};
    var mu_1: J_per_mol;
    var v_1: fmol_per_s {pub: out};
    var q_2: fmol {init: q_2_init, pub: out};
    var mu_2: J_per_mol;
    var v_2: fmol_per_s {pub: out};
    var q_3: fmol {init: q_3_init, pub: out};
    var mu_3: J_per_mol;
    var v_3: fmol_per_s {pub: out};
    var q_4: fmol {init: q_4_init, pub: out};
    var mu_4: J_per_mol;
    var v_4: fmol_per_s {pub: out};
    var q_5: fmol {init: q_5_init, pub: out};
    var mu_5: J_per_mol;
    var v_5: fmol_per_s {pub: out};
    var q_6: fmol {init: q_6_init, pub: out};
    var mu_6: J_per_mol;
    var v_6: fmol_per_s {pub: out};
    var mu_Ki: J_per_mol;
    var v_Ki: fmol_per_s {pub: out};
    var mu_Ko: J_per_mol;
    var v_Ko: fmol_per_s {pub: out};
    var mu_Nai: J_per_mol;
    var v_Nai: fmol_per_s {pub: out};
    var mu_Nao: J_per_mol;
    var v_Nao: fmol_per_s {pub: out};
    var mu_ATP: J_per_mol;
    var v_ATP: fmol_per_s {pub: out};
    var mu_ADP: J_per_mol;
    var v_ADP: fmol_per_s {pub: out};
    var mu_Pi: J_per_mol;
    var v_Pi: fmol_per_s {pub: out};
    var mu_H: J_per_mol;
    var v_H: fmol_per_s {pub: out};
    var v_r1: fmol_per_s;
    var mu_r1_1: J_per_mol;
    var mu_r1_0: J_per_mol;
    var v_r2: fmol_per_s;
    var mu_r2_1: J_per_mol;
    var mu_r2_0: J_per_mol;
    var v_r3: fmol_per_s;
    var mu_r3_1: J_per_mol;
    var mu_r3_0: J_per_mol;
    var v_r4: fmol_per_s;
    var mu_r4_1: J_per_mol;
    var mu_r4_0: J_per_mol;
    var v_r5: fmol_per_s;
    var mu_r5_1: J_per_mol;
    var mu_r5_0: J_per_mol;
    var v_r6: fmol_per_s;
    var mu_r6_1: J_per_mol;
    var mu_r6_0: J_per_mol;
    var t: second {pub: in};
    var q_tot: fmol;
    q_tot = q_1+q_2+q_3+q_4+q_5+q_6;
    var Q_1: dim;
    var Q_2: dim;
    var Q_3: dim;
    var Q_4: dim;
    var Q_5: dim;
    var Q_6: dim;
    Q_1 = K_1*q_1;
    Q_2 = K_2*q_2;
    Q_3 = K_3*q_3;
    Q_4 = K_4*q_4;
    Q_5 = K_5*q_5;
    Q_6 = K_6*q_6;
    mu_1 = R*T*ln(K_1*q_1);
    mu_2 = R*T*ln(K_2*q_2);
    mu_3 = R*T*ln(K_3*q_3);
    mu_4 = R*T*ln(K_4*q_4);
    mu_5 = R*T*ln(K_5*q_5);
    mu_6 = R*T*ln(K_6*q_6);
    v_1 = -v_r1+v_r6;
    v_2 = v_r1-v_r2;
    v_3 = v_r2-v_r3;
    v_4 = v_r3-v_r4;
    v_5 = v_r4-v_r5;
    v_6 = v_r5-v_r6;
    v_Ki = 2{dimensionless}*v_r6;
    v_Ko = -2{dimensionless}*v_r4;
    v_Nai = -3{dimensionless}*v_r1;
    v_Nao = 3{dimensionless}*v_r3;
    v_ATP = -v_r1;
    v_ADP = v_r2;
    v_Pi = v_r5;
    v_H = v_r5;
    mu_Ki = R*T*ln(q_V_i*K_Ki*c_Ki);
    mu_Ko = R*T*ln(q_V_o*K_Ko*c_Ko);
    mu_Nai = R*T*ln(q_V_i*K_Nai*c_Nai);
    mu_Nao = R*T*ln(q_V_o*K_Nao*c_Nao);
    mu_ATP = R*T*ln(q_V_i*K_ATP*c_ATP);
    mu_ADP = R*T*ln(q_V_i*K_ADP*c_ADP);
    mu_Pi = R*T*ln(q_V_i*K_Pi*c_Pi);
    mu_H = R*T*ln(q_V_i*K_H*c_H);
    v_r1 = kappa_r1*(-exp(mu_2/(R*T))+exp((mu_1+mu_ATP+3{dimensionless}*mu_Nai)/(R*T)));
    v_r2 = kappa_r2*(exp(mu_2/(R*T))-exp((mu_3+mu_ADP)/(R*T)));
    v_r3 = kappa_r3*(exp(mu_3/(R*T))-exp((F*u_Vm*z_z2+mu_4+3{dimensionless}*mu_Nao)/(R*T)));
    v_r4 = kappa_r4*(-exp(mu_5/(R*T))+exp((mu_4+2{dimensionless}*mu_Ko)/(R*T)));
    v_r5 = kappa_r5*(exp(mu_5/(R*T))-exp((mu_6+mu_H+mu_Pi)/(R*T)));
    v_r6 = kappa_r6*(exp(mu_6/(R*T))-exp((F*u_Vm*z_z1+mu_1+2{dimensionless}*mu_Ki)/(R*T)));
    mu_r1_1 = mu_2;
    mu_r1_0 = mu_1+mu_ATP+3{dimensionless}*mu_Nai;
    mu_r2_1 = mu_3+mu_ADP;
    mu_r2_0 = mu_2;
    mu_r3_1 = F*u_Vm*z_z2+mu_4+3{dimensionless}*mu_Nao;
    mu_r3_0 = mu_3;
    mu_r4_1 = mu_5;
    mu_r4_0 = mu_4+2{dimensionless}*mu_Ko;
    mu_r5_1 = mu_6+mu_H+mu_Pi;
    mu_r5_0 = mu_5;
    mu_r6_1 = F*u_Vm*z_z1+mu_1+2{dimensionless}*mu_Ki;
    mu_r6_0 = mu_6;
    ode(q_1, t) = -v_r1+v_r6;
    ode(q_2, t) = v_r1-v_r2;
    ode(q_3, t) = v_r2-v_r3;
    ode(q_4, t) = v_r3-v_r4;
    ode(q_5, t) = v_r4-v_r5;
    ode(q_6, t) = v_r5-v_r6;
  enddef;
  // #########################################################
  // #################### Processes ##########################
  // #########################################################
  // paracellular transport

  def comp paracellular_module as
    var t: second {pub: in};
    // currently ignores movement of albumin
    // state variables
    var u_P_pi_o: kPa {pub: in};
    var u_P_pi_i: kPa {pub: in};
    var u_P_pi_diff: kPa;
    var u_mu_e_Na_o: J_per_mmol {pub: in};
    var u_mu_e_Cl_o: J_per_mmol {pub: in};
    var u_mu_e_K_o: J_per_mmol {pub: in};
    var u_mu_e_Na_i: J_per_mmol {pub: in};
    var u_mu_e_Cl_i: J_per_mmol {pub: in};
    var u_mu_e_K_i: J_per_mmol {pub: in};
    var u_mu_e_Na_diff: J_per_mmol;
    var u_mu_e_Cl_diff: J_per_mmol;
    var u_mu_e_K_diff: J_per_mmol;
    var c_Na_o: mM {pub: in};
    var c_Cl_o: mM {pub: in};
    var c_K_o: mM {pub: in};
    var c_Na_i: mM {pub: in};
    var c_Cl_i: mM {pub: in};
    var c_K_i: mM {pub: in};
    var c_Na_bar: mM;
    var c_Cl_bar: mM;
    var c_K_bar: mM;
    c_Na_bar = sel
      case abs(c_Na_o-c_Na_i) < 1e-7{mM}:
        c_Na_o;
      otherwise:
        (c_Na_o-c_Na_i)/ln(c_Na_o/c_Na_i);
    endsel;
    c_K_bar = sel
      case abs(c_K_o-c_K_i) < 1e-7{mM}:
        c_K_o;
      otherwise:
        (c_K_o-c_K_i)/ln(c_K_o/c_K_i);
    endsel;
    c_Cl_bar = sel
      case abs(c_Cl_o-c_Cl_i) < 1e-7{mM}:
        c_Cl_o;
      otherwise:
        (c_Cl_o-c_Cl_i)/ln(c_Cl_o/c_Cl_i);
    endsel;
    var v_Na: fmol_per_s {pub: out};
    var v_Cl: fmol_per_s {pub: out};
    var v_K: fmol_per_s {pub: out};
    var v_V: pL_per_s {pub: out};
    var I_para: picoA {pub: out};
    // constants
    var R: J_per_K_per_mmol {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mmol {pub: in};
    var zNa: dimensionless {pub: in};
    var zCl: dimensionless {pub: in};
    var zK: dimensionless {pub: in};
    // constitutive parameters
    var omega_Na: L_fmol_per_J_per_s {pub: in};
    var omega_Cl: L_fmol_per_J_per_s {pub: in};
    var omega_K: L_fmol_per_J_per_s {pub: in};
    var L_P: pL_L_per_J_per_s {pub: in};
    var sigma_Na: dimensionless {pub: in};
    var sigma_Cl: dimensionless {pub: in};
    var sigma_K: dimensionless {pub: in};
    // conservation laws
    u_P_pi_diff = u_P_pi_o-u_P_pi_i;
    u_mu_e_Na_diff = u_mu_e_Na_o-u_mu_e_Na_i;
    u_mu_e_Cl_diff = u_mu_e_Cl_o-u_mu_e_Cl_i;
    u_mu_e_K_diff = u_mu_e_K_o-u_mu_e_K_i;
    // constitutive relations
    v_V = L_P*((1{dimensionless}-sigma_Na)*c_Na_bar*u_mu_e_Na_diff+(1{dimensionless}-sigma_K)*c_K_bar*u_mu_e_K_diff+(1{dimensionless}-sigma_Cl)*c_Cl_bar*u_mu_e_Cl_diff+u_P_pi_diff);
    v_Na = omega_Na*c_Na_bar*u_mu_e_Na_diff+(1{dimensionless}-sigma_Na)*c_Na_bar*v_V;
    v_Cl = omega_Cl*c_Cl_bar*u_mu_e_Cl_diff+(1{dimensionless}-sigma_Cl)*c_Cl_bar*v_V;
    v_K = omega_K*c_K_bar*u_mu_e_K_diff+(1{dimensionless}-sigma_K)*c_K_bar*v_V;
    I_para = zNa*F*v_Na+zCl*F*v_Cl+zK*F*v_K;
  enddef;
enddef;
